global device ML_STAR ("HH-DNA FA.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLDeckVisualize.hsl" }
 namespace _Method { #include "STAR Tools\\STAR Tip Tools.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLUtilLib2.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "Visual_NTR_Library\\Visual_NTR_library_NTRdiscardEdits.hs_" }
 namespace _Method { #include "GreenLight\\hamSTAR Methods\\HSLTrcLib.hsl" }
#include "HH-DNA FA.res"
dialog customDialog_1;
dialog customDialog_2;
dialog customDialog_3;
dialog customDialog_4;
dialog customDialog_5;
dialog dialogHandle_6;
dialog dialogHandle_7;
dialog dialogHandle_8;
variable t_intNumberofPlates;
variable t_str50CountChannels;
variable t_varDialogue;
dialog dialogHandle_9;
dialog dialogHandle_10;
variable t_intFASampleVolume;
variable t_intFAPlatestoProcess;
variable t_str4ChannelPattern;
variable t_str2ChannelPattern;
variable t_intFABufferVolume;
variable t_intNumberOfPlates;
variable t_intFAControlWellsToProcess;
variable loopCounter1;
variable t_intFAWellsToProcess;
variable loopCounter2;
variable loopCounter8;
variable t_intWellsToProcess;
dialog dialogHandle_11;
dialog customDialog_12;
dialog customDialog_13;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    STAR_TIP_TOOLS::_InitLibrary();
    VISUAL_NTR_LIBRARY_NTRDISCARDEDITS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("\n_________________________________________________________________________________________________\nGreenLight BioSciences\n\nHH-DNA FA\nLast Edit: 11/21/2022\nDesc. 1 or 2 PCR plates are used to create up to two Fragment Analyzer plates. This method is used to confirm the presence of DNA in our PCR plates before proceeding with HH process optimizations. \n\n_________________________________________________________________________________________________\n\n"));
    t_str50CountChannels = Translate("50Channels");
    t_intNumberofPlates = 0;
    t_intFAPlatestoProcess = 0;
    t_str2ChannelPattern = Translate("11000000");
    t_str4ChannelPattern = Translate("11110000");
    t_intFABufferVolume = 22;
    t_intFASampleVolume = 2;
    t_intFAPlatestoProcess = t_intNumberOfPlates;
    STAR_TIP_TOOLS::BuildChannelPattern(2, 8, t_str2ChannelPattern);
    STAR_TIP_TOOLS::BuildChannelPattern(4, 8, t_str4ChannelPattern);
    customDialog_3.InitCustomDialog("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");
    customDialog_3.ShowCustomDialog();
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    customDialog_1.InitCustomDialog("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");
    customDialog_1.SetCustomDialogProperty( "numeric1.Value", t_intNumberofPlates );
    customDialog_1.ShowCustomDialog();
    t_varDialogue = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
    t_intNumberofPlates = customDialog_1.GetCustomDialogProperty( "numeric1.Value" );
    MECC::TraceComment(Translate("**********************Deck Loading Prompts Begin**********************"));
    if (t_intNumberofPlates == 1)
    {
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_PCRPlate_1, 6, Translate("PCR Plate"));
      dialogHandle_6.SetOutput(Translate("Please load PCR Plate at indicated position."));
      dialogHandle_6.ShowOutput(Translate("PCR Plate"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_PCRPlate_1, 5, Translate("PCR Plate"));
    }
    else
    {
      if (t_intNumberofPlates == 2)
      {
        DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_PCRPlates_ALL, 6, Translate("PCR Plates"));
        dialogHandle_8.SetOutput(Translate("Please load PCR Pooled Plates at indicated positions."));
        dialogHandle_8.ShowOutput(Translate("Pool Plates"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_PCRPlates_ALL, 5, Translate("PCR Plates"));
      }
    }
    if (t_intNumberofPlates == 1)
    {
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_FAPlate_1, 6, Translate("FA Plate"));
      dialogHandle_7.SetOutput(Translate("Please load an FA Plate at the indicated position."));
      dialogHandle_7.ShowOutput(Translate("FA Plate"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_FAPlate_1, 5, Translate("FA Plate"));
    }
    else
    {
      if (t_intNumberofPlates == 2)
      {
        DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_FAPlates_ALL, 6, Translate("FA Plates"));
        dialogHandle_11.SetOutput(Translate("Please load FA Plates at the indicated positions."));
        dialogHandle_11.ShowOutput(Translate("FA Plates"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_FAPlates_ALL, 5, Translate("FA Plates"));
      }
    }
    DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_TEBufferTrough, 6, Translate("TE Buffer Trough"));
    dialogHandle_10.SetOutput(Translate("Please load a TE Buffer Trough at the indicated position."));
    dialogHandle_10.ShowOutput(Translate("TE Buffer Trough"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_TEBufferTrough, 5, Translate("TE Buffer Trough"));
    DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_FALadder, 6, Translate("FA Ladder"));
    dialogHandle_9.SetOutput(Translate("Please load the FA Ladder at the indicated position."));
    dialogHandle_9.ShowOutput(Translate("FA Ladder"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_FALadder, 5, Translate("FA Ladder"));
    STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, t_str50CountChannels, 999);
    MECC::TraceComment(Translate("**********************Deck Loading Prompts End**********************"));
    if (t_intNumberofPlates == 1)
    {
      customDialog_5.InitCustomDialog("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");
      customDialog_5.ShowCustomDialog();
    }
    if (t_intNumberofPlates == 2)
    {
      customDialog_2.InitCustomDialog("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");
      customDialog_2.ShowCustomDialog();
    }
    customDialog_13.InitCustomDialog("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");
    customDialog_13.ShowCustomDialog();
    t_varDialogue = customDialog_13.GetCustomDialogProperty( "ReturnValue" );
    MECC::TraceComment(Translate("------------------------------------------------------------------------------------------------------------------------------\n\n                                              FA Plate Prep Begins\n\n------------------------------------------------------------------------------------------------------------------------------"));
    MECC::TraceComment(Translate("******************Buffer Addition Begins**********************"));
    t_intFAPlatestoProcess = t_intNumberofPlates;
    t_intFAWellsToProcess = t_intFAPlatestoProcess * 96;
    t_intFAControlWellsToProcess = t_intFAPlatestoProcess * 2;
    ML_STAR.seq_FAPlates_ALL.SetCount(t_intFAWellsToProcess);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    {
      for(loopCounter1 = 0; loopCounter1 < t_intNumberofPlates;)
      {
        loopCounter1 = loopCounter1 + 1;
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      }
    }
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    SeqResetSequenceIndexes(ML_STAR.seq_FAPlates_ALL);
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, t_str50CountChannels);
    MECC::TraceComment(Translate("******************Buffer Addition End**********************"));
    MECC::TraceComment(Translate("******************Sample Addition Begins**********************"));
    t_intWellsToProcess = t_intNumberofPlates * 96;
    {
      for(loopCounter8 = 0; loopCounter8 < t_intNumberofPlates;)
      {
        loopCounter8 = loopCounter8 + 1;
        ML_STAR.seq_PCRPlates_ALL.SetCount(t_intWellsToProcess);
        ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      }
    }
    ML_STAR.seq_FAPlates_ALL.SetCount(t_intWellsToProcess);
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, t_str50CountChannels);
    if(0){
      STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, t_str50CountChannels, 999);
    }
    MECC::TraceComment(Translate("******************Sample Addition Ends**********************"));
    MECC::TraceComment(Translate("******************Ladder Wells Emptying Begins**********************"));
    t_intFAControlWellsToProcess = t_intNumberofPlates * 2;
    TrcTrace(Translate("_______________ Number of FA Control Wells to Process ----------------------------->"), t_intFAControlWellsToProcess);
    {
      loopCounter2 = 0;
      while (
         (ML_STAR.seq_DNA_FA_ControlWells_ALL.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.seq_DNA_FA_ControlWells_ALL, 1);
        loopCounter2 = loopCounter2 + 1;
        ML_STAR.seq_DNA_FA_ControlWells_ALL.SetCount(t_intFAControlWellsToProcess);
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.seq_DNA_FA_ControlWells_ALL.GetCurrentPosition() > 0 && ML_STAR.seq_DNA_FA_ControlWells_ALL.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.seq_DNA_FA_ControlWells_ALL.SetMax(ML_STAR.seq_DNA_FA_ControlWells_ALL.GetTotal());
      ML_STAR.seq_DNA_FA_ControlWells_ALL.SetCurrentPosition(1);
    }
    ML_STAR.seq_DNA_FA_ControlWells_ALL.SetCount(t_intFAControlWellsToProcess);
    SeqResetSequenceIndexes(ML_STAR.seq_DNA_FA_ControlWells_ALL);
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, t_str50CountChannels);
    MECC::TraceComment(Translate("******************Ladder Wells Emptying Ends**********************"));
    MECC::TraceComment(Translate("******************Ladder Addition Begins**********************"));
    t_intFAControlWellsToProcess = t_intNumberofPlates * 2;
    TrcTrace(Translate("_______________ Number of FA Control Wells to Process ----------------------------->"), t_intFAControlWellsToProcess);
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    {
      while (
         (ML_STAR.seq_DNA_FA_ControlWells_ALL.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.seq_DNA_FA_ControlWells_ALL, 1);
        ML_STAR.seq_DNA_FA_ControlWells_ALL.SetCount(t_intFAControlWellsToProcess);
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (
           (ML_STAR.seq_DNA_FA_ControlWells_ALL.GetCurrentPosition() > 0 && ML_STAR.seq_DNA_FA_ControlWells_ALL.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.seq_DNA_FA_ControlWells_ALL.SetMax(ML_STAR.seq_DNA_FA_ControlWells_ALL.GetTotal());
      ML_STAR.seq_DNA_FA_ControlWells_ALL.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    SeqResetSequenceIndexes(ML_STAR.seq_DNA_FA_ControlWells_ALL);
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, t_str50CountChannels);
    MECC::TraceComment(Translate("******************Ladder Addition Ends**********************"));
    MECC::TraceComment(Translate("------------------------------------------------------------------------------------------------------------------------------\n\n                                              FA Plate Prep Ends\n\n------------------------------------------------------------------------------------------------------------------------------"));
    customDialog_12.InitCustomDialog("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");
    customDialog_12.ShowCustomDialog();
    t_varDialogue = customDialog_12.GetCustomDialogProperty( "ReturnValue" );
    abort;
    STAR_TIP_TOOLS::_ExitLibrary();
    VISUAL_NTR_LIBRARY_NTRDISCARDEDITS::_ExitLibrary();
  } }
