 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "HSLInhecoTEC\\HSLInhecoTECLib.hsl" }
 namespace _Method { #include "STAR Tools\\STAR Tip Tools.hs_" }
 namespace _Method { #include "Visual_NTR_Library\\Visual_NTR_library_NTRdiscardEdits.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLInhecoTEC\\HSLInhecoTECLib.hsl" }
#include "DNAPoolSPRILayout.res"
dialog customDialog_1;
dialog customDialog_2;
variable t_intControlID;
variable t_strCPACError;
variable t_varDialogue;
variable t_intDeviceID;
variable t_intDeckLoading;
timer t_hdlTimer5Minute;
timer t_hdlTimer10Min;
variable t_strChannelPattern;
variable loopCounter3;
dialog customDialog_3;
variable t_intGripperChannel;
variable t_strMPHTipCount;
variable t_strChannelTipCount;
variable loopCounter5;
variable t_fltHHSTemp;
variable t_hdlHHS;
timer t_hdlTimer15Minute;
dialog customDialog_4;
variable t_int3to1;
variable t_int2to1;
variable loopCounter1;
variable t_int1to1;
global device ML_STAR ("DNAPoolSPRILayout.lay", "ML_STAR", hslTrue);
variable loopCounter2;
variable loopCounter4;
dialog customDialog_5;
dialog customDialog_6;
dialog customDialog_7;
dialog customDialog_8;
dialog customDialog_9;
dialog customDialog_10;
dialog customDialog_11;
dialog customDialog_12;
dialog customDialog_13;
variable t_str300MPHTipCount;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    STAR_TIP_TOOLS::_InitLibrary();
    VISUAL_NTR_LIBRARY_NTRDISCARDEDITS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("\n_________________________________________________________________________________________________\nGreenLight BioSciences\nV.2.0.0\nDNA Pool SPRI Cleanup\nLast Edit: 03/31/23\n\nDesc. Purifies 0.3 mL of DNA materia (BspQI digested) from 96 well plate \n\n\n\n_________________________________________________________________________________________________\n"));
    MECC::TraceComment(Translate("Initialize Devices\n"));
    t_int3to1 = 0;
    t_int2to1 = 0;
    t_int1to1 = 0;
    t_intDeckLoading = 0;
    t_intControlID = 0;
    t_intDeviceID = 1;
    t_strMPHTipCount = Translate("");
    t_str300MPHTipCount = Translate("");
    t_strChannelTipCount = Translate("");
    t_strChannelPattern = Translate("11111111");
    t_intGripperChannel = 1;
    customDialog_7.InitCustomDialog("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");
    customDialog_7.ShowCustomDialog();
    t_varDialogue = customDialog_7.GetCustomDialogProperty( "ReturnValue" );
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    t_varDialogue = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    HSLHamHeaterShaker::CreateStarDevice(ML_STAR, 1, t_hdlHHS);
    t_fltHHSTemp = 0;
    HSLHamHeaterShaker::StartTempCtrl(t_hdlHHS, 60, 0);
    HSLHamHeaterShaker::GetTemperature(t_hdlHHS, t_fltHHSTemp);
    TrcTrace(Translate("++++++++++++++++++++++++HHS TEMP++++++++++++++++++++++++:            "), t_fltHHSTemp);
    HSLInhecoTECLib::Initialize(0, 0, t_strCPACError);
    HSLInhecoTECLib::SetTargetTemperature(0, 1, 60.0, t_strCPACError);
    HSLInhecoTECLib::StartTemperatureControl(0, 1, t_strCPACError);
    HSLInhecoTECLib::SetTargetTemperature(0, 2, 60.0, t_strCPACError);
    HSLInhecoTECLib::StartTemperatureControl(0, 2, t_strCPACError);
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    customDialog_5.InitCustomDialog("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");
    customDialog_5.ShowCustomDialog();
    t_varDialogue = customDialog_5.GetCustomDialogProperty( "ReturnValue" );
    STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.seq1000MPHTips, t_strMPHTipCount, 999);
    STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.seq1000Channels, t_strChannelTipCount, 999);
    STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300MPHTipCount, 999);
    customDialog_3.InitCustomDialog("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");
    customDialog_3.SetCustomDialogProperty( "radioButton1.IsChecked", t_int3to1 );
    customDialog_3.SetCustomDialogProperty( "radioButton2.IsChecked", t_int2to1 );
    customDialog_3.SetCustomDialogProperty( "radioButton3.IsChecked", t_int1to1 );
    customDialog_3.ShowCustomDialog();
    t_varDialogue = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
    t_int3to1 = customDialog_3.GetCustomDialogProperty( "radioButton1.IsChecked" );
    t_int2to1 = customDialog_3.GetCustomDialogProperty( "radioButton2.IsChecked" );
    t_int1to1 = customDialog_3.GetCustomDialogProperty( "radioButton3.IsChecked" );
    customDialog_4.InitCustomDialog("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");
    customDialog_4.ShowCustomDialog();
    t_varDialogue = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.seq1000Channels, t_strChannelTipCount, 96);
    STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, ML_STAR.seq1000Channels, t_strChannelTipCount, t_strChannelPattern);
    {
      loopCounter3 = 0;
      while (
         (ML_STAR.seqSPRI_1.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.seqSPRI_1, 1);
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        SeqIncrement(ML_STAR.DNAPoolPlate, 8);
        SeqIncrement(ML_STAR.seqSPRI_1, 8);
        if (
           (ML_STAR.seqSPRI_1.GetCurrentPosition() > 0 && ML_STAR.seqSPRI_1.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.seqSPRI_1.SetMax(ML_STAR.seqSPRI_1.GetTotal());
      ML_STAR.seqSPRI_1.SetCurrentPosition(1);
    }
    {
      loopCounter3 = 0;
      while (
         (ML_STAR.seqSPRI_2.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.seqSPRI_2, 1);
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        SeqIncrement(ML_STAR.DNAPoolPlate, 8);
        SeqIncrement(ML_STAR.seqSPRI_2, 8);
        if (
           (ML_STAR.seqSPRI_2.GetCurrentPosition() > 0 && ML_STAR.seqSPRI_2.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.seqSPRI_2.SetMax(ML_STAR.seqSPRI_2.GetTotal());
      ML_STAR.seqSPRI_2.SetCurrentPosition(1);
    }
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.seq1000Channels, t_strChannelTipCount);
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.seq1000MPHTips, t_strMPHTipCount, 96);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    if (t_int3to1 == 1)
    {
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    }
    if (t_int2to1 == 1)
    {
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    }
    if (t_int1to1 == 1)
    {
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    }
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, t_strMPHTipCount);
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.seq1000MPHTips, t_strMPHTipCount, 96);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    if (t_int3to1 == 1)
    {
      customDialog_13.InitCustomDialog("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");
      customDialog_13.ShowCustomDialog();
      t_varDialogue = customDialog_13.GetCustomDialogProperty( "ReturnValue" );
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    }
    if (t_int2to1 == 1)
    {
      customDialog_9.InitCustomDialog("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");
      customDialog_9.ShowCustomDialog();
      t_varDialogue = customDialog_9.GetCustomDialogProperty( "ReturnValue" );
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    }
    if (t_int1to1 == 1)
    {
      customDialog_8.InitCustomDialog("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");
      customDialog_8.ShowCustomDialog();
      t_varDialogue = customDialog_8.GetCustomDialogProperty( "ReturnValue" );
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    }
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, t_strMPHTipCount);
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.seq1000MPHTips, t_strMPHTipCount, 96);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    if (t_int3to1 == 1)
    {
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    }
    if (t_int2to1 == 1)
    {
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    }
    if (t_int1to1 == 1)
    {
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    }
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, t_strMPHTipCount);
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.seq1000MPHTips, t_strMPHTipCount, 96);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    if (t_int3to1 == 1)
    {
      customDialog_12.InitCustomDialog("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");
      customDialog_12.ShowCustomDialog();
      t_varDialogue = customDialog_12.GetCustomDialogProperty( "ReturnValue" );
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    }
    if (t_int2to1 == 1)
    {
      customDialog_11.InitCustomDialog("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");
      customDialog_11.ShowCustomDialog();
      t_varDialogue = customDialog_11.GetCustomDialogProperty( "ReturnValue" );
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    }
    if (t_int1to1 == 1)
    {
      customDialog_10.InitCustomDialog("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");
      customDialog_10.ShowCustomDialog();
      t_varDialogue = customDialog_10.GetCustomDialogProperty( "ReturnValue" );
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    }
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, t_strMPHTipCount);
    if( 0 == t_hdlTimer5Minute.SetTimer(300) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == t_hdlTimer5Minute.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    t_intGripperChannel = t_intGripperChannel + 1;
    if (t_intGripperChannel > 8)
    {
      t_intGripperChannel = 2;
    }
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    if( 0 == t_hdlTimer10Min.SetTimer(600) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == t_hdlTimer10Min.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.seq1000MPHTips, t_strMPHTipCount, 96);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.seq1000MPHTips, t_strMPHTipCount);
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.seq1000MPHTips, t_strMPHTipCount, 96);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.seq1000MPHTips, t_strMPHTipCount);
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.seq1000MPHTips, t_strMPHTipCount, 96);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.seq1000MPHTips, t_strMPHTipCount);
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.seq1000MPHTips, t_strMPHTipCount, 96);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.seq1000MPHTips, t_strMPHTipCount);
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.seq1000Channels, t_strChannelTipCount, 48);
    STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, ML_STAR.seq1000Channels, t_strChannelTipCount, t_strChannelPattern);
    {
      loopCounter5 = 0;
      while (
         (ML_STAR.seqMagnetSPRI_1.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.seqMagnetSPRI_1, 1);
        loopCounter5 = loopCounter5 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        SeqIncrement(ML_STAR.seqMagnetSPRI_1, 8);
        if (
           (ML_STAR.seqMagnetSPRI_1.GetCurrentPosition() > 0 && ML_STAR.seqMagnetSPRI_1.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.seqMagnetSPRI_1.SetMax(ML_STAR.seqMagnetSPRI_1.GetTotal());
      ML_STAR.seqMagnetSPRI_1.SetCurrentPosition(1);
    }
    {
      loopCounter5 = 0;
      while (
         (ML_STAR.seqMagnetSPRI_2.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.seqMagnetSPRI_2, 1);
        loopCounter5 = loopCounter5 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        SeqIncrement(ML_STAR.seqMagnetSPRI_2, 8);
        if (
           (ML_STAR.seqMagnetSPRI_2.GetCurrentPosition() > 0 && ML_STAR.seqMagnetSPRI_2.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.seqMagnetSPRI_2.SetMax(ML_STAR.seqMagnetSPRI_2.GetTotal());
      ML_STAR.seqMagnetSPRI_2.SetCurrentPosition(1);
    }
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.seq1000MPHTips, t_strMPHTipCount, 96);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.seq1000MPHTips, t_strMPHTipCount, 96);
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.seq1000MPHTips, t_strMPHTipCount, 96);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.seq1000MPHTips, t_strMPHTipCount, 96);
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.seq1000MPHTips, t_strMPHTipCount, 96);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.seq1000MPHTips, t_strMPHTipCount, 96);
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.seq1000MPHTips, t_strMPHTipCount, 96);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.seq1000MPHTips, t_strMPHTipCount, 96);
    if( 0 == t_hdlTimer5Minute.SetTimer(300) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == t_hdlTimer5Minute.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.seq1000Channels, t_strChannelTipCount, 48);
    STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, ML_STAR.seq1000Channels, t_strChannelTipCount, t_strChannelPattern);
    {
      loopCounter5 = 0;
      while (
         (ML_STAR.seqMagnetSPRI_1.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.seqMagnetSPRI_1, 1);
        loopCounter5 = loopCounter5 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        {
          for(loopCounter2 = 0; loopCounter2 < 2;)
          {
            loopCounter2 = loopCounter2 + 1;
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          }
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        SeqIncrement(ML_STAR.seqMagnetSPRI_1, 8);
        if (
           (ML_STAR.seqMagnetSPRI_1.GetCurrentPosition() > 0 && ML_STAR.seqMagnetSPRI_1.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.seqMagnetSPRI_1.SetMax(ML_STAR.seqMagnetSPRI_1.GetTotal());
      ML_STAR.seqMagnetSPRI_1.SetCurrentPosition(1);
    }
    {
      loopCounter5 = 0;
      while (
         (ML_STAR.seqMagnetSPRI_2.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.seqMagnetSPRI_2, 1);
        loopCounter5 = loopCounter5 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        {
          for(loopCounter4 = 0; loopCounter4 < 2;)
          {
            loopCounter4 = loopCounter4 + 1;
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          }
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        SeqIncrement(ML_STAR.seqMagnetSPRI_2, 8);
        if (
           (ML_STAR.seqMagnetSPRI_2.GetCurrentPosition() > 0 && ML_STAR.seqMagnetSPRI_2.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.seqMagnetSPRI_2.SetMax(ML_STAR.seqMagnetSPRI_2.GetTotal());
      ML_STAR.seqMagnetSPRI_2.SetCurrentPosition(1);
    }
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    if( 0 == t_hdlTimer15Minute.SetTimer(900) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == t_hdlTimer15Minute.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    if( 0 == t_hdlTimer15Minute.SetTimer(900) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300MPHTipCount, 96);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300MPHTipCount, 96);
    if( 0 == t_hdlTimer15Minute.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300MPHTipCount, 96);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300MPHTipCount, 96);
    if( 0 == t_hdlTimer5Minute.SetTimer(300) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == t_hdlTimer5Minute.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.seq1000Channels, t_strChannelTipCount, 48);
    STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, ML_STAR.seq1000Channels, t_strChannelTipCount, t_strChannelPattern);
    {
      loopCounter5 = 0;
      while (
         (ML_STAR.seqMagnetSPRI_1.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.seqMagnetSPRI_1, 1);
        loopCounter5 = loopCounter5 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        {
          for(loopCounter1 = 0; loopCounter1 < 2;)
          {
            loopCounter1 = loopCounter1 + 1;
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          }
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        SeqIncrement(ML_STAR.seqMagnetSPRI_1, 8);
        SeqIncrement(ML_STAR.SPRICleanedPlate, 8);
        if (
           (ML_STAR.seqMagnetSPRI_1.GetCurrentPosition() > 0 && ML_STAR.seqMagnetSPRI_1.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.seqMagnetSPRI_1.SetMax(ML_STAR.seqMagnetSPRI_1.GetTotal());
      ML_STAR.seqMagnetSPRI_1.SetCurrentPosition(1);
    }
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    if( 0 == t_hdlTimer5Minute.SetTimer(300) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == t_hdlTimer5Minute.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.seq1000Channels, t_strChannelTipCount, 48);
    STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, ML_STAR.seq1000Channels, t_strChannelTipCount, t_strChannelPattern);
    {
      loopCounter5 = 0;
      while (
         (ML_STAR.seqMagnetSPRI_2.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.seqMagnetSPRI_2, 1);
        loopCounter5 = loopCounter5 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        {
          for(loopCounter1 = 0; loopCounter1 < 2;)
          {
            loopCounter1 = loopCounter1 + 1;
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          }
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        SeqIncrement(ML_STAR.seqMagnetSPRI_2, 8);
        SeqIncrement(ML_STAR.SPRICleanedPlate, 8);
        if (
           (ML_STAR.seqMagnetSPRI_2.GetCurrentPosition() > 0 && ML_STAR.seqMagnetSPRI_2.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.seqMagnetSPRI_2.SetMax(ML_STAR.seqMagnetSPRI_2.GetTotal());
      ML_STAR.seqMagnetSPRI_2.SetCurrentPosition(1);
    }
    customDialog_2.InitCustomDialog("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");
    customDialog_2.ShowCustomDialog();
    customDialog_6.InitCustomDialog("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");
    customDialog_6.ShowCustomDialog();
    t_varDialogue = customDialog_6.GetCustomDialogProperty( "ReturnValue" );
    HSLInhecoTECLib::Terminate(1);
    HSLHamHeaterShaker::StopTempCtrl(t_hdlHHS);
    HSLHamHeaterShaker::Terminate();
    STAR_TIP_TOOLS::_ExitLibrary();
    VISUAL_NTR_LIBRARY_NTRDISCARDEDITS::_ExitLibrary();
  } }
