global device ML_STAR ("DNA_Spec_MAS.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "STAR Tools\\STAR Tip Tools.hs_" }
 namespace _Method { #include "HSLTrcLib.hsl" }
#include "DNA_Spec_MAS.res"
dialog customDialog_1;
variable t_varDialogue;
dialog customDialog_2;
variable Number_of_Plates;
variable t_str300MPHTipCount;
variable loopCounter1;
dialog customDialog_3;
dialog customDialog_4;
variable Number_of_Plates_Calculation;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    STAR_TIP_TOOLS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("################################\nDNA Spec MAS 1.0.0\n5x dilution; 40ul of DNA into 160ul H20\nMeasured on half area\n###############################\n"));
    customDialog_3.InitCustomDialog("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");
    customDialog_3.ShowCustomDialog();
    t_str300MPHTipCount = Translate("300MPH");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.seq_MlStar300ulSVTwithFilter_96MPH, t_str300MPHTipCount, 576);
    customDialog_2.InitCustomDialog("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");
    customDialog_2.SetCustomDialogProperty( "Number_of_Plates.Value", Number_of_Plates );
    customDialog_2.ShowCustomDialog();
    t_varDialogue = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
    Number_of_Plates = customDialog_2.GetCustomDialogProperty( "Number_of_Plates.Value" );
    Number_of_Plates_Calculation = Number_of_Plates * 96;
    TrcTrace(Translate("Number_of_Plates = "), Number_of_Plates);
    TrcTrace(Translate("Number_of_Plates_Calculation = "), Number_of_Plates_Calculation);
    ML_STAR.Seq_HalfAreaPlate_Pos_1_192.SetCount(Number_of_Plates_Calculation);
    ML_STAR.Seq_Purified_DNA_Pos_1_192.SetCount(Number_of_Plates_Calculation);
    ML_STAR.Seq_Dilution_Plate_Pos_1_192.SetCount(Number_of_Plates_Calculation);
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    t_varDialogue = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    {
      loopCounter1 = 0;
      while (
         (ML_STAR.Seq_Dilution_Plate_Pos_1_192.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Seq_Dilution_Plate_Pos_1_192, 1, ML_STAR.seq_MlStar300ulSVTwithFilter_96MPH, 1);
        loopCounter1 = loopCounter1 + 1;
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        if (
           (ML_STAR.Seq_Dilution_Plate_Pos_1_192.GetCurrentPosition() > 0 && ML_STAR.Seq_Dilution_Plate_Pos_1_192.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Seq_Dilution_Plate_Pos_1_192.SetMax(ML_STAR.Seq_Dilution_Plate_Pos_1_192.GetTotal());
      ML_STAR.seq_MlStar300ulSVTwithFilter_96MPH.SetMax(ML_STAR.seq_MlStar300ulSVTwithFilter_96MPH.GetTotal());
      ML_STAR.Seq_Dilution_Plate_Pos_1_192.SetCurrentPosition(1);
    }
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    {
      loopCounter1 = 0;
      while (
         (ML_STAR.Seq_Purified_DNA_Pos_1_192.GetCurrentPosition() > 0)
      && (ML_STAR.Seq_Dilution_Plate_Pos_1_192.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Seq_Purified_DNA_Pos_1_192, 1, ML_STAR.seq_MlStar300ulSVTwithFilter_96MPH, 1, ML_STAR.Seq_Dilution_Plate_Pos_1_192, 1);
        loopCounter1 = loopCounter1 + 1;
        ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
        if (
           (ML_STAR.Seq_Purified_DNA_Pos_1_192.GetCurrentPosition() > 0 && ML_STAR.Seq_Purified_DNA_Pos_1_192.GetMax() == 0 )
        && (ML_STAR.Seq_Dilution_Plate_Pos_1_192.GetCurrentPosition() > 0 && ML_STAR.Seq_Dilution_Plate_Pos_1_192.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Seq_Purified_DNA_Pos_1_192.SetMax(ML_STAR.Seq_Purified_DNA_Pos_1_192.GetTotal());
      ML_STAR.seq_MlStar300ulSVTwithFilter_96MPH.SetMax(ML_STAR.seq_MlStar300ulSVTwithFilter_96MPH.GetTotal());
      ML_STAR.Seq_Dilution_Plate_Pos_1_192.SetMax(ML_STAR.Seq_Dilution_Plate_Pos_1_192.GetTotal());
      ML_STAR.Seq_Purified_DNA_Pos_1_192.SetCurrentPosition(1);
      ML_STAR.Seq_Dilution_Plate_Pos_1_192.SetCurrentPosition(1);
    }
    {
      loopCounter1 = 0;
      while (
         (ML_STAR.Seq_Dilution_Plate_Pos_1_192.GetCurrentPosition() > 0)
      && (ML_STAR.Seq_HalfAreaPlate_Pos_1_192.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Seq_Dilution_Plate_Pos_1_192, 1, ML_STAR.seq_MlStar300ulSVTwithFilter_96MPH, 1, ML_STAR.Seq_HalfAreaPlate_Pos_1_192, 1);
        loopCounter1 = loopCounter1 + 1;
        ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
        if (
           (ML_STAR.Seq_Dilution_Plate_Pos_1_192.GetCurrentPosition() > 0 && ML_STAR.Seq_Dilution_Plate_Pos_1_192.GetMax() == 0 )
        && (ML_STAR.Seq_HalfAreaPlate_Pos_1_192.GetCurrentPosition() > 0 && ML_STAR.Seq_HalfAreaPlate_Pos_1_192.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Seq_Dilution_Plate_Pos_1_192.SetMax(ML_STAR.Seq_Dilution_Plate_Pos_1_192.GetTotal());
      ML_STAR.seq_MlStar300ulSVTwithFilter_96MPH.SetMax(ML_STAR.seq_MlStar300ulSVTwithFilter_96MPH.GetTotal());
      ML_STAR.Seq_HalfAreaPlate_Pos_1_192.SetMax(ML_STAR.Seq_HalfAreaPlate_Pos_1_192.GetTotal());
      ML_STAR.Seq_Dilution_Plate_Pos_1_192.SetCurrentPosition(1);
      ML_STAR.Seq_HalfAreaPlate_Pos_1_192.SetCurrentPosition(1);
    }
    customDialog_4.InitCustomDialog("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");
    customDialog_4.ShowCustomDialog();
    STAR_TIP_TOOLS::_ExitLibrary();
  } }
