global device ML_STAR ("DNA_Spec_MAS.lay", "ML_STAR", hslTrue);
#include "DNA_Spec_MAS.res"
dialog customDialog_1;
variable t_varDialogue;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("################################\nDNA Spec MAS 1.0.0\n5x dilution; 40ul of DNA into 160ul H20\nMeasured on half area\n###############################\n"));
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    t_varDialogue = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
  } }
