private function DNAseAddition(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
}

private function DNAseAddition(  ) void {
  private variable loopCounter1;
  private variable t_int2IVTPlates;
  private variable loopCounter2;
  private variable loopCounter3;
  private variable loopCounter4;
  t_intWellsToProcess = t_intNumberOfPlates * 96;
  TrcTrace(Translate("_______________Number of IVT Plates to process------------------------->>>>>>>>>>"), t_intNumberOfPlates);
  if (t_intNumberOfPlates >= 1)
  {
    ML_STAR.IVTPlate_1.SetCount(t_intWellsToProcess);
    {
      loopCounter1 = 0;
      while (
         (ML_STAR.DNAsePlate_1.GetCurrentPosition() > 0)
      && (ML_STAR.IVTPlate_1.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.DNAsePlate_1, 1, ML_STAR.IVTPlate_1, 1);
        loopCounter1 = loopCounter1 + 1;
        STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300CountChannels, 96);
        ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
        if (
           (ML_STAR.DNAsePlate_1.GetCurrentPosition() > 0 && ML_STAR.DNAsePlate_1.GetMax() == 0 )
        && (ML_STAR.IVTPlate_1.GetCurrentPosition() > 0 && ML_STAR.IVTPlate_1.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.DNAsePlate_1.SetMax(ML_STAR.DNAsePlate_1.GetTotal());
      ML_STAR.IVTPlate_1.SetMax(ML_STAR.IVTPlate_1.GetTotal());
      ML_STAR.DNAsePlate_1.SetCurrentPosition(1);
      ML_STAR.IVTPlate_1.SetCurrentPosition(1);
    }
    SeqResetSequenceIndexes(ML_STAR.IVTPlate_1);
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.IVTPlate_4, t_str300CountChannels);
  }
  if (t_intNumberOfPlates >= 2)
  {
    if(0){
      t_int2IVTPlates = t_intWellsToProcess - 96;
    }
    {
      loopCounter2 = 0;
      while (
         (ML_STAR.DNAsePlate_2.GetCurrentPosition() > 0)
      && (ML_STAR.IVTPlate_2.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.DNAsePlate_2, 1, ML_STAR.IVTPlate_2, 1);
        loopCounter2 = loopCounter2 + 1;
        STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300CountChannels, 96);
        ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
        if (
           (ML_STAR.DNAsePlate_2.GetCurrentPosition() > 0 && ML_STAR.DNAsePlate_2.GetMax() == 0 )
        && (ML_STAR.IVTPlate_2.GetCurrentPosition() > 0 && ML_STAR.IVTPlate_2.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.DNAsePlate_2.SetMax(ML_STAR.DNAsePlate_2.GetTotal());
      ML_STAR.IVTPlate_2.SetMax(ML_STAR.IVTPlate_2.GetTotal());
      ML_STAR.DNAsePlate_2.SetCurrentPosition(1);
      ML_STAR.IVTPlate_2.SetCurrentPosition(1);
    }
    SeqResetSequenceIndexes(ML_STAR.IVTPlate_2);
    ML_STAR.IVTPlate_2.SetCount(t_intWellsToProcess);
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.IVTPlate_4, t_str300CountChannels);
  }
  if (t_intNumberOfPlates >= 3)
  {
    {
      loopCounter3 = 0;
      while (
         (ML_STAR.DNAsePlate_3.GetCurrentPosition() > 0)
      && (ML_STAR.IVTPlate_3.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.DNAsePlate_3, 1, ML_STAR.IVTPlate_3, 1);
        loopCounter3 = loopCounter3 + 1;
        STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300CountChannels, 96);
        ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
        if (
           (ML_STAR.DNAsePlate_3.GetCurrentPosition() > 0 && ML_STAR.DNAsePlate_3.GetMax() == 0 )
        && (ML_STAR.IVTPlate_3.GetCurrentPosition() > 0 && ML_STAR.IVTPlate_3.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.DNAsePlate_3.SetMax(ML_STAR.DNAsePlate_3.GetTotal());
      ML_STAR.IVTPlate_3.SetMax(ML_STAR.IVTPlate_3.GetTotal());
      ML_STAR.DNAsePlate_3.SetCurrentPosition(1);
      ML_STAR.IVTPlate_3.SetCurrentPosition(1);
    }
    SeqResetSequenceIndexes(ML_STAR.IVTPlate_3);
    ML_STAR.IVTPlate_3.SetCount(t_intWellsToProcess);
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.IVTPlate_4, t_str300CountChannels);
  }
  if (t_intNumberOfPlates >= 4)
  {
    {
      loopCounter4 = 0;
      while (
         (ML_STAR.DNAsePlate_4.GetCurrentPosition() > 0)
      && (ML_STAR.IVTPlate_4.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.DNAsePlate_4, 1, ML_STAR.IVTPlate_4, 1);
        loopCounter4 = loopCounter4 + 1;
        STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300CountChannels, 96);
        ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
        if (
           (ML_STAR.DNAsePlate_4.GetCurrentPosition() > 0 && ML_STAR.DNAsePlate_4.GetMax() == 0 )
        && (ML_STAR.IVTPlate_4.GetCurrentPosition() > 0 && ML_STAR.IVTPlate_4.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.DNAsePlate_4.SetMax(ML_STAR.DNAsePlate_4.GetTotal());
      ML_STAR.IVTPlate_4.SetMax(ML_STAR.IVTPlate_4.GetTotal());
      ML_STAR.DNAsePlate_4.SetCurrentPosition(1);
      ML_STAR.IVTPlate_4.SetCurrentPosition(1);
    }
    SeqResetSequenceIndexes(ML_STAR.IVTPlate_4);
    ML_STAR.IVTPlate_4.SetCount(t_intWellsToProcess);
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.IVTPlate_4, t_str300CountChannels);
  }
}
