 namespace _Method { #include "HSLDeckVisualize.hsl" }
 namespace _Method { #include "HSLInhecoTEC\\HSLInhecoTECLib.hsl" }
 namespace _Method { #include "GreenLight\\hamSTAR Methods\\HSLTrcLib.hsl" }
 namespace _Method { #include "STAR Tools\\STAR Tip Tools.hs_" }
 namespace _Method { #include "HSLUtilLib.hsl" }
 namespace _Method { #include "HSLUtilLib2.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
#include "DNAse Addition Protocol_MAS.res"
dialog customDialog_1;
dialog customDialog_2;
dialog customDialog_3;
dialog customDialog_4;
dialog dialogHandle_5;
dialog customDialog_6;
dialog customDialog_7;
variable t_intControlID;
variable t_str300CountChannels;
variable t_str300ulVolumeTips;
variable t_strCPACError;
variable t_intWellsToProcess;
variable t_varDialogue;
variable t_strCPACSN;
variable t_intDeviceID;
variable t_intNumberOfPlates;
variable t_fltTemperature;
dialog dialogHandle_8;
dialog dialogHandle_9;
dialog dialogHandle_10;
dialog dialogHandle_11;
dialog dialogHandle_12;
dialog dialogHandle_13;
dialog dialogHandle_14;
dialog dialogHandle_15;
global device ML_STAR ("DNAse Addition Protocol_MAS.lay", "ML_STAR", hslTrue);
dialog customDialog_16;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    STAR_TIP_TOOLS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("\n_________________________________________________________________________________________________\nGreenLight BioSciences\nDNAse Addition Protocol\nLast Edit: 8/16/2022\nDesc.: This method adds 100ul of DNAse into each 96DW IVT Reaction Plate, after being heat killed @ 80° C for 0.5 hrs.?\nIt can add DNAse to up to 4 plates total. \n\n_________________________________________________________________________________________________\n"));
    t_str300ulVolumeTips = 0;
    t_intNumberOfPlates = 0;
    t_str300CountChannels = Translate("300Channels");
    t_intWellsToProcess = t_intNumberOfPlates * 96;
    MECC::TraceComment(Translate("Initialize Devices\n"));
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    t_varDialogue = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
    HSLInhecoTECLib::Initialize(t_intControlID, 0, t_strCPACError);
    HSLInhecoTECLib::GetDeviceSerialNumber(t_intControlID, t_intDeviceID, t_strCPACSN, t_strCPACError);
    TrcTrace(Translate("CPAC Serial Number: "), t_strCPACSN);
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    HSLInhecoTECLib::SetTargetTemperature(t_intControlID, t_intDeviceID, 4.0, t_strCPACError);
    HSLInhecoTECLib::StartTemperatureControl(t_intControlID, t_intDeviceID, t_strCPACError);
    HSLInhecoTECLib::GetActualDeviceTemperature(t_intControlID, t_intDeviceID, 1, t_fltTemperature, t_strCPACError);
    if(0){
      ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    }
    customDialog_7.InitCustomDialog("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");
    customDialog_7.ShowCustomDialog();
    customDialog_3.InitCustomDialog("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");
    customDialog_3.SetCustomDialogProperty( "numeric1.Value", t_intNumberOfPlates );
    customDialog_3.ShowCustomDialog();
    t_varDialogue = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
    t_intNumberOfPlates = customDialog_3.GetCustomDialogProperty( "numeric1.Value" );
    customDialog_16.InitCustomDialog("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");
    customDialog_16.ShowCustomDialog();
    t_varDialogue = customDialog_16.GetCustomDialogProperty( "ReturnValue" );
    TrcTrace(Translate("_______________ Number of Plates is ----------------------------->"), t_intNumberOfPlates);
    MECC::TraceComment(Translate("************************************Deck Loading Begins*************************************"));
    if (t_intNumberOfPlates == 1)
    {
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.IVTPlate_1, 6, Translate("IVT Plate 1"));
      dialogHandle_10.SetOutput(Translate("Please load your IVT reaction plate at the indicated position."));
      dialogHandle_10.ShowOutput(Translate("IVT Plates"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.IVTPlate_1, 5, Translate("IVT Plate 1"));
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.DNAsePlate_1, 6, Translate("DNAse Plate 1"));
      dialogHandle_14.SetOutput(Translate("Please load the DNAse plate at the indicated position."));
      dialogHandle_14.ShowOutput(Translate("DNAse Plates"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.DNAsePlate_1, 5, Translate("DNAse Plate 1"));
    }
    if (t_intNumberOfPlates == 2)
    {
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_2IVTPlates, 6, Translate("2 IVT Plates"));
      dialogHandle_12.SetOutput(Translate("Please load your IVT reaction plates at the indicated position."));
      dialogHandle_12.ShowOutput(Translate("2 IVT Plates"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_2IVTPlates, 5, Translate("2 IVT Plates"));
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_2DNAsePlates, 6, Translate("2 DNAse Plates"));
      dialogHandle_15.SetOutput(Translate("Please load your DNAse plates at the indicated position."));
      dialogHandle_15.ShowOutput(Translate("2 DNAse Plates"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_2DNAsePlates, 5, Translate("2 DNAse Plates"));
    }
    if (t_intNumberOfPlates == 3)
    {
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_3IVTPlates, 6, Translate("3 IVT Plates"));
      dialogHandle_8.SetOutput(Translate("Please load your IVT reaction plates at the indicated position."));
      dialogHandle_8.ShowOutput(Translate("3 IVT Plates"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_3IVTPlates, 5, Translate("3 IVT Plates"));
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_3DNAsePlates, 6, Translate("3 DNAse Plates"));
      dialogHandle_11.SetOutput(Translate("Please load your DNAse plates at the indicated position."));
      dialogHandle_11.ShowOutput(Translate("3 DNAse Plates"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_3DNAsePlates, 5, Translate("3 DNAse Plates"));
    }
    if (t_intNumberOfPlates == 4)
    {
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_4IVTPlates, 6, Translate("4 IVT Plates"));
      dialogHandle_13.SetOutput(Translate("Please load your IVT reaction plates at the indicated position."));
      dialogHandle_13.ShowOutput(Translate("4 IVT Plates"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_4IVTPlates, 5, Translate("4 IVT Plates"));
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_4DNAsePlates, 6, Translate("4 DNAse Plates"));
      dialogHandle_9.SetOutput(Translate("Please load your DNAse plates at the indicated position."));
      dialogHandle_9.ShowOutput(Translate("4 DNAse Plates"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_4DNAsePlates, 5, Translate("4 DNAse Plates"));
    }
    DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 6, Translate("300ul Filtered Tips"));
    dialogHandle_5.SetOutput(Translate("Please load 300ul Filtered Tips at the indicated position."));
    dialogHandle_5.ShowOutput(Translate("300ul Filtered Tips"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 5, Translate("300ul Filtered Tips"));
    STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300CountChannels, 999);
    customDialog_6.InitCustomDialog("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");
    customDialog_6.ShowCustomDialog();
    MECC::TraceComment(Translate("************************************Deck Loading Ends*************************************"));
    customDialog_2.InitCustomDialog("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");
    customDialog_2.ShowCustomDialog();
    t_varDialogue = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
    HSLInhecoTECLib::GetActualDeviceTemperature(t_intControlID, t_intDeviceID, 1, t_fltTemperature, t_strCPACError);
    TrcTrace(Translate("Temperature : "), t_fltTemperature);
    MECC::TraceComment(Translate("+++++++++++++++++++++++<DNAse Addition Begins>++++++++++++++++++++++++++"));
    DNAseAddition();
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    MECC::TraceComment(Translate("+++++++++++++++++++++++<DNAse Addition Ends>++++++++++++++++++++++++++++"));
    customDialog_4.InitCustomDialog("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");
    customDialog_4.ShowCustomDialog();
    t_varDialogue = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
    HSLInhecoTECLib::StopTemperatureControl(t_intControlID, t_intDeviceID, t_strCPACError);
    HSLInhecoTECLib::Terminate(1);
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300CountChannels);
    abort;
    STAR_TIP_TOOLS::_ExitLibrary();
  } }
