global device ML_STAR ("Digestion Protocol.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "STAR Tools\\STAR Tip Tools.hs_" }
 namespace _Method { #include "HSLInhecoTEC\\HSLInhecoTECLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLDeckVisualize.hsl" }
 namespace _Method { #include "HSLDevLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLUtilLib2.hsl" }
 namespace _Method { #include "Visual_NTR_Library\\Visual_NTR_library_NTRdiscardEdits.hs_" }
#include "Digestion Protocol.res"
dialog customDialog_1;
dialog customDialog_2;
dialog customDialog_3;
dialog customDialog_4;
variable t_varDialogue;
dialog customDialog_5;
dialog customDialog_6;
variable t_intControlID;
variable t_strCPACError;
variable t_strCPACSN;
variable t_intDeviceID;
variable t_intNumberOfPlates;
variable t_fltTemperature;
variable t_intWellsToProcess;
dialog dialogHandle_7;
dialog dialogHandle_8;
dialog dialogHandle_9;
dialog dialogHandle_10;
dialog dialogHandle_11;
variable t_intEnzymeAddition;
dialog dialogHandle_12;
variable t_str300CountChannels;
variable t_str300ulVolumeTips;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    STAR_TIP_TOOLS::_InitLibrary();
    VISUAL_NTR_LIBRARY_NTRDISCARDEDITS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("\n_________________________________________________________________________________________________\nGreenLight BioSciences\nDigestion Enzyme Addition\nLast Edit: 8/16/2022\nDesc.: This method adds 15ul of digestion enzyme into each PCR plate, after coming off of the thermocyclers. \nIt can add digestion enzyme to up to 12 pcr plates at a time. \n\n_________________________________________________________________________________________________\n"));
    t_str300ulVolumeTips = 0;
    t_intNumberOfPlates = 0;
    t_str300CountChannels = Translate("300Channels");
    t_intWellsToProcess = t_intNumberOfPlates * 96;
    MECC::TraceComment(Translate("Initialize Devices\n"));
    customDialog_4.InitCustomDialog("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");
    customDialog_4.ShowCustomDialog();
    t_varDialogue = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
    if(0){
      HSLInhecoTECLib::Initialize(t_intControlID, 0, t_strCPACError);
      HSLInhecoTECLib::GetDeviceSerialNumber(t_intControlID, t_intDeviceID, t_strCPACSN, t_strCPACError);
      TrcTrace(Translate("CPAC Serial Number: "), t_strCPACSN);
    }
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    if(0){
      HSLInhecoTECLib::SetTargetTemperature(t_intControlID, t_intDeviceID, 4.0, t_strCPACError);
      HSLInhecoTECLib::StartTemperatureControl(t_intControlID, t_intDeviceID, t_strCPACError);
      HSLInhecoTECLib::GetActualDeviceTemperature(t_intControlID, t_intDeviceID, 1, t_fltTemperature, t_strCPACError);
    }
    ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    if(0){
      customDialog_5.InitCustomDialog("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");
      customDialog_5.ShowCustomDialog();
    }
    customDialog_1.InitCustomDialog("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");
    customDialog_1.SetCustomDialogProperty( "numeric1.Value", t_intNumberOfPlates );
    customDialog_1.ShowCustomDialog();
    t_varDialogue = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
    t_intNumberOfPlates = customDialog_1.GetCustomDialogProperty( "numeric1.Value" );
    TrcTrace(Translate("_______________ Number of Plates is ----------------------------->"), t_intNumberOfPlates);
    MECC::TraceComment(Translate("************************************Deck Loading Begins*************************************"));
    if (t_intNumberOfPlates == 1)
    {
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.PCRPlate_1, 6, Translate("1 PCR Plate"));
      dialogHandle_11.SetOutput(Translate("Please load 1 PCR plate at the indicated positions, working from the top left, to the bottom right."));
      dialogHandle_11.ShowOutput(Translate("PCR Plate"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.PCRPlate_1, 5, Translate("1 PCR Plate"));
    }
    if (t_intNumberOfPlates == 2)
    {
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.PCRPlates_1to2, 6, Translate("2 PCR Plates"));
      dialogHandle_10.SetOutput(Translate("Please load 2 PCR plates at the indicated positions, working from the back of the instrument towards the front."));
      dialogHandle_10.ShowOutput(Translate("PCR Plates"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.PCRPlates_1to2, 5, Translate("2 PCR Plates"));
    }
    if (t_intNumberOfPlates == 3)
    {
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.PCRPlates_1to3, 6, Translate("3 PCR Plates"));
      dialogHandle_9.SetOutput(Translate("Please load 3 PCR plates at the indicated positions, working from the back of the instrument towards the front."));
      dialogHandle_9.ShowOutput(Translate("PCR Plates"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.PCRPlates_1to3, 5, Translate("3 PCR Plates"));
    }
    if (t_intNumberOfPlates >= 4)
    {
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_AllPCRPlates, 6, Translate("All PCR Plates"));
      dialogHandle_8.SetOutput(Translate("Please load PCR plates 1-12 at the indicated positions, working from the top left, to the bottom right."));
      dialogHandle_8.ShowOutput(Translate("PCR Plates"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_AllPCRPlates, 5, Translate("All PCR Plates"));
    }
    DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_DigestionEnzymePlate, 6, Translate("Digestion Enzyme Plate"));
    dialogHandle_7.SetOutput(Translate("Please load the Digestion Enzyme plate at the indicated position."));
    dialogHandle_7.ShowOutput(Translate("Digestion Enzyme Plate"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_DigestionEnzymePlate, 5, Translate("Digestion Enzyme Plate"));
    DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 6, Translate("300ul Filtered Tips"));
    dialogHandle_12.SetOutput(Translate("Please load 300ul Filtered Tips at the indicated position."));
    dialogHandle_12.ShowOutput(Translate("300ul Filtered Tips"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 5, Translate("300ul Filtered Tips"));
    STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300CountChannels, 999);
    customDialog_6.InitCustomDialog("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");
    customDialog_6.ShowCustomDialog();
    MECC::TraceComment(Translate("************************************Deck Loading Ends*************************************"));
    customDialog_3.InitCustomDialog("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");
    customDialog_3.ShowCustomDialog();
    t_varDialogue = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
    if(0){
      HSLInhecoTECLib::GetActualDeviceTemperature(t_intControlID, t_intDeviceID, 1, t_fltTemperature, t_strCPACError);
      TrcTrace(Translate("Temperature : "), t_fltTemperature);
    }
    MECC::TraceComment(Translate("+++++++++++++++++++++++<Enzyme Addition Begins>++++++++++++++++++++++++++"));
    DigestionEnzymeAddition();
    MECC::TraceComment(Translate("+++++++++++++++++++++++<Enzyme Addition Ends>++++++++++++++++++++++++++++"));
    customDialog_2.InitCustomDialog("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");
    customDialog_2.ShowCustomDialog();
    t_varDialogue = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
    if(0){
      HSLInhecoTECLib::StopTemperatureControl(t_intControlID, t_intDeviceID, t_strCPACError);
      HSLInhecoTECLib::Terminate(1);
    }
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300CountChannels);
    abort;
    STAR_TIP_TOOLS::_ExitLibrary();
    VISUAL_NTR_LIBRARY_NTRDISCARDEDITS::_ExitLibrary();
  } }
