private function DigestionEnzymeAddition(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
}

private function DigestionEnzymeAddition(  ) void {
  private variable t_intWellsToProcess;
  private variable t_hdlDialogue;
  private variable loopCounter6;
  private dialog customDialog_1;
  private variable t_intPCRPlates_2_WellsToProcess;
  private dialog customDialog_2;
  private dialog customDialog_3;
  private dialog customDialog_4;
  private dialog customDialog_5;
  private dialog customDialog_6;
  private dialog customDialog_7;
  private variable l_intEnzymeAddition;
  private dialog customDialog_8;
  private dialog customDialog_9;
  private dialog customDialog_10;
  private dialog customDialog_11;
  private variable t_intPCRPlates_3_WellsToProcess;
  private dialog customDialog_12;
  private dialog customDialog_13;
  private variable t_intWellsToProcess_2;
  l_intEnzymeAddition = 50;
  t_intWellsToProcess = t_intNumberOfPlates * 96;
  TrcTrace(Translate("Plates to process: "), t_intNumberOfPlates);
  if (t_intNumberOfPlates <= 4)
  {
    ML_STAR.seqPCRPlates_1.SetCount(t_intWellsToProcess);
  }
  {
    loopCounter6 = 0;
    ML_STAR.seqPCRPlates_1.SetCurrentPosition(1);
    while (
       (ML_STAR.seqPCRPlates_1.GetCurrentPosition() > 0)
    && (ML_STAR.seq_DigestionEnzymePlate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.seqPCRPlates_1, 1, ML_STAR.seq_DigestionEnzymePlate, 1);
      loopCounter6 = loopCounter6 + 1;
      STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300CountChannels, 8);
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (ML_STAR.seqPCRPlates_1.GetCurrentPosition() > 0 && ML_STAR.seqPCRPlates_1.GetMax() == 0 )
      && (ML_STAR.seq_DigestionEnzymePlate.GetCurrentPosition() > 0 && ML_STAR.seq_DigestionEnzymePlate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.seqPCRPlates_1.SetMax(ML_STAR.seqPCRPlates_1.GetTotal());
    ML_STAR.seq_DigestionEnzymePlate.SetMax(ML_STAR.seq_DigestionEnzymePlate.GetTotal());
    ML_STAR.seqPCRPlates_1.SetCurrentPosition(1);
    ML_STAR.seq_DigestionEnzymePlate.SetCurrentPosition(1);
  }
  STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300CountChannels);
  SeqResetSequenceIndexes(ML_STAR.seqPCRPlates_1);
  ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  customDialog_5.InitCustomDialog("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");
  customDialog_5.ShowCustomDialog();
  t_varDialogue = customDialog_5.GetCustomDialogProperty( "ReturnValue" );
  if (t_intNumberOfPlates <= 4)
  {
    customDialog_9.InitCustomDialog("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");
    customDialog_9.ShowCustomDialog();
    t_hdlDialogue = customDialog_9.GetCustomDialogProperty( "ReturnValue" );
    if (t_hdlDialogue == 3)
    {
      abort;
    }
  }
  else
  {
    customDialog_8.InitCustomDialog("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");
    customDialog_8.ShowCustomDialog();
    t_hdlDialogue = customDialog_8.GetCustomDialogProperty( "ReturnValue" );
  }
  ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  ML_STAR.seq_DigestionEnzymePlate.SetCurrentPosition(385);
  if (t_intNumberOfPlates <= 8)
  {
    t_intPCRPlates_2_WellsToProcess = t_intWellsToProcess - 384;
    ML_STAR.seqPCRPlates_2.SetCount(t_intPCRPlates_2_WellsToProcess);
  }
  {
    loopCounter6 = 0;
    ML_STAR.seqPCRPlates_2.SetCurrentPosition(1);
    while (
       (ML_STAR.seqPCRPlates_2.GetCurrentPosition() > 0)
    && (ML_STAR.seq_DigestionEnzymePlate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.seqPCRPlates_2, 1, ML_STAR.seq_DigestionEnzymePlate, 1);
      loopCounter6 = loopCounter6 + 1;
      STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300CountChannels, 8);
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (ML_STAR.seqPCRPlates_2.GetCurrentPosition() > 0 && ML_STAR.seqPCRPlates_2.GetMax() == 0 )
      && (ML_STAR.seq_DigestionEnzymePlate.GetCurrentPosition() > 0 && ML_STAR.seq_DigestionEnzymePlate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.seqPCRPlates_2.SetMax(ML_STAR.seqPCRPlates_2.GetTotal());
    ML_STAR.seq_DigestionEnzymePlate.SetMax(ML_STAR.seq_DigestionEnzymePlate.GetTotal());
    ML_STAR.seqPCRPlates_2.SetCurrentPosition(1);
    ML_STAR.seq_DigestionEnzymePlate.SetCurrentPosition(1);
  }
  STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300CountChannels);
  SeqResetSequenceIndexes(ML_STAR.seqPCRPlates_2);
  ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  customDialog_13.InitCustomDialog("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");
  customDialog_13.ShowCustomDialog();
  t_varDialogue = customDialog_13.GetCustomDialogProperty( "ReturnValue" );
  if (t_intNumberOfPlates <= 4)
  {
    customDialog_11.InitCustomDialog("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");
    customDialog_11.ShowCustomDialog();
    t_hdlDialogue = customDialog_11.GetCustomDialogProperty( "ReturnValue" );
    if (t_hdlDialogue == 3)
    {
      abort;
    }
  }
  else
  {
    customDialog_10.InitCustomDialog("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");
    customDialog_10.ShowCustomDialog();
    t_hdlDialogue = customDialog_10.GetCustomDialogProperty( "ReturnValue" );
  }
  if (t_hdlDialogue == 3)
  {
    abort;
  }
  customDialog_1.InitCustomDialog("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");
  customDialog_1.ShowCustomDialog();
  ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
  ML_STAR.seq_DigestionEnzymePlate.SetCurrentPosition(769);
  if (t_intNumberOfPlates > 8)
  {
    t_intPCRPlates_3_WellsToProcess = t_intWellsToProcess - 768;
    ML_STAR.seqPCRPlates_3.SetCount(t_intPCRPlates_3_WellsToProcess);
  }
  {
    loopCounter6 = 0;
    ML_STAR.seqPCRPlates_3.SetCurrentPosition(1);
    while (
       (ML_STAR.seqPCRPlates_3.GetCurrentPosition() > 0)
    && (ML_STAR.seq_DigestionEnzymePlate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.seqPCRPlates_3, 1, ML_STAR.seq_DigestionEnzymePlate, 1);
      loopCounter6 = loopCounter6 + 1;
      STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300CountChannels, 8);
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (ML_STAR.seqPCRPlates_3.GetCurrentPosition() > 0 && ML_STAR.seqPCRPlates_3.GetMax() == 0 )
      && (ML_STAR.seq_DigestionEnzymePlate.GetCurrentPosition() > 0 && ML_STAR.seq_DigestionEnzymePlate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.seqPCRPlates_3.SetMax(ML_STAR.seqPCRPlates_3.GetTotal());
    ML_STAR.seq_DigestionEnzymePlate.SetMax(ML_STAR.seq_DigestionEnzymePlate.GetTotal());
    ML_STAR.seqPCRPlates_3.SetCurrentPosition(1);
    ML_STAR.seq_DigestionEnzymePlate.SetCurrentPosition(1);
  }
  STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300CountChannels);
  SeqResetSequenceIndexes(ML_STAR.seqPCRPlates_3);
  ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  customDialog_12.InitCustomDialog("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");
  customDialog_12.ShowCustomDialog();
  t_varDialogue = customDialog_12.GetCustomDialogProperty( "ReturnValue" );
  customDialog_4.InitCustomDialog("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");
  customDialog_4.ShowCustomDialog();
  t_hdlDialogue = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
  if (t_hdlDialogue == 3)
  {
    abort;
  }
  ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
}
