 namespace _Method { #include "STAR Tools\\STAR Tip Tools.hs_" }
#include "100_200_400_A260_TK_V.3.0.0.res"
dialog customDialog_1;
dialog customDialog_2;
dialog customDialog_3;
variable t_str50CountChannels;
variable loopCounter2;
variable t_str1000CountChannels;
variable t_strNumberofSamples;
dialog customDialog_4;
dialog customDialog_5;
dialog customDialog_6;
dialog customDialog_7;
global device ML_STAR ("100_200_400_A260_TK_V.3.0.0.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    STAR_TIP_TOOLS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("*************************\nV2.0.0\n\nThis method dilutes up to 15 samples 100/200/400X and sets up a half area plate for A260 reads. \n\n*****************************"));
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    MECC::TraceComment(Translate("***************\nAddition of water to DWDP\n\n**************"));
    t_str50CountChannels = Translate("50Channels");
    t_str1000CountChannels = Translate("1000Channels");
    t_strNumberofSamples = "";
    customDialog_3.InitCustomDialog("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");
    customDialog_3.ShowCustomDialog();
    customDialog_2.InitCustomDialog("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");
    customDialog_2.ShowCustomDialog();
    customDialog_5.InitCustomDialog("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");
    customDialog_5.ShowCustomDialog();
    STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.Seq_50uL_tips_pos_1_96, t_str50CountChannels, 999);
    STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.Seq_1000uL_tip_pickup_pos_1_96, t_str1000CountChannels, 999);
    customDialog_4.InitCustomDialog("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");
    customDialog_4.ShowCustomDialog();
    t_strNumberofSamples = customDialog_4.GetCustomDialogProperty( "numeric1.Value" );
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    if (t_strNumberofSamples < 9)
    {
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    }
    else
    {
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    MECC::TraceComment(Translate("*********************\nAddition of RNA\n\n**************\n"));
    if (t_strNumberofSamples < 9)
    {
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    else
    {
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    MECC::TraceComment(Translate("*******\nMixing and transfer of diluted RNA throughout DWDP\n\n*********"));
    if (t_strNumberofSamples < 9)
    {
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    else
    {
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    MECC::TraceComment(Translate("*******************\nDiluted RNA is plated in duplicate on half area plate\n\n******************"));
    if (t_strNumberofSamples < 9)
    {
      {
        for(loopCounter2 = 0; loopCounter2 < 3;)
        {
          loopCounter2 = loopCounter2 + 1;
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
      }
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      customDialog_6.InitCustomDialog("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");
      customDialog_6.ShowCustomDialog();
    }
    else
    {
      {
        for(loopCounter2 = 0; loopCounter2 < 6;)
        {
          loopCounter2 = loopCounter2 + 1;
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
      }
      customDialog_7.InitCustomDialog("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");
      customDialog_7.ShowCustomDialog();
    }
    STAR_TIP_TOOLS::_ExitLibrary();
  } }
