private function PCRSetup( variable t_intNumberOfPlates, variable t_fltBufferDispense, variable t_fltTemplateDispense ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  if(0){
    HSLInhecoTECLib::StopTemperatureControl(t_intControlID, t_intDeviceID, t_strCPACError);
    HSLInhecoTECLib::Terminate(1);
  }
  ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
}

private function PCRSetup( variable t_intNumberOfPlates, variable t_fltBufferDispense, variable t_fltTemplateDispense ) void {
  private variable t_intWellsToProcess;
  private dialog customDialog_1;
  private variable loopCounter1;
  private variable loopCounter3;
  private variable loopCounter4;
  private variable l_fltWaterAddition;
  private variable l_fltKapaAddition;
  private variable l_fltPrimerMixAddition;
  if (t_intNumberOfPlates >= 1)
  {
    l_fltWaterAddition = 38.5;
    l_fltPrimerMixAddition = 7.5;
    l_fltKapaAddition = 50;
  }
  TrcTrace(Translate("Plates to process: ------------> "), t_intNumberOfPlates);
  MECC::TraceComment(Translate("++++++++++++++++++++++++<Water Addition to Template Plate>+++++++++++++++++++++++++++++++++"));
  if (t_intNumberOfPlates <= 2)
  {
    t_intWellsToProcess = t_intNumberOfPlates * 96;
    ML_STAR.seq_PCRPlates_All.SetCount(t_intWellsToProcess);
  }
  {
    for(loopCounter1 = 0; loopCounter1 < t_intNumberOfPlates;)
    {
      loopCounter1 = loopCounter1 + 1;
      STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, t_str50Count96MPH, 96);
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, t_str50Count96MPH);
    }
  }
  SeqResetSequenceIndexes(ML_STAR.seq_PCRPlates_All);
  MECC::TraceComment(Translate("++++++++++++++++++++++++<Primer Addition to Template Plate>+++++++++++++++++++++++++++++++++"));
  if (t_intNumberOfPlates <= 2)
  {
    ML_STAR.seq_PCRPlates_All.SetCount(t_intWellsToProcess);
    ML_STAR.seq_PrimerMixPlates_All.SetCount(t_intWellsToProcess);
  }
  {
    for(loopCounter3 = 0; loopCounter3 < t_intNumberOfPlates;)
    {
      loopCounter3 = loopCounter3 + 1;
      STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, t_str50Count96MPH, 96);
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, t_str50Count96MPH);
    }
  }
  SeqResetSequenceIndexes(ML_STAR.seq_PCRPlates_All);
  MECC::TraceComment(Translate("+++++++++++++++++++++++<Kapa HiFi Addition>++++++++++++++++++++++++++++"));
  TrcTrace(Translate("Temperature : "), t_fltTemperature);
  if (t_intNumberOfPlates <= 2)
  {
    ML_STAR.seq_PCRPlates_All.SetCount(t_intWellsToProcess);
    {
      for(loopCounter4 = 0; loopCounter4 < t_intNumberOfPlates;)
      {
        loopCounter4 = loopCounter4 + 1;
        STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, t_str50Count96MPH, 96);
        ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
        SeqResetSequenceIndexes(ML_STAR.KapaHiFiTrough);
      }
    }
    SeqResetSequenceIndexes(ML_STAR.seq_PCRPlates_All);
  }
  SeqResetSequenceIndexes(ML_STAR.seq_PCRPlates_All);
  customDialog_1.InitCustomDialog("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");
  customDialog_1.ShowCustomDialog();
  t_hdlDialogue = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
  if (t_hdlDialogue == 1)
  {
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
  }
}
