 namespace _Method { #include "GreenLight\\hamSTAR Methods\\HSLTrcLib.hsl" }
 namespace _Method { #include "HSLInhecoTEC\\HSLInhecoTECLib.hsl" }
 namespace _Method { #include "STAR Tools\\STAR Tip Tools.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
#include "PCRSetup[2.0].res"
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "Visual_NTR_Library\\Visual_NTR_library_NTRdiscardEdits.hs_" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "HSLDeckVisualize.hsl" }
dialog customDialog_1;
dialog customDialog_2;
dialog customDialog_3;
variable t_intControlID;
variable t_hdlDialogue;
variable t_strCPACError;
variable t_str50CountChannels;
variable t_str8ChannelPattern;
variable t_fltBufferDispense;
variable t_fltTemplateDispense;
variable t_intDeviceID;
variable t_varDialogue;
dialog customDialog_4;
global device ML_STAR ("PCRSetup[2.0].lay", "ML_STAR", hslTrue);
variable t_intNumberOfPlates;
variable t_str50Count96MPH;
dialog customDialog_5;
dialog customDialog_6;
variable t_strCPACSN;
variable t_fltTemperature;
dialog dialogHandle_7;
dialog dialogHandle_8;
dialog dialogHandle_9;
dialog dialogHandle_10;
dialog dialogHandle_11;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    STAR_TIP_TOOLS::_InitLibrary();
    VISUAL_NTR_LIBRARY_NTRDISCARDEDITS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("\n_________________________________________________________________________________________________\nGreenLight BioSciences\n\nHH- HTP PCR Setup\nLast Edit: 09/12/2022\nDesc. Creates up to 2 PCR Plates by adding the folkowing volumes per plate:\n38.5 ul Water, 7.5 ul Primer, and 50 ul Kapa HiFi, to a blue Fisher PCR Plates containing 4 ul of template DNA to be amplified.\n\nA 100ul rxn is created.\n\n\n\n_________________________________________________________________________________________________\n"));
    t_str50Count96MPH = Translate("");
    t_str50CountChannels = Translate("");
    t_str8ChannelPattern = Translate("11111111");
    t_intNumberOfPlates = 0;
    t_intDeviceID = 1;
    t_fltTemperature = 27;
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    HSLInhecoTECLib::Initialize(t_intControlID, 0, t_strCPACError);
    HSLInhecoTECLib::GetDeviceSerialNumber(t_intControlID, t_intDeviceID, t_strCPACSN, t_strCPACError);
    TrcTrace(Translate("CPAC Serial Number: "), t_strCPACSN);
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    HSLInhecoTECLib::SetTargetTemperature(t_intControlID, t_intDeviceID, 4.0, t_strCPACError);
    HSLInhecoTECLib::StartTemperatureControl(t_intControlID, t_intDeviceID, t_strCPACError);
    HSLInhecoTECLib::GetActualDeviceTemperature(t_intControlID, t_intDeviceID, 1, t_fltTemperature, t_strCPACError);
    ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    STAR_TIP_TOOLS::BuildChannelPattern(8, 8, t_str8ChannelPattern);
    customDialog_6.InitCustomDialog("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");
    customDialog_6.ShowCustomDialog();
    customDialog_4.InitCustomDialog("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");
    customDialog_4.SetCustomDialogProperty( "numeric1.Value", t_intNumberOfPlates );
    customDialog_4.ShowCustomDialog();
    t_varDialogue = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
    t_intNumberOfPlates = customDialog_4.GetCustomDialogProperty( "numeric1.Value" );
    DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.WaterTrough, 6, Translate("Water Trough"));
    dialogHandle_8.SetOutput(Translate("Please load the NF Water trough at the indicated position."));
    dialogHandle_8.ShowOutput(Translate("Water Trough"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.WaterTrough, 5, Translate("Water Trough"));
    DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.KapaHiFiTrough, 6, Translate("Kapa HiFi Trough"));
    dialogHandle_9.SetOutput(Translate("Please load the Kapa HiFi trough at the indicated position."));
    dialogHandle_9.ShowOutput(Translate("Kapa HiFi Trough"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.KapaHiFiTrough, 5, Translate("Kapa HiFi Trough"));
    DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_PCRPlates_All, 6, Translate("Template Plates"));
    dialogHandle_10.SetOutput(Translate("Please load the Template Plates at the indicated position."));
    dialogHandle_10.ShowOutput(Translate("Template Plates"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_PCRPlates_All, 5, Translate("Template Plates"));
    DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_PrimerMixPlates_All, 6, Translate("Template Plates"));
    dialogHandle_7.SetOutput(Translate("Please load the Primer Plates at the indicated position."));
    dialogHandle_7.ShowOutput(Translate("Primer Plates"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_PrimerMixPlates_All, 5, Translate("Primer Plates"));
    DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, 6, Translate("50ul Tips"));
    dialogHandle_11.SetOutput(Translate("Please load the 50ul Tips at the indicated position."));
    dialogHandle_11.ShowOutput(Translate("50ul Tips"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, 5, Translate("50ul Tips"));
    STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, t_str50Count96MPH, 999);
    customDialog_5.InitCustomDialog("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");
    customDialog_5.ShowCustomDialog();
    customDialog_2.InitCustomDialog("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");
    customDialog_2.ShowCustomDialog();
    HSLInhecoTECLib::GetActualDeviceTemperature(t_intControlID, t_intDeviceID, 1, t_fltTemperature, t_strCPACError);
    TrcTrace(Translate("Temperature : "), t_fltTemperature);
    PCRSetup(t_intNumberOfPlates, t_fltBufferDispense, t_fltTemplateDispense);
    customDialog_3.InitCustomDialog("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");
    customDialog_3.ShowCustomDialog();
    HSLInhecoTECLib::StopTemperatureControl(t_intControlID, t_intDeviceID, t_strCPACError);
    HSLInhecoTECLib::Terminate(1);
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, t_str50Count96MPH);
    abort;
    STAR_TIP_TOOLS::_ExitLibrary();
    VISUAL_NTR_LIBRARY_NTRDISCARDEDITS::_ExitLibrary();
  } }
