global device ML_STAR ("HH-RNA FragA Setup V.0.0.0.lay", "ML_STAR", hslTrue);
#include "HH-RNA FragA Setup V.0.0.0.res"
 namespace _Method { #include "STAR Tools\\STAR Tip Tools.hs_" }
 namespace _Method { #include "STAR Tools\\STAR Channel Tools.hs_" }
 namespace _Method { #include "STAR Tools\\STAR MPH96 Tools.hs_" }
 namespace _Method { #include "HSLExtensions\\Array2D.hsl" }
 namespace _Method { #include "HSLExtensions\\Directory.hsl" }
 namespace _Method { #include "HSLExtensions\\File.hsl" }
 namespace _Method { #include "HSLExtensions\\Sequence.hsl" }
 namespace _Method { #include "HSLExtensions\\String.hsl" }
 namespace _Method { #include "HSLExtensions\\Venus.hsl" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLArrLib.hsl" }
 namespace _Method { #include "HSLErrLib.hsl" }
 namespace _Method { #include "HSLExtensions\\HSLExtensions\\Framework\\HSLExtensionsFramework.hsl" }
variable t_intFASampleVolume;
variable t_str300CountChannels;
variable t_intNumberofPlates;
variable t_str50CountChannels;
variable t_intFAPlatestoProcess;
variable t_str4ChannelPattern;
variable t_str2ChannelPattern;
variable t_intFABufferVolume;
variable t_intNumberOfPlates;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    STAR_TIP_TOOLS::_InitLibrary();
    STAR_CHANNEL_TOOLS::_InitLibrary();
    STAR_MPH96_TOOLS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("******************\nThis method generates a 40X dilution of RNA to be added to a FragA plate.\n\n******************"));
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    t_str50CountChannels = Translate("50Channels");
    t_str300CountChannels = Translate("300Channels");
    t_intNumberofPlates = 0;
    t_intFAPlatestoProcess = 0;
    t_intFABufferVolume = 22;
    t_intFASampleVolume = 2;
    t_intFAPlatestoProcess = t_intNumberOfPlates;
    STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, t_str50CountChannels, 999);
    MECC::TraceComment(Translate("******************\n\n40X dilution begins\n\n******************"));
    STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.Seq_300uL_tip_pos_1_96, t_str300CountChannels, 999);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    STAR_TIP_TOOLS::_ExitLibrary();
    STAR_CHANNEL_TOOLS::_ExitLibrary();
    STAR_MPH96_TOOLS::_ExitLibrary();
  } }
