 namespace _Method { #include "STAR Tools\\STAR Tip Tools.hs_" }
#include "HH-RNA Pipetting Test.res"
global device ML_STAR ("HH-RNA Pipetting Test.lay", "ML_STAR", hslTrue);
variable loopCounter1;
variable t_str50CountChannels;
variable t_str1000CountChannels;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    STAR_TIP_TOOLS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("**********This method is designed to test different pipetting liquid class parameters to more accurately pipette small volumes of RNA"));
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    t_str50CountChannels = Translate("50Channels");
    t_str1000CountChannels = Translate("1000Channels");
    STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.Seq_1000uL_tip_pickup_pos_1_96, t_str1000CountChannels, 999);
    STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.Seq_50uL_tips_pos_1_96, t_str50CountChannels, 999);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    {
      for(loopCounter1 = 0; loopCounter1 < 4;)
      {
        loopCounter1 = loopCounter1 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
    }
    {
      for(loopCounter1 = 0; loopCounter1 < 4;)
      {
        loopCounter1 = loopCounter1 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
    }
    {
      for(loopCounter1 = 0; loopCounter1 < 4;)
      {
        loopCounter1 = loopCounter1 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
    }
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    if(0){
      {
        for(loopCounter1 = 0; loopCounter1 < 3;)
        {
          loopCounter1 = loopCounter1 + 1;
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
      }
      {
        for(loopCounter1 = 0; loopCounter1 < 3;)
        {
          loopCounter1 = loopCounter1 + 1;
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
      }
      {
        for(loopCounter1 = 0; loopCounter1 < 3;)
        {
          loopCounter1 = loopCounter1 + 1;
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
      }
    }
    STAR_TIP_TOOLS::_ExitLibrary();
  } }
