 namespace _Method { #include "STAR Tools\\STAR Tip Tools.hs_" }
#include "HH-RNA-Quant-100X_V.0.0.0.res"
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLInhecoTEC\\HSLInhecoTECLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "HSLDeckVisualize.hsl" }
variable t_str50Count96MPH;
global device ML_STAR ("HH-RNA-Quant-100X_V.0.0.0.lay", "ML_STAR", hslTrue);
variable t_str1000Count96MPH;
dialog customDialog_1;
variable t_str300Count96MPH;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    STAR_TIP_TOOLS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("\n_________________________________________________________________________________________________\nGreenLight BioSciences\n\nHH- RNA-Quant-100X\nLast Edit: 03/24/23\n\nMethod dilutes RNA 100X and moves it to a half area plate for quantification. \n\n\n_________________________________________________________________________________________________\n"));
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    t_str50Count96MPH = Translate("");
    t_str1000Count96MPH = Translate("");
    t_str300Count96MPH = Translate("");
    STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, t_str1000Count96MPH, 999);
    STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, t_str50Count96MPH, 999);
    STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300Count96MPH, 999);
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    if(0){
      MECC::TraceComment(Translate("********Addition of Water to dilution plate\n"));
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      MECC::TraceComment(Translate("******************addition of RNA to dilution plate"));
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      MECC::TraceComment(Translate("*************Mixing diluted RNA"));
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    }
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    STAR_TIP_TOOLS::_ExitLibrary();
  } }
