 namespace _Method { #include "STAR Tools\\STAR Tip Tools.hs_" }
 namespace _Method { #include "Visual_NTR_Library\\Visual_NTR_library_NTRdiscardEdits.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "AppsLibrary\\HSLAppsLib.hsl" }
 namespace _Method { #include "GreenLight\\hamSTAR Methods\\HSLTrcLib.hsl" }
 namespace _Method { #include "HSLDeckVisualize.hsl" }
#include "HH-Template Normalization.res"
dialog customDialog_1;
dialog customDialog_2;
dialog customDialog_3;
dialog customDialog_4;
dialog customDialog_5;
variable t_str7ChannelPattern;
variable t_strFileOutputError;
variable t_strStandardVolumeTips;
variable t_intArrayControl;
variable t_strFilePathOutput;
variable t_strUserDefinedFilename;
variable t_strCPACError;
variable t_strWorklistFolder;
variable t_strBarcodePositions;
variable t_intFinalVolume;
variable t_strFilePath;
variable t_fltAliquotVolume;
variable t_intFinalConcentration;
variable t_intTransferVol;
variable t_intNumberOfPlates;
variable t_blnIsPlateOOO;
variable t_strUserDefinedFilepath;
variable t_arr_strSourceWell[];
variable t_arr_strSourcePlate[];
variable t_arr_strDNABCWorklist[];
variable t_arr_fltReconVolume[];
variable t_arr_strTargetWell[];
variable t_arr_fltVolumesSample[];
variable t_arr_fltMixVolume[];
variable t_arr_strTargetPlate[];
variable t_arr_strDNA_ID[];
variable t_arr_blnMatchBarcodes[];
variable t_arr_strWorkingBC[];
variable t_arr_strDNABCActual[];
variable t_arr_fltVolumesWater[];
variable t_varDialogue;
global sequence seqTargetWorlist;
global sequence seqSourceWorklist;
global sequence default;
dialog customDialog_6;
dialog customDialog_7;
dialog dialogHandle_8;
dialog dialogHandle_9;
dialog customDialog_10;
dialog dialogHandle_11;
dialog dialogHandle_12;
global device ML_STAR ("HH-Template Normalization.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    STAR_TIP_TOOLS::_InitLibrary();
    VISUAL_NTR_LIBRARY_NTRDISCARDEDITS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("\n_________________________________________________________________________________________________\nGreenLight BioSciences\nOligo-Template Plate Setup\nLast Edit: 11/02/2022\nDesc.: Formats PCR template plate from working plates, dilutes template DNA to 0.5 ng/uL.\nTypically adds 5 uL of Working Plate g-block to 55 uL of water\ntotal volume 60 uL\nWorklisting allows for layout changes, can generate up to 5 plates at a time\n\n***Note, labware ID's inconsistent: \n\"Working Plate\" refers to final Oligo Template Plate\n\"DNA Plate\" refers to Working Plate\n\n\nFine tuning for usability\n\n_________________________________________________________________________________________________\n"));
    t_blnIsPlateOOO = 0;
    t_strWorklistFolder = Translate("");
    t_strFilePath = Translate("");
    t_strUserDefinedFilepath = Translate("");
    t_strUserDefinedFilename = Translate("");
    t_strFilePathOutput = Translate("");
    t_intNumberOfPlates = 0;
    t_intArrayControl = 1;
    t_strStandardVolumeTips = Translate("300Channels");
    t_str7ChannelPattern = Translate("");
    t_strCPACError = Translate("");
    t_strFileOutputError = Translate("");
    t_fltAliquotVolume = 10;
    t_strBarcodePositions = Translate("");
    t_intTransferVol = 0;
    t_arr_strDNA_ID.SetSize(0);
    t_arr_strTargetPlate.SetSize(0);
    t_arr_strSourcePlate.SetSize(0);
    t_arr_strTargetWell.SetSize(0);
    t_arr_strSourceWell.SetSize(0);
    t_arr_blnMatchBarcodes.SetSize(0);
    t_arr_fltMixVolume.SetSize(0);
    t_arr_fltReconVolume.SetSize(0);
    t_arr_strWorkingBC.SetSize(0);
    t_arr_strDNABCActual.SetSize(0);
    t_arr_strDNABCWorklist.SetSize(0);
    t_strFilePath = Translate("");
    t_intFinalVolume = 100;
    t_intFinalConcentration = 0.5;
    t_arr_fltVolumesWater.SetSize(0);
    t_arr_fltVolumesSample.SetSize(0);
    MECC::TraceComment(Translate("Initialize Devices\n"));
    customDialog_5.InitCustomDialog("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");
    customDialog_5.ShowCustomDialog();
    t_varDialogue = customDialog_5.GetCustomDialogProperty( "ReturnValue" );
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    customDialog_3.InitCustomDialog("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");
    customDialog_3.ShowCustomDialog();
    t_varDialogue = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
    t_strFilePath = customDialog_3.GetCustomDialogProperty( "path1.Path" );
    t_strUserDefinedFilename = customDialog_3.GetCustomDialogProperty( "textBox1.Text" );
    t_intNumberOfPlates = customDialog_3.GetCustomDialogProperty( "numeric1.Value" );
    TrcTrace(Translate("Number of Plates ------------>"), t_intNumberOfPlates);
    WorklistProcessing();
    MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------\n\n                                            Work Listing DONE\n\n\n-----------------------------------------------------------------------------------------------------------"));
    DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seqDNAPlates_ALL, 6, Translate("DNA Plates"));
    dialogHandle_8.SetOutput(Translate("Please load the DNA Plates at the indicated positions."));
    dialogHandle_8.ShowOutput(Translate("DNA Plates"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seqDNAPlates_ALL, 5, Translate("DNA Plates"));
    DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seqWorkingPlates_All, 6, Translate("Working Plates"));
    dialogHandle_9.SetOutput(Translate("Please load the Working Plates at the indicated positions."));
    dialogHandle_9.ShowOutput(Translate("Working Plates"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seqWorkingPlates_All, 5, Translate("Kapa HiFi Trough"));
    DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.RGT_200ml_A00_0001, 6, Translate("NF Water Standup Trough"));
    dialogHandle_11.SetOutput(Translate("Please load the NF Water Standup Trough at the indicated position."));
    dialogHandle_11.ShowOutput(Translate("NF Water Standup Trough"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.RGT_200ml_A00_0001, 5, Translate("NF Water Standup Trough"));
    customDialog_10.InitCustomDialog("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");
    customDialog_10.ShowCustomDialog();
    t_varDialogue = customDialog_10.GetCustomDialogProperty( "ReturnValue" );
    DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 6, Translate("300ul Tips"));
    dialogHandle_12.SetOutput(Translate("Please load the 300ul Tips at the indicated position."));
    dialogHandle_12.ShowOutput(Translate("300ul Tips"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 5, Translate("300ul Tips"));
    STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_strStandardVolumeTips, 999);
    customDialog_7.InitCustomDialog("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");
    customDialog_7.ShowCustomDialog();
    customDialog_6.InitCustomDialog("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");
    customDialog_6.ShowCustomDialog();
    t_varDialogue = customDialog_6.GetCustomDialogProperty( "ReturnValue" );
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    t_varDialogue = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
    Aliquot();
    MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------\n\n                                            Aliquot DONE\n\n\n-----------------------------------------------------------------------------------------------------------"));
    FileOutput();
    MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------\n\n                                           File Output DONE\n\n\n-----------------------------------------------------------------------------------------------------------"));
    customDialog_2.InitCustomDialog("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");
    customDialog_2.ShowCustomDialog();
    t_varDialogue = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
    if(0){
      customDialog_4.InitCustomDialog("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");
      customDialog_4.ShowCustomDialog();
      t_varDialogue = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
    }
    abort;
    STAR_TIP_TOOLS::_ExitLibrary();
    VISUAL_NTR_LIBRARY_NTRDISCARDEDITS::_ExitLibrary();
  } }
