private function Aliquot(  ) void ;
private function FileOutput(  ) void ;
private function Test(  ) void ;
private function WorklistProcessing(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_strStandardVolumeTips, 8);
}

private function Aliquot(  ) void {
  private variable loopCounter1;
  private variable loopCounter3;
  private variable t_strChannelPattern;
  t_strStandardVolumeTips = Translate("300Channels");
  STAR_TIP_TOOLS::BuildChannelPattern(7, 8, t_str7ChannelPattern);
  {
    loopCounter1 = 0;
    seqSourceWorklist.SetCurrentPosition(1);
    while (
       (seqSourceWorklist.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, seqSourceWorklist, 1);
      loopCounter1 = loopCounter1 + 1;
      STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_strStandardVolumeTips, 8);
      STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_strStandardVolumeTips, t_str7ChannelPattern);
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_strStandardVolumeTips);
      t_intArrayControl = t_intArrayControl + 7;
      if (
         (seqSourceWorklist.GetCurrentPosition() > 0 && seqSourceWorklist.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    seqSourceWorklist.SetMax(seqSourceWorklist.GetTotal());
    seqSourceWorklist.SetCurrentPosition(1);
  }
  if (t_intNumberOfPlates >= 1)
  {
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_strStandardVolumeTips, 6);
    t_strChannelPattern = Translate("11111100");
    STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_strStandardVolumeTips, t_strChannelPattern);
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    {
      for(loopCounter3 = 0; loopCounter3 < 2;)
      {
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      }
    }
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_strStandardVolumeTips);
  }
  if (t_intNumberOfPlates >= 2)
  {
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_strStandardVolumeTips, 6);
    t_strChannelPattern = Translate("11111100");
    STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_strStandardVolumeTips, t_strChannelPattern);
    {
      for(loopCounter3 = 0; loopCounter3 < 2;)
      {
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      }
    }
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_strStandardVolumeTips);
  }
  if (t_intNumberOfPlates >= 3)
  {
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_strStandardVolumeTips, 6);
    t_strChannelPattern = Translate("11111100");
    STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_strStandardVolumeTips, t_strChannelPattern);
    {
      for(loopCounter3 = 0; loopCounter3 < 2;)
      {
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      }
    }
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_strStandardVolumeTips);
  }
  if (t_intNumberOfPlates >= 4)
  {
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_strStandardVolumeTips, 6);
    t_strChannelPattern = Translate("11111100");
    STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_strStandardVolumeTips, t_strChannelPattern);
    {
      for(loopCounter3 = 0; loopCounter3 < 2;)
      {
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      }
    }
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_strStandardVolumeTips);
  }
  if (t_intNumberOfPlates >= 5)
  {
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_strStandardVolumeTips, 6);
    t_strChannelPattern = Translate("11111100");
    STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_strStandardVolumeTips, t_strChannelPattern);
    {
      for(loopCounter3 = 0; loopCounter3 < 2;)
      {
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      }
    }
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_strStandardVolumeTips);
  }
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  if (t_intNumberOfPlates >= 1)
  {
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_strStandardVolumeTips, 6);
    t_strChannelPattern = Translate("11111100");
    STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_strStandardVolumeTips, t_strChannelPattern);
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_strStandardVolumeTips);
  }
  if (t_intNumberOfPlates >= 2)
  {
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_strStandardVolumeTips, 6);
    t_strChannelPattern = Translate("11111100");
    STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_strStandardVolumeTips, t_strChannelPattern);
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_strStandardVolumeTips);
  }
  if (t_intNumberOfPlates >= 3)
  {
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_strStandardVolumeTips, 6);
    t_strChannelPattern = Translate("11111100");
    STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_strStandardVolumeTips, t_strChannelPattern);
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_strStandardVolumeTips);
  }
  if (t_intNumberOfPlates >= 4)
  {
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_strStandardVolumeTips, 6);
    t_strChannelPattern = Translate("11111100");
    STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_strStandardVolumeTips, t_strChannelPattern);
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_strStandardVolumeTips);
  }
  if (t_intNumberOfPlates >= 5)
  {
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_strStandardVolumeTips, 6);
    t_strChannelPattern = Translate("11111100");
    STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_strStandardVolumeTips, t_strChannelPattern);
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_strStandardVolumeTips);
  }
}

private function FileOutput(  ) void {
  private variable l_strDNAIdentifier;
  private variable loopCountOutput;
  private variable l_strTargetWell;
  private variable l_fltVolumeSample;
  private variable l_strTargetPlate;
  private variable l_intWorkPlateArraySize;
  private variable l_strSourceWell;
  private variable l_strSourcePlate;
  private file l_hdlOutputFile;
  private variable t_arr_strWell_ID[];
  t_strFilePathOutput = StrConcat4(Translate("C:\Users\htp\Desktop\Greenlight Worklisting"), Translate("\\"), t_strUserDefinedFilename, Translate(".csv"));
  l_hdlOutputFile.AddField("Gblock", l_strDNAIdentifier, hslString, 255);
  l_hdlOutputFile.AddField("Source_Well_ID", l_strSourcePlate, hslString, 255);
  l_hdlOutputFile.AddField("Source_Plate_ID", l_strSourceWell, hslString, 255);
  l_hdlOutputFile.AddField("Target_Plate_ID", l_strTargetPlate, hslString, 255);
  l_hdlOutputFile.AddField("Targe_Well_ID", l_strTargetWell, hslString, 255);
  l_hdlOutputFile.AddField("DNA uL", l_fltVolumeSample, hslString, 255);
  l_hdlOutputFile.SetDelimiter(",");
  if( 0 == l_hdlOutputFile.Open(t_strFilePathOutput, hslWrite) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strFilePathOutput, "HxMetEdCompCmd");
  }
  {
    for(loopCountOutput = 0; loopCountOutput < l_intWorkPlateArraySize;)
    {
      loopCountOutput = loopCountOutput + 1;
      t_intArrayControl = 1;
      l_strDNAIdentifier = t_arr_strDNA_ID.ElementAt( loopCountOutput -1);
      l_strSourcePlate = t_arr_strSourcePlate.ElementAt( loopCountOutput -1);
      l_strTargetPlate = t_arr_strTargetPlate.ElementAt( loopCountOutput -1);
      l_strSourceWell = t_arr_strSourceWell.ElementAt( loopCountOutput -1);
      l_strTargetWell = t_arr_strWell_ID.ElementAt( loopCountOutput -1);
      l_fltVolumeSample = t_arr_fltVolumesSample.ElementAt( loopCountOutput -1);
      if( 0 == l_hdlOutputFile.WriteRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
  }
  if( 0 != l_hdlOutputFile.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  l_hdlOutputFile.RemoveFields();
}

private function WorklistProcessing(  ) void {
  private variable l_strDNAIdentifier;
  private variable loopCountFile;
  private variable l_strTargetWell;
  private variable l_fltVolumeWater;
  private variable l_intTemplateArraySize;
  private variable l_strTargetPlate;
  private variable l_fltVolumeSample;
  private variable l_fltC2V2;
  private variable l_intWorkPlateArraySize;
  private variable L_fltConcentration;
  private variable l_strLabwarePrefix_DNA;
  private variable l_strLabwarePrefix_Working;
  private variable l_strSourceWell;
  private variable l_strSourcePlate;
  private file l_hdlFile;
  private variable t_arr_strWell_ID[];
  l_fltVolumeSample = 0;
  l_fltVolumeWater = 0;
  l_strLabwarePrefix_DNA = Translate("DNA_");
  l_strLabwarePrefix_Working = Translate("WorkingPlate_");
  l_intWorkPlateArraySize = 1;
  t_intFinalVolume = 60;
  t_intFinalConcentration = 0.834;
  l_fltC2V2 = 0;
  l_fltC2V2 = t_intFinalConcentration * t_intFinalVolume;
  TrcTrace(Translate("------------------------->     C2V2 = "), l_fltC2V2);
  l_intTemplateArraySize = 1;
  l_hdlFile.AddField("Source_Well_ID", l_strSourceWell, hslString, 255);
  l_hdlFile.AddField("Gblock", l_strDNAIdentifier, hslString, 255);
  l_hdlFile.AddField("Concentration", L_fltConcentration, hslFloat);
  l_hdlFile.AddField("Target_Well_ID", l_strTargetWell, hslString, 255);
  l_hdlFile.AddField("Source_Plate_ID", l_strSourcePlate, hslString, 255);
  l_hdlFile.AddField("Target_Plate_ID", l_strTargetPlate, hslString, 255);
  if( 0 == l_hdlFile.Open(t_strFilePath + " " + "Hamilton$", hslAppend) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strFilePath, "HxMetEdCompCmd");
  }
  {
    loopCountFile = 0;
    while (
       (l_hdlFile.Eof() == 0)
    )
    {
      loopCountFile = loopCountFile + 1;
      if( 0 == l_hdlFile.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      l_strSourcePlate = StrConcat2(l_strLabwarePrefix_DNA, l_strSourcePlate);
      l_strTargetPlate = StrConcat2(l_strLabwarePrefix_Working, l_strTargetPlate);
      SeqAdd(seqSourceWorklist, l_strSourcePlate, l_strSourceWell);
      SeqAdd(seqTargetWorlist, l_strTargetPlate, l_strTargetWell);
      MECC::TraceComment(Translate("3++++++++++++++"));
    }
  }
  if( 0 != l_hdlFile.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  l_hdlFile.RemoveFields();
  TrcTraceSequence(seqSourceWorklist);
  TrcTraceSequence(seqTargetWorlist);
  SeqResetSequenceIndexes(seqSourceWorklist);
  SeqResetSequenceIndexes(seqTargetWorlist);
  l_hdlFile.AddField("Source_Well_ID", l_strSourceWell, hslString, 255);
  l_hdlFile.AddField("Gblock", l_strDNAIdentifier, hslString, 255);
  l_hdlFile.AddField("Concentration", L_fltConcentration, hslFloat);
  l_hdlFile.AddField("Target_Well_ID", l_strTargetWell, hslString, 255);
  l_hdlFile.AddField("Source_Plate_ID", l_strSourcePlate, hslString, 255);
  l_hdlFile.AddField("Target_Plate_ID", l_strTargetPlate, hslString, 255);
  if( 0 == l_hdlFile.Open(t_strFilePath + " " + "Hamilton$", hslAppend) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strFilePath, "HxMetEdCompCmd");
  }
  {
    loopCountFile = 0;
    while (
       (l_hdlFile.Eof() == 0)
    )
    {
      loopCountFile = loopCountFile + 1;
      if( 0 == l_hdlFile.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      t_arr_strDNA_ID.AddAsLast(l_strDNAIdentifier);
      t_arr_strSourcePlate.AddAsLast(l_strSourcePlate);
      t_arr_strTargetPlate.AddAsLast(l_strTargetPlate);
      t_arr_strWell_ID.AddAsLast(l_strTargetWell);
      t_arr_strSourceWell.AddAsLast(l_strSourceWell);
      l_fltVolumeSample = l_fltC2V2 / (L_fltConcentration * 1.0);
      t_arr_fltVolumesSample.AddAsLast(l_fltVolumeSample);
      l_fltVolumeWater = t_intFinalVolume - l_fltVolumeSample;
      t_arr_fltVolumesWater.AddAsLast(l_fltVolumeWater);
    }
  }
  if( 0 != l_hdlFile.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  l_hdlFile.RemoveFields();
  APPSLIB::TraceArray3(Translate("DNA ID ||| Target Plate ||| Target Well "), t_arr_strDNA_ID, t_arr_strTargetPlate, t_arr_strWell_ID);
  APPSLIB::TraceArray2(Translate("++++++++++++++++++++WATER and SAMPLE ARRAYS+++++++++++++++++++++++++"), t_arr_fltVolumesWater, t_arr_fltVolumesSample);
  l_intWorkPlateArraySize=t_arr_strDNA_ID.GetSize();
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------\n\n                        TRACE\n\n-----------------------------------------------------------------------------------------------"));
  TrcTrace(Translate(" WORK PLATE ARRAY SIZE --------------->"), l_intWorkPlateArraySize);
}

private function Test(  ) void {
  private variable t_strChannelPattern;
  STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_strStandardVolumeTips, 999);
  STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_strStandardVolumeTips, 6);
  t_strChannelPattern = Translate("11111100");
  STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_strStandardVolumeTips, t_strChannelPattern);
  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
  ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
  ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_strStandardVolumeTips, 6);
  t_strChannelPattern = Translate("11111100");
  STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_strStandardVolumeTips, t_strChannelPattern);
  STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_strStandardVolumeTips);
  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
  ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
  ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_strStandardVolumeTips);
  abort;
}
