global device ML_STAR ("HH_50uL_PCRSetup_TK_V0.0.0.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "InhecoMTEC\\HSLMTecLib.hsl" }
 namespace _Method { #include "HSLLabwrAccess\\HSLLabwrAccess.hsl" }
 namespace _Method { #include "HSLInhecoTEC\\HSLInhecoTECLib.hsl" }
#include "HH_50uL_PCRSetup_TK_V0.0.0.res"
dialog customDialog_1;
dialog customDialog_2;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("***********************\nThis method makes 1 PCR plate with 50uL rxn volumes.\n\nThe final PCR mix includes 3% DMSO.\n\nPCR plate is pre-loaded with 2uL of 0.5ng/uL DNA to be amplified. \n*************************"));
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    MECC::TraceComment(Translate("*******\nNFW addition"));
    customDialog_2.InitCustomDialog("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");
    customDialog_2.ShowCustomDialog();
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    MECC::TraceComment(Translate("********** \nPrimer mix addition"));
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    MECC::TraceComment(Translate("****************\nDMSO addition"));
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    MECC::TraceComment(Translate("*****************\nKapa Hifi addition and mixing"));
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
  } }
