 namespace _Method { #include "HSLInhecoTECLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "GreenLight\\hamSTAR Methods\\HSLTrcLib.hsl" }
 namespace _Method { #include "STAR Tools\\STAR Tip Tools.hs_" }
 namespace _Method { #include "AppsLibrary\\HSLAppsLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLInhecoTEC\\HSLInhecoTECLib.hsl" }
#include "IVTLayout[4.0].res"
dialog customDialog_1;
dialog customDialog_2;
dialog customDialog_3;
dialog customDialog_4;
dialog customDialog_5;
dialog customDialog_6;
variable t_strFileOutputError;
variable t_blnControlOn;
variable t_str7ChannelPattern;
variable t_str300CountChannels;
variable t_fltPositiveControlVolume;
variable t_str1ChannelPattern;
variable t_intCurrentTemplatePosition;
variable t_fltWaterVolume;
variable t_intArrayControl;
variable t_strUserDefinedFilename;
variable t_intNumberOfChannels_1;
variable t_strCPACError;
variable t_strFilePathOutput;
variable t_fltWaterVolumeToIVT;
variable t_fltTemplateVolume;
variable t_strWorklistFolder;
variable t_strFilePathOutputControls;
variable loopCountTemplate;
variable t_fltReactionVolume;
variable t_strFilePathCONTROLS;
variable t_strFilePath;
variable t_fltControlVolume;
variable t_intNumberOfChannels_6;
variable t_fltEnzymeVolume;
variable t_str6ChannelPattern;
variable t_fltReactionMixVolume;
variable t_intNumberOfChannels_7;
variable loopCountWater;
variable t_fltWaterVolumeToControl;
variable t_intTemplateUsedPositions;
variable loopCountControlDispense;
sequence seqControlsToIVT;
sequence seqControlsFromSource;
variable t_arr_fltSourceConcentrations_CONTROLS[];
variable t_arr_fltFinalConcentrations_CONTROLS[];
variable t_arr_strWell_ID[];
variable t_arr_fltWaterVolumes[];
variable t_arr_strWell_ID_Controls[];
variable t_arr_fltTemplateVolumes[];
variable t_arr_fltFinalConcentrations[];
variable t_arr_fltControlVolumes[];
variable t_arr_fltWaterToControls[];
variable t_arr_fltWaterVolumes_Controls[];
variable t_arr_fltWaterToIVT[];
variable t_arr_fltSourceConcentrations[];
variable t_varDialogue;
global device ML_STAR ("IVTLayout[4.0].lay", "ML_STAR", hslTrue);
variable t_str1000CountChannels;
variable t_intControlID;
variable io_fltTemplateConcentration;
variable t_strMPHTipCount;
variable o_intNumberofIVTs;
sequence seqControlsToIVT_2;
sequence seqControlsToIVT_3;
sequence seqControlsToIVT_4;
variable t_intNumberOfChannels_2;
variable t_str2ChannelPattern;
variable loopCounterTemplate;
dialog customDialog_7;
variable t_arr_fltTemplateVolumesPos;
variable loopCounter1;
variable t_intArraySize;
variable t_intWaterDispenseCorrected;
variable t_intTemplateDispenseCorrected;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    STAR_TIP_TOOLS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("\n_________________________________________________________________________________________________\nGreenLight BioSciences\n\nIVT Protocol\nLast Edit: 6/11/2021\nDesc.: 1000uL IVT reaction volume in deep well plate, preps up to 4 IVT plates at a time\n*Make sure each tube of Positive Control has >600 uL for each plate\n*2 troughs of buffer needed (~150 mL in each)\n*Run calculation on H1 and H3 Ld5 S and AS controls to make sure there is enough material to take from these wells for all 4 plates\n\n--Changes\nfrom 700ul to 660ul for Buffer\nwith 40ul of clean cap preplated into 2.2ml DW plate. \n\n_________________________________________________________________________________________________\n"));
    t_strWorklistFolder = Translate("");
    t_strFilePath = Translate("");
    t_strFilePathCONTROLS = Translate("");
    t_strUserDefinedFilename = Translate("");
    t_strFilePathOutputControls = Translate("");
    t_strFilePathOutput = Translate("");
    t_str7ChannelPattern = Translate("");
    t_str6ChannelPattern = Translate("11111100");
    t_str1ChannelPattern = Translate("");
    t_intNumberOfChannels_7 = 7;
    t_intNumberOfChannels_6 = 6;
    t_intNumberOfChannels_1 = 1;
    t_intNumberOfChannels_2 = 2;
    t_fltTemplateVolume = 300;
    t_fltPositiveControlVolume = 300;
    t_fltControlVolume = 300;
    t_fltEnzymeVolume = 200;
    t_fltReactionVolume = 500;
    t_fltReactionMixVolume = 500;
    t_fltWaterVolume = 0;
    t_fltWaterVolumeToIVT = 0;
    t_fltWaterVolumeToControl = 0;
    o_intNumberofIVTs = 0;
    t_intArrayControl = 1;
    t_intTemplateUsedPositions = 1;
    t_arr_strWell_ID.SetSize(0);
    t_arr_strWell_ID_Controls.SetSize(0);
    t_arr_fltTemplateVolumes.SetSize(0);
    t_arr_fltControlVolumes.SetSize(0);
    t_arr_fltWaterVolumes.SetSize(0);
    t_arr_fltWaterVolumes_Controls.SetSize(0);
    t_arr_fltWaterToIVT.SetSize(0);
    t_arr_fltWaterToControls.SetSize(0);
    t_arr_fltSourceConcentrations.SetSize(0);
    t_arr_fltSourceConcentrations_CONTROLS.SetSize(0);
    t_arr_fltFinalConcentrations.SetSize(0);
    t_arr_fltFinalConcentrations_CONTROLS.SetSize(0);
    t_str300CountChannels = Translate("300Channels");
    t_str1000CountChannels = Translate("1000Channels");
    t_strMPHTipCount = Translate("1000MPH");
    t_strCPACError = Translate("");
    t_strFileOutputError = Translate("");
    t_blnControlOn = 0;
    MECC::TraceComment(Translate("Initialize Devices\n"));
    customDialog_5.InitCustomDialog("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");
    customDialog_5.ShowCustomDialog();
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    io_fltTemplateConcentration = 10;
    HSLInhecoTECLib::Initialize(0, 0, t_strCPACError);
    HSLInhecoTECLib::SetTargetTemperature(0, 1, 4.0, t_strCPACError);
    HSLInhecoTECLib::StartTemperatureControl(0, 1, t_strCPACError);
    HSLInhecoTECLib::SetTargetTemperature(0, 2, 4.0, t_strCPACError);
    HSLInhecoTECLib::StartTemperatureControl(0, 2, t_strCPACError);
    if(0){
      customDialog_1.InitCustomDialog("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");
      customDialog_1.ShowCustomDialog();
      t_varDialogue = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
    }
    customDialog_6.InitCustomDialog("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");
    customDialog_6.ShowCustomDialog();
    t_varDialogue = customDialog_6.GetCustomDialogProperty( "ReturnValue" );
    t_strFilePath = customDialog_6.GetCustomDialogProperty( "path1.Path" );
    t_strFilePathCONTROLS = customDialog_6.GetCustomDialogProperty( "path3.Path" );
    t_blnControlOn = customDialog_6.GetCustomDialogProperty( "checkBox1.IsChecked" );
    t_strUserDefinedFilename = customDialog_6.GetCustomDialogProperty( "textBox1.Text" );
    o_intNumberofIVTs = customDialog_6.GetCustomDialogProperty( "numeric1.Value" );
    if (t_blnControlOn == 1)
    {
      APPSLIB::TraceValues(Translate("++++++++++++Control Dispensing ON+++++++++++"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    }
    else
    {
      APPSLIB::TraceValues(Translate("++++++++++++Control Dispensing OFF++++++++++++++"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
    }
    WorklistProcessing();
    customDialog_2.InitCustomDialog("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");
    customDialog_2.ShowCustomDialog();
    STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300CountChannels, 999);
    STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, t_strMPHTipCount, 999);
    STAR_TIP_TOOLS::BuildChannelPattern(7, 8, t_str7ChannelPattern);
    STAR_TIP_TOOLS::BuildChannelPattern(6, 8, t_str6ChannelPattern);
    STAR_TIP_TOOLS::BuildChannelPattern(1, 8, t_str1ChannelPattern);
    STAR_TIP_TOOLS::BuildChannelPattern(2, 8, t_str2ChannelPattern);
    customDialog_7.InitCustomDialog("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");
    customDialog_7.ShowCustomDialog();
    t_varDialogue = customDialog_7.GetCustomDialogProperty( "ReturnValue" );
    customDialog_3.InitCustomDialog("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");
    customDialog_3.ShowCustomDialog();
    t_varDialogue = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
    MECC::TraceComment(Translate("++++++++++++++++++++++++++Water Dispense Begin++++++++++++++++++++++++++++++++++++"));
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300CountChannels, t_intNumberOfChannels_7);
    STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300CountChannels, t_str7ChannelPattern);
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    if(0){
      t_intArraySize=t_arr_fltWaterToIVT.GetSize();
      {
        for(loopCounter1 = 0; loopCounter1 < t_intArraySize;)
        {
          loopCounter1 = loopCounter1 + 1;
          t_intWaterDispenseCorrected=t_arr_fltWaterToIVT.GetAt(loopCounter1-1);
          t_intWaterDispenseCorrected = t_intWaterDispenseCorrected * 2;
          t_arr_fltWaterToIVT.SetAt(loopCounter1-1, t_intWaterDispenseCorrected);
        }
      }
    }
    {
      loopCountWater = 0;
      ML_STAR.seqIVTPlate.SetCurrentPosition(1);
      while (
         (ML_STAR.seqIVTPlate.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.seqIVTPlate, 1);
        loopCountWater = loopCountWater + 1;
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (o_intNumberofIVTs >= 2)
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
        if (o_intNumberofIVTs >= 3)
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
        if (o_intNumberofIVTs == 4)
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
        SeqIncrement(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 1);
        t_intArrayControl = t_intArrayControl + 7;
        SeqIncrement(ML_STAR.seqIVTPlate, 7);
        SeqIncrement(ML_STAR.seqIVTPlate_2, 7);
        SeqIncrement(ML_STAR.seqIVTPlate_3, 7);
        SeqIncrement(ML_STAR.seqIVTPlate_4, 7);
        TipCount::Write2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300CountChannels, ML_STAR);
        if (
           (ML_STAR.seqIVTPlate.GetCurrentPosition() > 0 && ML_STAR.seqIVTPlate.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.seqIVTPlate.SetMax(ML_STAR.seqIVTPlate.GetTotal());
      ML_STAR.seqIVTPlate.SetCurrentPosition(1);
    }
    if (t_blnControlOn == 1)
    {
      {
        for(loopCountControlDispense = 0; loopCountControlDispense < 2;)
        {
          loopCountControlDispense = loopCountControlDispense + 1;
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
      }
      if (o_intNumberofIVTs >= 2)
      {
        {
          for(loopCountControlDispense = 0; loopCountControlDispense < 2;)
          {
            loopCountControlDispense = loopCountControlDispense + 1;
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          }
        }
      }
      if (o_intNumberofIVTs >= 3)
      {
        {
          for(loopCountControlDispense = 0; loopCountControlDispense < 2;)
          {
            loopCountControlDispense = loopCountControlDispense + 1;
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          }
        }
      }
      if (o_intNumberofIVTs == 4)
      {
        {
          for(loopCountControlDispense = 0; loopCountControlDispense < 2;)
          {
            loopCountControlDispense = loopCountControlDispense + 1;
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          }
        }
      }
      TipCount::Write2(ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300CountChannels, ML_STAR);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    t_intArrayControl = 1;
    SeqResetSequenceIndexes(ML_STAR.seqIVTPlate_2);
    SeqResetSequenceIndexes(ML_STAR.seqIVTPlate_3);
    SeqResetSequenceIndexes(ML_STAR.seqIVTPlate_4);
    MECC::TraceComment(Translate("+++++++++++++++++++++++++Template Dispense Begin++++++++++++++++++++++++++++++++++++"));
    t_intArrayControl = 1;
    if(0){
      t_intArraySize=t_arr_fltTemplateVolumes.GetSize();
      {
        for(loopCounter1 = 0; loopCounter1 < t_intArraySize;)
        {
          loopCounter1 = loopCounter1 + 1;
          t_intTemplateDispenseCorrected=t_arr_fltTemplateVolumes.GetAt(loopCounter1-1);
          t_intTemplateDispenseCorrected = t_intTemplateDispenseCorrected * 2;
          t_arr_fltTemplateVolumes.SetAt(loopCounter1-1, t_intTemplateDispenseCorrected);
        }
      }
    }
    {
      loopCountTemplate = 0;
      ML_STAR.seqIVTPlate.SetCurrentPosition(1);
      while (
         (ML_STAR.seqIVTPlate.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.seqIVTPlate, 1);
        loopCountTemplate = loopCountTemplate + 1;
        TrcTrace(Translate("Columns Processed:"), loopCountTemplate);
        if (t_blnControlOn == 1)
        {
          MECC::TraceComment(Translate("++++++++++++++++++++++++++Control Dispense Begin++++++++++++++++++++++++++++++++++++"));
          if (loopCountTemplate == 1)
          {
            SeqResetSequenceIndexes(seqControlsToIVT);
            STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300CountChannels, t_intNumberOfChannels_2);
            STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300CountChannels, t_str2ChannelPattern);
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            SeqIncrement(seqControlsToIVT, 1);
            SeqResetSequenceIndexes(seqControlsFromSource);
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            SeqResetSequenceIndexes(seqControlsToIVT);
            SeqResetSequenceIndexes(seqControlsFromSource);
            if (o_intNumberofIVTs >= 2)
            {
              SeqResetSequenceIndexes(seqControlsToIVT_2);
              ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              SeqIncrement(seqControlsToIVT_2, 1);
              SeqResetSequenceIndexes(seqControlsFromSource);
              ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              SeqResetSequenceIndexes(seqControlsToIVT_2);
              SeqResetSequenceIndexes(seqControlsFromSource);
            }
            if (o_intNumberofIVTs >= 3)
            {
              SeqResetSequenceIndexes(seqControlsToIVT_3);
              ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              SeqIncrement(seqControlsToIVT_3, 1);
              SeqResetSequenceIndexes(seqControlsFromSource);
              ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              SeqResetSequenceIndexes(seqControlsToIVT_3);
              SeqResetSequenceIndexes(seqControlsFromSource);
            }
            if (o_intNumberofIVTs == 4)
            {
              SeqResetSequenceIndexes(seqControlsToIVT_4);
              ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              SeqIncrement(seqControlsToIVT_4, 1);
              SeqResetSequenceIndexes(seqControlsFromSource);
              ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
              SeqResetSequenceIndexes(seqControlsToIVT_4);
              SeqResetSequenceIndexes(seqControlsFromSource);
            }
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300CountChannels);
            STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300CountChannels, t_intNumberOfChannels_2);
            STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300CountChannels, t_str2ChannelPattern);
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            if (o_intNumberofIVTs >= 2)
            {
              ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            }
            if (o_intNumberofIVTs >= 3)
            {
              ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            }
            if (o_intNumberofIVTs >= 4)
            {
              ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            }
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300CountChannels);
            STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300CountChannels, t_intNumberOfChannels_2);
            STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300CountChannels, t_str2ChannelPattern);
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
            ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            if (o_intNumberofIVTs >= 2)
            {
              ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            }
            if (o_intNumberofIVTs >= 3)
            {
              ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            }
            if (o_intNumberofIVTs >= 4)
            {
              ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
              ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
            }
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300CountChannels);
          }
        }
        MECC::TraceComment(Translate("++++++++++++++++++++++++++Template Dispense Begin++++++++++++++++++++++++++++++++++++"));
        STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300CountChannels, t_intNumberOfChannels_7);
        STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300CountChannels, t_str7ChannelPattern);
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        if (t_intCurrentTemplatePosition <= 83)
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          t_arr_fltTemplateVolumesPos=t_arr_fltTemplateVolumes.GetAt(loopCountTemplate-1);
          TrcTrace(Translate("t_arr_fltTemplateVolumesPos = "), t_arr_fltTemplateVolumesPos);
        }
        else
        {
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        }
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (o_intNumberofIVTs >= 2)
        {
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300CountChannels, t_intNumberOfChannels_7);
          STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300CountChannels, t_str7ChannelPattern);
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          if (t_intCurrentTemplatePosition <= 83)
          {
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          }
          else
          {
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          }
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
        if (o_intNumberofIVTs >= 3)
        {
          if (loopCounterTemplate == 2)
          {
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300CountChannels, t_intNumberOfChannels_7);
            STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300CountChannels, t_str7ChannelPattern);
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          }
          if (t_intCurrentTemplatePosition <= 83)
          {
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          }
          else
          {
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          }
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
        if (o_intNumberofIVTs >= 4)
        {
          if (loopCounterTemplate == 2)
          {
            ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
            STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300CountChannels, t_intNumberOfChannels_7);
            STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300CountChannels, t_str7ChannelPattern);
            ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          }
          if (t_intCurrentTemplatePosition <= 83)
          {
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          }
          else
          {
            ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          }
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if(0){
          t_intTemplateUsedPositions = SeqGetUsedPositions(ML_STAR.seqTemplateMix_1);
          t_intCurrentTemplatePosition = t_intTemplateUsedPositions * loopCountTemplate;
          t_intCurrentTemplatePosition = t_intCurrentTemplatePosition * 2;
          TrcTrace(Translate("Template Positions Used:"), t_intCurrentTemplatePosition);
          if (t_intCurrentTemplatePosition <= 83)
          {
            SeqIncrement(ML_STAR.seqTemplateMix_1, 7);
          }
          else
          {
            if (loopCountTemplate == 6)
            {
            }
            else
            {
              SeqIncrement(ML_STAR.seqTemplateMix_2, 7);
            }
          }
        }
        t_intArrayControl = t_intArrayControl + 7;
        if (
           (ML_STAR.seqIVTPlate.GetCurrentPosition() > 0 && ML_STAR.seqIVTPlate.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.seqIVTPlate.SetMax(ML_STAR.seqIVTPlate.GetTotal());
      ML_STAR.seqIVTPlate.SetCurrentPosition(1);
    }
    t_intArrayControl = 1;
    SeqResetSequenceIndexes(ML_STAR.seqIVTPlate);
    SeqResetSequenceIndexes(ML_STAR.seqIVTPlate_2);
    SeqResetSequenceIndexes(ML_STAR.seqIVTPlate_3);
    SeqResetSequenceIndexes(ML_STAR.seqIVTPlate_4);
    MECC::TraceComment(Translate("+++++++++++++++++++++++++IVT MasterMix Dispense Begin++++++++++++++++++++++++++++++++++++"));
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, t_strMPHTipCount, 96);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    if (o_intNumberofIVTs >= 2)
    {
      STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, t_strMPHTipCount, 96);
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    }
    if (o_intNumberofIVTs >= 3)
    {
      STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, t_strMPHTipCount, 96);
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    }
    if (o_intNumberofIVTs >= 4)
    {
      STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, t_strMPHTipCount, 96);
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    }
    customDialog_4.InitCustomDialog("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");
    customDialog_4.ShowCustomDialog();
    t_varDialogue = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
    if(0){
      STAR_TIP_TOOLS::DefragTipRacks1mL(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter);
    }
    HSLInhecoTECLib::StopTemperatureControl(t_intControlID, 1, t_strCPACError);
    HSLInhecoTECLib::StopTemperatureControl(t_intControlID, 2, t_strCPACError);
    HSLInhecoTECLib::Terminate(1);
    abort;
    STAR_TIP_TOOLS::_ExitLibrary();
  } }
