private function WorklistProcessing(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  HSLInhecoTECLib::StopTemperatureControl(t_intControlID, 1, t_strCPACError);
  HSLInhecoTECLib::StopTemperatureControl(t_intControlID, 2, t_strCPACError);
  HSLInhecoTECLib::Terminate(1);
}

private function WorklistProcessing(  ) void {
  private variable o_fltSourceConcentration;
  private variable o_fltWaterVolume;
  private variable loopCountOutput;
  private variable l_fltTargetConcentration_2;
  private variable l_fltNewVolume_1;
  private variable l_intTargetPlateControl;
  private variable o_strWellID;
  private variable loopCountFile;
  private variable loopCountArrayIndex;
  private variable l_fltConcentration_Controls;
  private variable l_fltNewVolume_2;
  private variable loopCountColumn;
  private variable l_strTargetWell;
  private variable l_intFirstAddition;
  private variable loopCountFirst;
  private variable l_intConcentrationControl;
  private variable l_intSecondAddition;
  private variable l_fltConcentration;
  private variable l_intTemplateArraySize;
  private variable l_fltSourceConcentration_1;
  private variable l_fltSourceConcentration_2;
  private variable l_strLabware_Control;
  private variable o_fltTemplateVolume;
  private variable o_fltTargetConcentration;
  private variable l_fltC2V2;
  private variable l_strTargetWell_Control;
  private variable l_intTemplatePlateControl;
  private variable l_intWaterADDControl;
  private variable l_fltTargetConcentration;
  private variable loopCounter3;
  private variable loopCountConcControls;
  private variable l_strSourceWell_Control;
  private variable l_strSourceWell;
  private variable l_fltTargetConcentration_1;
  private file l_hdlFile;
  private file t_hdlOutputFile;
  private file l_hdlControlFile;
  private variable tint_t_fltTemplateVolumesSize;
  private variable t_fltWaterVolumeSize;
  private variable loopCounter2;
  l_intTemplateArraySize = 1;
  l_intTemplatePlateControl = 1;
  l_intTargetPlateControl = 1;
  l_intWaterADDControl = 1;
  l_intConcentrationControl = 1;
  l_fltC2V2 = 0;
  SeqRemoveAll(ML_STAR.seqIVTPlate);
  SeqRemoveAll(ML_STAR.seqIVTPlate_2);
  SeqRemoveAll(ML_STAR.seqIVTPlate_3);
  SeqRemoveAll(ML_STAR.seqIVTPlate_4);
  SeqRemoveAll(ML_STAR.seqTemplateMix_1);
  SeqRemoveAll(ML_STAR.seqTemplateMix_2);
  l_hdlFile.AddField("Source_Well_ID", l_strSourceWell, hslString, 255);
  l_hdlFile.AddField("Concentration", l_fltConcentration, hslFloat);
  l_hdlFile.AddField("Target_Well_ID", l_strTargetWell, hslString, 255);
  if( 0 == l_hdlFile.Open(t_strFilePath + " " + "Hamilton$", hslAppend) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strFilePath, "HxMetEdCompCmd");
  }
  {
    loopCountFile = 0;
    while (
       (l_hdlFile.Eof() == 0)
    )
    {
      loopCountFile = loopCountFile + 1;
      if( 0 == l_hdlFile.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      l_intTemplatePlateControl = l_intTemplatePlateControl + 1;
    }
  }
  if( 0 != l_hdlFile.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  l_hdlFile.RemoveFields();
  l_intTargetPlateControl = l_intTemplatePlateControl / (1 * 1.0);
  APPSLIB::TraceValues(Translate("++++++++++++++++++++++++++++++++++++++++++"), l_intTemplatePlateControl, Translate("++++++++++++++++++++++++++++++++++++++++++"), l_intTargetPlateControl, Translate(""), Translate(""), Translate(""), Translate(""));
  l_intTemplatePlateControl = 1;
  l_hdlFile.AddField("Source_Well_ID", l_strSourceWell, hslString, 255);
  l_hdlFile.AddField("Target_Concentration", l_fltTargetConcentration, hslFloat);
  l_hdlFile.AddField("Concentration", l_fltConcentration, hslFloat);
  l_hdlFile.AddField("Target_Well_ID", l_strTargetWell, hslString, 255);
  if( 0 == l_hdlFile.Open(t_strFilePath + " " + "Hamilton$", hslAppend) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strFilePath, "HxMetEdCompCmd");
  }
  {
    loopCountFile = 0;
    while (
       (l_hdlFile.Eof() == 0)
    )
    {
      loopCountFile = loopCountFile + 1;
      if( 0 == l_hdlFile.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      t_arr_strWell_ID.AddAsLast(l_strSourceWell);
      SeqAdd(ML_STAR.seqIVTPlate, Translate("seqIVTPlate"), l_strTargetWell);
      SeqAdd(ML_STAR.seqIVTPlate_2, Translate("seqIVTPlate_2"), l_strTargetWell);
      SeqAdd(ML_STAR.seqIVTPlate_3, Translate("seqIVTPlate_3"), l_strTargetWell);
      SeqAdd(ML_STAR.seqIVTPlate_4, Translate("seqIVTPlate_4"), l_strTargetWell);
      if(0){
        if (l_intTemplatePlateControl <= l_intTargetPlateControl)
        {
          SeqAdd(ML_STAR.seqIVTPlate, Translate("seqIVTPlate"), l_strTargetWell);
          SeqAdd(ML_STAR.seqIVTPlate_2, Translate("seqIVTPlate_2"), l_strTargetWell);
          SeqAdd(ML_STAR.seqIVTPlate_3, Translate("seqIVTPlate_3"), l_strTargetWell);
          SeqAdd(ML_STAR.seqIVTPlate_4, Translate("seqIVTPlate_4"), l_strTargetWell);
        }
      }
      if (l_intTemplatePlateControl <= 96)
      {
        SeqAdd(ML_STAR.seqTemplateMix_1, Translate("seqTemplateMix_1"), l_strSourceWell);
      }
      else
      {
        SeqAdd(ML_STAR.seqTemplateMix_2, Translate("seqTemplateMix_2"), l_strSourceWell);
      }
      l_fltC2V2 = l_fltTargetConcentration * 100;
      t_fltTemplateVolume = l_fltC2V2 / (l_fltConcentration * 1.0);
      if(0){
        if (t_fltTemplateVolume >= 300)
        {
          t_fltTemplateVolume = 300;
        }
      }
      t_fltTemplateVolume = APPSLIB::MathRound(t_fltTemplateVolume, 1);
      l_fltConcentration = APPSLIB::MathRound(l_fltConcentration, 1);
      l_fltTargetConcentration = APPSLIB::MathRound(l_fltTargetConcentration, 1);
      t_arr_fltTemplateVolumes.AddAsLast(t_fltTemplateVolume);
      t_arr_fltSourceConcentrations.AddAsLast(l_fltConcentration);
      t_arr_fltFinalConcentrations.AddAsLast(l_fltTargetConcentration);
      t_fltTemplateVolume = 30;
      l_intTemplatePlateControl = l_intTemplatePlateControl + 1;
    }
  }
  if( 0 != l_hdlFile.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  l_hdlFile.RemoveFields();
  MECC::TraceComment(Translate("##################################\n\nArray sizes\n\n##################################"));
  tint_t_fltTemplateVolumesSize=t_arr_fltTemplateVolumes.GetSize();
  TrcTrace(Translate("tint_t_fltTemplateVolumeSize"), tint_t_fltTemplateVolumesSize);
  l_intTemplatePlateControl = l_intTemplatePlateControl - 1;
  l_intWaterADDControl = l_intTemplatePlateControl / (14 * 1.0);
  l_intConcentrationControl = l_intTemplatePlateControl / (14 * 1.0);
  l_intFirstAddition = 1;
  l_intSecondAddition = 1;
  APPSLIB::TraceValues(Translate("Template Plate Control: "), l_intTemplatePlateControl, Translate("WATER ADDPlate Control: "), l_intWaterADDControl, l_intTemplatePlateControl, Translate(""), Translate(""), Translate(""));
  if(0){
    {
      for(loopCountFirst = 0; loopCountFirst < l_intConcentrationControl;)
      {
        loopCountFirst = loopCountFirst + 1;
        {
          for(loopCountColumn = 0; loopCountColumn < 7;)
          {
            loopCountColumn = loopCountColumn + 1;
            TrcTrace(Translate("First: "), l_intFirstAddition);
            l_intSecondAddition = l_intFirstAddition + 7;
            if (t_arr_fltFinalConcentrations.ElementAt( l_intFirstAddition -1) != t_arr_fltFinalConcentrations.ElementAt( l_intSecondAddition -1))
            {
              l_fltTargetConcentration_1 = t_arr_fltFinalConcentrations.ElementAt( l_intFirstAddition -1);
              l_fltTargetConcentration_2 = t_arr_fltFinalConcentrations.ElementAt( l_intSecondAddition -1);
              l_fltSourceConcentration_1 = t_arr_fltSourceConcentrations.ElementAt( l_intFirstAddition -1);
              l_fltSourceConcentration_2 = t_arr_fltSourceConcentrations.ElementAt( l_intSecondAddition -1);
              l_fltNewVolume_1 = 0;
              l_fltNewVolume_2 = 0;
              if (l_fltTargetConcentration_1 > l_fltTargetConcentration_2)
              {
                l_fltTargetConcentration_1 = l_fltTargetConcentration_2;
                l_fltTargetConcentration_1 = APPSLIB::MathRound(l_fltTargetConcentration_1, 1);
                t_arr_fltFinalConcentrations.SetAt(l_intFirstAddition-1, l_fltTargetConcentration_1);
                l_fltC2V2 = l_fltTargetConcentration_1 * 100;
                l_fltNewVolume_1 = l_fltC2V2 / (l_fltSourceConcentration_1 * 1.0);
                l_fltNewVolume_1 = APPSLIB::MathRound(l_fltNewVolume_1, 1);
                t_arr_fltTemplateVolumes.SetAt(l_intFirstAddition-1, l_fltNewVolume_1);
              }
              else
              {
                l_fltTargetConcentration_2 = l_fltTargetConcentration_1;
                l_fltTargetConcentration_2 = APPSLIB::MathRound(l_fltTargetConcentration_2, 1);
                t_arr_fltFinalConcentrations.SetAt(l_intSecondAddition-1, l_fltTargetConcentration_2);
                l_fltC2V2 = l_fltTargetConcentration_2 * 100;
                l_fltNewVolume_2 = l_fltC2V2 / (l_fltSourceConcentration_2 * 1.0);
                l_fltNewVolume_2 = APPSLIB::MathRound(l_fltNewVolume_2, 1);
                t_arr_fltTemplateVolumes.SetAt(l_intSecondAddition-1, l_fltNewVolume_2);
              }
            }
            else
            {
            }
            l_intFirstAddition = l_intFirstAddition + 1;
            TrcTrace(Translate("Second: "), l_intSecondAddition);
          }
        }
        l_intFirstAddition = l_intFirstAddition + 7;
      }
    }
  }
  MECC::TraceComment(Translate("#################################################################\n\nDetermining individual water volumes. (Total reaction-template=Water Volume)\n\n#################################################################"));
  l_intTemplateArraySize=t_arr_fltTemplateVolumes.GetSize();
  TrcTrace(Translate("I_intTemplateArraySize"), l_intTemplateArraySize);
  {
    for(loopCountArrayIndex = 0; loopCountArrayIndex < l_intTemplateArraySize;)
    {
      loopCountArrayIndex = loopCountArrayIndex + 1;
      t_arr_fltTemplateVolumes[ loopCountArrayIndex -1] = t_arr_fltTemplateVolumes.ElementAt( loopCountArrayIndex -1) * 10;
      t_fltTemplateVolume = t_arr_fltTemplateVolumes.ElementAt( loopCountArrayIndex -1);
      t_fltWaterVolume = 300 - t_fltTemplateVolume;
      t_fltWaterVolume = APPSLIB::MathRound(t_fltWaterVolume, 1);
      t_arr_fltWaterVolumes.AddAsLast(t_fltWaterVolume);
    }
  }
  t_fltWaterVolumeSize=t_arr_fltWaterVolumes.GetSize();
  TrcTrace(Translate(" t_fltWaterVolumeSize"), t_fltWaterVolumeSize);
  l_intFirstAddition = 1;
  l_intSecondAddition = 1;
  {
    for(loopCounter3 = 0; loopCounter3 < l_intTemplatePlateControl;)
    {
      loopCounter3 = loopCounter3 + 1;
      t_fltWaterVolumeToIVT = t_arr_fltWaterVolumes.ElementAt( loopCounter3 -1) + 0;
      t_fltWaterVolumeToIVT = APPSLIB::MathRound(t_fltWaterVolumeToIVT, 1);
      if (t_fltWaterVolumeToIVT < 0.5)
      {
        t_fltWaterVolumeToIVT = 0;
      }
      t_arr_fltWaterToIVT.AddAsLast(t_fltWaterVolumeToIVT);
    }
  }
  if (t_blnControlOn == 1)
  {
    l_fltTargetConcentration = io_fltTemplateConcentration;
    l_hdlControlFile.AddField("Source_Well_ID", l_strSourceWell_Control, hslString, 255);
    l_hdlControlFile.AddField("Labware_ID", l_strLabware_Control, hslString, 255);
    l_hdlControlFile.AddField("Concentration", l_fltConcentration_Controls, hslFloat);
    l_hdlControlFile.AddField("Target_Well_ID", l_strTargetWell_Control, hslString, 255);
    if( 0 == l_hdlControlFile.Open(t_strFilePathCONTROLS + " " + "Hamilton$", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strFilePathCONTROLS, "HxMetEdCompCmd");
    }
    {
      loopCountFile = 0;
      while (
         (l_hdlControlFile.Eof() == 0)
      )
      {
        loopCountFile = loopCountFile + 1;
        if( 0 == l_hdlControlFile.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        SeqAdd(seqControlsFromSource, l_strLabware_Control, l_strSourceWell_Control);
        SeqAdd(seqControlsToIVT, Translate("seqIVTPlate"), l_strTargetWell_Control);
        SeqAdd(seqControlsToIVT_2, Translate("seqIVTPlate_2"), l_strTargetWell_Control);
        SeqAdd(seqControlsToIVT_3, Translate("seqIVTPlate_3"), l_strTargetWell_Control);
        SeqAdd(seqControlsToIVT_4, Translate("seqIVTPlate_4"), l_strTargetWell_Control);
        t_arr_strWell_ID_Controls.AddAsLast(l_strSourceWell_Control);
        {
          loopCountConcControls = 0;
          while (t_fltControlVolume > 15)
          {
            loopCountConcControls = loopCountConcControls + 1;
            l_fltC2V2 = l_fltTargetConcentration * 100;
            t_fltControlVolume = l_fltC2V2 / (l_fltConcentration_Controls * 1.0);
            if (l_fltConcentration_Controls < 67)
            {
              l_fltTargetConcentration = l_fltTargetConcentration - 0.5;
            }
          }
        }
        t_fltTemplateVolume = APPSLIB::MathRound(t_fltControlVolume, 1);
        l_fltConcentration = APPSLIB::MathRound(l_fltConcentration_Controls, 1);
        l_fltTargetConcentration = APPSLIB::MathRound(l_fltTargetConcentration, 1);
        t_arr_fltControlVolumes.AddAsLast(t_fltControlVolume);
        t_arr_fltSourceConcentrations_CONTROLS.AddAsLast(l_fltConcentration_Controls);
        t_arr_fltFinalConcentrations_CONTROLS.AddAsLast(l_fltTargetConcentration);
        t_fltControlVolume = 30;
        l_fltTargetConcentration = io_fltTemplateConcentration;
      }
    }
    if( 0 != l_hdlControlFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    l_hdlControlFile.RemoveFields();
    l_intFirstAddition = 1;
    l_intSecondAddition = 2;
    l_fltTargetConcentration_1 = t_arr_fltFinalConcentrations_CONTROLS.ElementAt( l_intFirstAddition -1);
    l_fltTargetConcentration_2 = t_arr_fltFinalConcentrations_CONTROLS.ElementAt( l_intSecondAddition -1);
    l_fltSourceConcentration_1 = t_arr_fltSourceConcentrations_CONTROLS.ElementAt( l_intFirstAddition -1);
    l_fltSourceConcentration_2 = t_arr_fltSourceConcentrations_CONTROLS.ElementAt( l_intSecondAddition -1);
    l_fltNewVolume_1 = 0;
    l_fltNewVolume_2 = 0;
    if (l_fltTargetConcentration_1 > l_fltTargetConcentration_2)
    {
      l_fltTargetConcentration_1 = l_fltTargetConcentration_2;
      l_fltTargetConcentration_1 = APPSLIB::MathRound(l_fltTargetConcentration_1, 1);
      t_arr_fltFinalConcentrations_CONTROLS.SetAt(l_intFirstAddition-1, l_fltTargetConcentration_1);
      l_fltC2V2 = l_fltTargetConcentration_1 * 100;
      l_fltNewVolume_1 = l_fltC2V2 / (l_fltSourceConcentration_1 * 1.0);
      l_fltNewVolume_1 = APPSLIB::MathRound(l_fltNewVolume_1, 1);
      t_arr_fltControlVolumes.SetAt(l_intFirstAddition-1, l_fltNewVolume_1);
    }
    else
    {
      l_fltTargetConcentration_2 = l_fltTargetConcentration_1;
      l_fltTargetConcentration_2 = APPSLIB::MathRound(l_fltTargetConcentration_2, 1);
      t_arr_fltFinalConcentrations_CONTROLS.SetAt(l_intSecondAddition-1, l_fltTargetConcentration_2);
      l_fltC2V2 = l_fltTargetConcentration_2 * 100;
      l_fltNewVolume_2 = l_fltC2V2 / (l_fltSourceConcentration_2 * 1.0);
      l_fltNewVolume_2 = APPSLIB::MathRound(l_fltNewVolume_2, 1);
      t_arr_fltControlVolumes.SetAt(l_intSecondAddition-1, l_fltNewVolume_2);
    }
    {
      for(loopCountArrayIndex = 0; loopCountArrayIndex < 2;)
      {
        loopCountArrayIndex = loopCountArrayIndex + 1;
        t_arr_fltControlVolumes[ loopCountArrayIndex -1] = t_arr_fltControlVolumes.ElementAt( loopCountArrayIndex -1) * 10;
        t_fltControlVolume = t_arr_fltControlVolumes.ElementAt( loopCountArrayIndex -1);
        t_fltWaterVolume = 150 - t_fltControlVolume;
        t_fltWaterVolume = APPSLIB::MathRound(t_fltWaterVolume, 1);
        t_arr_fltWaterVolumes_Controls.AddAsLast(t_fltWaterVolume);
      }
    }
    l_intFirstAddition = 1;
    l_intSecondAddition = 2;
    t_fltWaterVolumeToControl = t_arr_fltWaterVolumes_Controls.ElementAt( l_intFirstAddition -1) + t_arr_fltWaterVolumes_Controls.ElementAt( l_intSecondAddition -1);
    t_fltWaterVolumeToIVT = APPSLIB::MathRound(t_fltWaterVolumeToControl, 1);
    if (t_fltWaterVolumeToControl < 0.5)
    {
      t_fltWaterVolumeToControl = 0;
    }
    t_arr_fltWaterToControls.AddAsLast(t_fltWaterVolumeToControl);
  }
  SeqResetSequenceIndexes(ML_STAR.seqIVTPlate);
  SeqResetSequenceIndexes(ML_STAR.seqIVTPlate_2);
  SeqResetSequenceIndexes(ML_STAR.seqIVTPlate_3);
  SeqResetSequenceIndexes(ML_STAR.seqIVTPlate_4);
  SeqResetSequenceIndexes(ML_STAR.seqTemplateMix_1);
  SeqResetSequenceIndexes(ML_STAR.seqTemplateMix_2);
  SeqResetSequenceIndexes(seqControlsFromSource);
  SeqResetSequenceIndexes(seqControlsToIVT);
  SeqResetSequenceIndexes(seqControlsToIVT_2);
  SeqResetSequenceIndexes(seqControlsToIVT_3);
  SeqResetSequenceIndexes(seqControlsToIVT_4);
  APPSLIB::TraceSequence(ML_STAR.seqIVTPlate);
  if(0){
    APPSLIB::TraceSequence(ML_STAR.seqIVTPlate_2);
    APPSLIB::TraceSequence(ML_STAR.seqIVTPlate_3);
    APPSLIB::TraceSequence(ML_STAR.seqIVTPlate_4);
  }
  APPSLIB::TraceSequence(ML_STAR.seqTemplateMix_1);
  if(0){
    APPSLIB::TraceSequence(ML_STAR.seqTemplateMix_2);
  }
  if (t_blnControlOn == 1)
  {
    APPSLIB::TraceSequence(seqControlsToIVT);
    if(0){
      APPSLIB::TraceSequence(seqControlsToIVT_2);
      APPSLIB::TraceSequence(seqControlsToIVT_3);
      APPSLIB::TraceSequence(seqControlsToIVT_4);
    }
    APPSLIB::TraceSequence(seqControlsFromSource);
  }
  SeqResetSequenceIndexes(ML_STAR.seqIVTPlate);
  SeqResetSequenceIndexes(ML_STAR.seqTemplateMix_1);
  SeqResetSequenceIndexes(ML_STAR.seqTemplateMix_2);
  SeqResetSequenceIndexes(seqControlsFromSource);
  SeqResetSequenceIndexes(seqControlsToIVT);
  l_intTemplateArraySize=t_arr_fltTemplateVolumes.GetSize();
  {
    for(loopCounter2 = 0; loopCounter2 < l_intTemplateArraySize;)
    {
      loopCounter2 = loopCounter2 + 1;
      if (t_arr_fltTemplateVolumes.ElementAt( loopCounter2 -1) >= 300)
      {
        t_arr_fltTemplateVolumes.SetAt(loopCounter2-1, 300);
        t_arr_fltWaterVolumes.SetAt(loopCounter2-1, 0);
      }
    }
  }
  MECC::TraceComment(Translate("################################\n\nTrace arrays \n\n################################"));
  APPSLIB::TraceArray3(Translate("Template Volume ||| Water Volume ||| Final Concentration"), t_arr_fltTemplateVolumes, t_arr_fltWaterVolumes, t_arr_fltFinalConcentrations);
  APPSLIB::TraceArray(Translate("Total Water to IVT Plate"), t_arr_fltWaterToIVT);
  if(0){
    if (t_blnControlOn == 1)
    {
      APPSLIB::TraceArray(Translate("Total Water to Controls"), t_arr_fltWaterToControls);
      APPSLIB::TraceArray(Translate("Control Volumes :        "), t_arr_fltControlVolumes);
      APPSLIB::TraceArray(Translate("Control Water Volumes :        "), t_arr_fltWaterVolumes_Controls);
    }
  }
  t_strFilePathOutput = StrConcat4(Translate("C:\Users\user\Desktop\Greenlight Worklisting"), Translate("\\"), t_strUserDefinedFilename, Translate(".xls"));
  if(0){
    t_hdlOutputFile.AddField("TemplateVolume", o_fltTemplateVolume, hslFloat);
    t_hdlOutputFile.AddField("WaterVolume", o_fltWaterVolume, hslFloat);
    t_hdlOutputFile.AddField("SourceConcentration", o_fltSourceConcentration, hslFloat);
    t_hdlOutputFile.AddField("TargetConcentration", o_fltTargetConcentration, hslFloat);
    t_hdlOutputFile.AddField("WellID", o_strWellID, hslString, 255);
    if( 0 == t_hdlOutputFile.Open(t_strFilePathOutput + " " + "Samples", hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strFilePathOutput, "HxMetEdCompCmd");
    }
    {
      for(loopCountOutput = 0; loopCountOutput < l_intTemplateArraySize;)
      {
        loopCountOutput = loopCountOutput + 1;
        o_fltTemplateVolume = t_arr_fltTemplateVolumes.ElementAt( loopCountOutput -1);
        o_fltWaterVolume = t_arr_fltWaterVolumes.ElementAt( loopCountOutput -1);
        o_fltSourceConcentration = t_arr_fltSourceConcentrations.ElementAt( loopCountOutput -1);
        o_fltTargetConcentration = t_arr_fltFinalConcentrations.ElementAt( loopCountOutput -1);
        o_strWellID = t_arr_strWell_ID.ElementAt( loopCountOutput -1);
        if( 0 == t_hdlOutputFile.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if( 0 != t_hdlOutputFile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    t_hdlOutputFile.RemoveFields();
    MECC::TraceComment(Translate("TROUBLESHOOT+++++++++++++++++++++++++++++++"));
    if (t_blnControlOn == 1)
    {
      t_hdlOutputFile.AddField("TemplateVolume", o_fltTemplateVolume, hslFloat);
      t_hdlOutputFile.AddField("WaterVolume", o_fltWaterVolume, hslFloat);
      t_hdlOutputFile.AddField("SourceConcentration", o_fltSourceConcentration, hslFloat);
      t_hdlOutputFile.AddField("TargetConcentration", o_fltTargetConcentration, hslFloat);
      t_hdlOutputFile.AddField("WellID", o_strWellID, hslString, 255);
      if( 0 == t_hdlOutputFile.Open(t_strFilePathOutput + " " + "Controls", hslWrite) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, t_strFilePathOutput, "HxMetEdCompCmd");
      }
      {
        for(loopCountOutput = 0; loopCountOutput < 2;)
        {
          loopCountOutput = loopCountOutput + 1;
          o_fltTemplateVolume = t_arr_fltControlVolumes.ElementAt( loopCountOutput -1);
          o_fltWaterVolume = t_arr_fltWaterVolumes_Controls.ElementAt( loopCountOutput -1);
          o_fltSourceConcentration = t_arr_fltSourceConcentrations_CONTROLS.ElementAt( loopCountOutput -1);
          o_fltTargetConcentration = t_arr_fltFinalConcentrations_CONTROLS.ElementAt( loopCountOutput -1);
          o_strWellID = t_arr_strWell_ID_Controls.ElementAt( loopCountOutput -1);
          if( 0 == t_hdlOutputFile.WriteRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
        }
      }
      if( 0 != t_hdlOutputFile.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      t_hdlOutputFile.RemoveFields();
    }
  }
}
