private function Archive(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  HSLInhecoTECLib::Terminate(1);
  HSLHamHeaterShaker::StopTempCtrl(t_hdlHHS);
  HSLHamHeaterShaker::Terminate();
}

private function Archive(  ) void {
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  if( 0 == t_hdlTimer10Min.SetTimer(600) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == t_hdlTimer10Min.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.seq1000Channels, t_strChannelTipCount, 48);
  STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, ML_STAR.seq1000Channels, t_strChannelTipCount, t_strChannelPattern);
  {
    loopCounter5 = 0;
    while (
       (ML_STAR.seqMagnetSPRI_1.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.seqMagnetSPRI_1, 1);
      loopCounter5 = loopCounter5 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      {
        for(loopCounter1 = 0; loopCounter1 < 2;)
        {
          loopCounter1 = loopCounter1 + 1;
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
      }
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      SeqIncrement(ML_STAR.seqMagnetSPRI_1, 8);
      SeqIncrement(ML_STAR.SPRICleanedPlate, 8);
      if (
         (ML_STAR.seqMagnetSPRI_1.GetCurrentPosition() > 0 && ML_STAR.seqMagnetSPRI_1.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.seqMagnetSPRI_1.SetMax(ML_STAR.seqMagnetSPRI_1.GetTotal());
    ML_STAR.seqMagnetSPRI_1.SetCurrentPosition(1);
  }
}
