 namespace _Method { #include "HSLDeckVisualize.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "STAR Tools\\STAR Tip Tools.hs_" }
#include "HH-DNA FA_V.1.1.1.res"
dialog dialogHandle_1;
dialog customDialog_2;
dialog dialogHandle_3;
dialog customDialog_4;
dialog dialogHandle_5;
variable t_intFASampleVolume;
variable loopCounter8;
variable t_intNumberofPlates;
variable t_intFAControlWellsToProcess;
variable t_str50CountChannels;
variable t_intWellsToProcess;
variable t_intFAPlatestoProcess;
variable t_str4ChannelPattern;
variable t_str2ChannelPattern;
variable loopCounter1;
variable loopCounter2;
variable t_intFAWellsToProcess;
variable t_intFABufferVolume;
variable t_intNumberOfPlates;
dialog customDialog_6;
dialog customDialog_7;
dialog customDialog_8;
variable t_varDialogue;
dialog customDialog_9;
dialog dialogHandle_10;
variable t_str300CountChannels;
dialog dialogHandle_11;
dialog dialogHandle_12;
global device ML_STAR ("HH-DNA FA_V.1.1.1.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    STAR_TIP_TOOLS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("\n_________________________________________________________________________________________________\nGreenLight BioSciences\n\nHH-DNA FA\n\n1 or 2 DNA plates are used to create up to two Fragment Analyzer plates, as well as two 5X diluted half area plates for reading A260. \n\nThis method consumes 50uL of DNA in its dilution step; therefore, at least 65uL of DNA must be present in each sample well to be quantified. \n\n_________________________________________________________________________________________________\n\n"));
    t_str50CountChannels = Translate("50Channels");
    t_str300CountChannels = Translate("300Channels");
    t_intNumberofPlates = 0;
    t_intFAPlatestoProcess = 0;
    t_str2ChannelPattern = Translate("11000000");
    t_str4ChannelPattern = Translate("11110000");
    t_intFABufferVolume = 22;
    t_intFASampleVolume = 2;
    t_intFAPlatestoProcess = t_intNumberOfPlates;
    STAR_TIP_TOOLS::BuildChannelPattern(2, 8, t_str2ChannelPattern);
    STAR_TIP_TOOLS::BuildChannelPattern(4, 8, t_str4ChannelPattern);
    customDialog_2.InitCustomDialog("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");
    customDialog_2.ShowCustomDialog();
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    customDialog_6.InitCustomDialog("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");
    customDialog_6.SetCustomDialogProperty( "numeric1.Value", t_intNumberofPlates );
    customDialog_6.ShowCustomDialog();
    t_varDialogue = customDialog_6.GetCustomDialogProperty( "ReturnValue" );
    t_intNumberofPlates = customDialog_6.GetCustomDialogProperty( "numeric1.Value" );
    MECC::TraceComment(Translate("**********************Deck Loading Prompts Begin**********************"));
    if (t_intNumberofPlates == 1)
    {
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_PCRPlate_1, 6, Translate("PCR Plate"));
      dialogHandle_12.SetOutput(Translate("Please load empty Deep Well Plate at indicated position."));
      dialogHandle_12.ShowOutput(Translate("PCR Plate"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_PCRPlate_1, 5, Translate("PCR Plate"));
    }
    else
    {
      if (t_intNumberofPlates == 2)
      {
        DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_PCRPlates_ALL, 6, Translate("PCR Plates"));
        dialogHandle_11.SetOutput(Translate("Please load empty Deep Well Plates at indicated positions."));
        dialogHandle_11.ShowOutput(Translate("Pool Plates"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_PCRPlates_ALL, 5, Translate("PCR Plates"));
      }
    }
    if (t_intNumberofPlates == 1)
    {
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_FAPlate_1, 6, Translate("FA Plate"));
      dialogHandle_1.SetOutput(Translate("Please load an FA Plate at the indicated position."));
      dialogHandle_1.ShowOutput(Translate("FA Plate"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_FAPlate_1, 5, Translate("FA Plate"));
    }
    else
    {
      if (t_intNumberofPlates == 2)
      {
        DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_FAPlates_ALL, 6, Translate("FA Plates"));
        dialogHandle_5.SetOutput(Translate("Please load FA Plates at the indicated positions."));
        dialogHandle_5.ShowOutput(Translate("FA Plates"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_FAPlates_ALL, 5, Translate("FA Plates"));
      }
    }
    DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_TEBufferTrough, 6, Translate("TE Buffer Trough"));
    dialogHandle_10.SetOutput(Translate("Please load a TE Buffer Trough at the indicated position."));
    dialogHandle_10.ShowOutput(Translate("TE Buffer Trough"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_TEBufferTrough, 5, Translate("TE Buffer Trough"));
    DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_FALadder, 6, Translate("FA Ladder"));
    dialogHandle_3.SetOutput(Translate("Please load the FA Ladder at the indicated position."));
    dialogHandle_3.ShowOutput(Translate("FA Ladder"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_FALadder, 5, Translate("FA Ladder"));
    STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.seq_50uL_tips_head_all, t_str50CountChannels, 999);
    STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.Seq_300uL_tips_pos_1_288, t_str300CountChannels, 999);
    MECC::TraceComment(Translate("**********************Deck Loading Prompts End**********************"));
    if (t_intNumberofPlates == 1)
    {
      customDialog_4.InitCustomDialog("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");
      customDialog_4.ShowCustomDialog();
    }
    if (t_intNumberofPlates == 2)
    {
      customDialog_9.InitCustomDialog("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");
      customDialog_9.ShowCustomDialog();
    }
    customDialog_7.InitCustomDialog("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");
    customDialog_7.ShowCustomDialog();
    t_varDialogue = customDialog_7.GetCustomDialogProperty( "ReturnValue" );
    MECC::TraceComment(Translate("******************Water Addition Begins**********************"));
    t_intWellsToProcess = t_intNumberofPlates * 96;
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    {
      for(loopCounter8 = 0; loopCounter8 < t_intNumberofPlates;)
      {
        loopCounter8 = loopCounter8 + 1;
        ML_STAR.seq_PCRPlates_ALL.SetCount(t_intWellsToProcess);
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      }
    }
    ML_STAR.seq_FAPlates_ALL.SetCount(t_intWellsToProcess);
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.Seq_300uL_tips_pos_1_288, t_str300CountChannels);
    t_intWellsToProcess = t_intNumberofPlates * 96;
    MECC::TraceComment(Translate("******************Crude DNA Addition Begins**********************"));
    t_intWellsToProcess = t_intNumberofPlates * 96;
    {
      for(loopCounter8 = 0; loopCounter8 < t_intNumberofPlates;)
      {
        loopCounter8 = loopCounter8 + 1;
        ML_STAR.seq_PCRPlates_ALL.SetCount(t_intWellsToProcess);
        ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      }
    }
    ML_STAR.seq_FAPlates_ALL.SetCount(t_intWellsToProcess);
    MECC::TraceComment(Translate("******************Empty NFW blanks**********************"));
    {
      for(loopCounter8 = 0; loopCounter8 < t_intNumberofPlates;)
      {
        loopCounter8 = loopCounter8 + 1;
        ML_STAR.seq_PCRPlates_ALL.SetCount(t_intWellsToProcess);
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
    }
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, t_str50CountChannels);
    MECC::TraceComment(Translate("******************A260 Sample Addition Begins**********************"));
    t_intWellsToProcess = t_intNumberofPlates * 96;
    {
      for(loopCounter8 = 0; loopCounter8 < t_intNumberofPlates;)
      {
        loopCounter8 = loopCounter8 + 1;
        ML_STAR.seq_PCRPlates_ALL.SetCount(t_intWellsToProcess);
        ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      }
    }
    ML_STAR.seq_FAPlates_ALL.SetCount(t_intWellsToProcess);
    MECC::TraceComment(Translate("****************** Adding NFW blanks**********************"));
    {
      for(loopCounter8 = 0; loopCounter8 < t_intNumberofPlates;)
      {
        loopCounter8 = loopCounter8 + 1;
        ML_STAR.seq_PCRPlates_ALL.SetCount(t_intWellsToProcess);
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
    }
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, t_str50CountChannels);
    MECC::TraceComment(Translate("------------------------------------------------------------------------------------------------------------------------------\n\n                                              FA Plate Prep Begins\n\n------------------------------------------------------------------------------------------------------------------------------"));
    MECC::TraceComment(Translate("******************Buffer Addition Begins**********************"));
    t_intFAPlatestoProcess = t_intNumberofPlates;
    t_intFAWellsToProcess = t_intFAPlatestoProcess * 96;
    t_intFAControlWellsToProcess = t_intFAPlatestoProcess * 2;
    ML_STAR.seq_FAPlates_ALL.SetCount(t_intFAWellsToProcess);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    {
      for(loopCounter1 = 0; loopCounter1 < t_intNumberofPlates;)
      {
        loopCounter1 = loopCounter1 + 1;
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      }
    }
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    SeqResetSequenceIndexes(ML_STAR.seq_FAPlates_ALL);
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.seq_50uL_tips_head_all, t_str50CountChannels);
    MECC::TraceComment(Translate("******************Buffer Addition End**********************"));
    MECC::TraceComment(Translate("******************Sample Addition Begins**********************"));
    t_intWellsToProcess = t_intNumberofPlates * 96;
    {
      for(loopCounter8 = 0; loopCounter8 < t_intNumberofPlates;)
      {
        loopCounter8 = loopCounter8 + 1;
        ML_STAR.seq_PCRPlates_ALL.SetCount(t_intWellsToProcess);
        ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      }
    }
    ML_STAR.seq_FAPlates_ALL.SetCount(t_intWellsToProcess);
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str50CountChannels);
    STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, t_str50CountChannels, 999);
    MECC::TraceComment(Translate("******************Sample Addition Ends**********************"));
    MECC::TraceComment(Translate("******************Ladder Wells Emptying Begins**********************"));
    t_intFAControlWellsToProcess = t_intNumberofPlates * 2;
    TrcTrace(Translate("_______________ Number of FA Control Wells to Process ----------------------------->"), t_intFAControlWellsToProcess);
    {
      loopCounter2 = 0;
      while (
         (ML_STAR.seq_DNA_FA_ControlWells_ALL.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.seq_DNA_FA_ControlWells_ALL, 1);
        loopCounter2 = loopCounter2 + 1;
        ML_STAR.seq_DNA_FA_ControlWells_ALL.SetCount(t_intFAControlWellsToProcess);
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.seq_DNA_FA_ControlWells_ALL.GetCurrentPosition() > 0 && ML_STAR.seq_DNA_FA_ControlWells_ALL.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.seq_DNA_FA_ControlWells_ALL.SetMax(ML_STAR.seq_DNA_FA_ControlWells_ALL.GetTotal());
      ML_STAR.seq_DNA_FA_ControlWells_ALL.SetCurrentPosition(1);
    }
    ML_STAR.seq_DNA_FA_ControlWells_ALL.SetCount(t_intFAControlWellsToProcess);
    SeqResetSequenceIndexes(ML_STAR.seq_DNA_FA_ControlWells_ALL);
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, t_str50CountChannels);
    MECC::TraceComment(Translate("******************Ladder Wells Emptying Ends**********************"));
    MECC::TraceComment(Translate("******************Ladder Addition Begins**********************"));
    t_intFAControlWellsToProcess = t_intNumberofPlates * 2;
    TrcTrace(Translate("_______________ Number of FA Control Wells to Process ----------------------------->"), t_intFAControlWellsToProcess);
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    {
      while (
         (ML_STAR.seq_DNA_FA_ControlWells_ALL.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.seq_DNA_FA_ControlWells_ALL, 1);
        ML_STAR.seq_DNA_FA_ControlWells_ALL.SetCount(t_intFAControlWellsToProcess);
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (
           (ML_STAR.seq_DNA_FA_ControlWells_ALL.GetCurrentPosition() > 0 && ML_STAR.seq_DNA_FA_ControlWells_ALL.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.seq_DNA_FA_ControlWells_ALL.SetMax(ML_STAR.seq_DNA_FA_ControlWells_ALL.GetTotal());
      ML_STAR.seq_DNA_FA_ControlWells_ALL.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    SeqResetSequenceIndexes(ML_STAR.seq_DNA_FA_ControlWells_ALL);
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, t_str50CountChannels);
    MECC::TraceComment(Translate("******************Ladder Addition Ends**********************"));
    MECC::TraceComment(Translate("------------------------------------------------------------------------------------------------------------------------------\n\n                                              FA Plate Prep Ends\n\n------------------------------------------------------------------------------------------------------------------------------"));
    customDialog_8.InitCustomDialog("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");
    customDialog_8.ShowCustomDialog();
    t_varDialogue = customDialog_8.GetCustomDialogProperty( "ReturnValue" );
    abort;
    STAR_TIP_TOOLS::_ExitLibrary();
  } }
