global device ML_STAR ("Z:\\Shared\\Human Health\\005 - Pre-Clinical Prod\\Sample Gen\\Hamilton\\HH Protocols\\Finalized\\Basic Deck Layout.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "STAR Tools\\STAR Tip Tools.hs_" }
#include "Z:\\Shared\\Human Health\\005 - Pre-Clinical Prod\\Sample Gen\\Hamilton\\HH Protocols\\Finalized\\Basic Deck Layout.res"
dialog customDialog_1;
variable t_str1000ChannelsTipCount;
variable Number_of_Samples;
variable t_str300ChannelTipCount;
variable t_str50ChannelTipCount;
variable t_str300MPHTipCount;
dialog customDialog_2;
dialog customDialog_3;
variable t_varDialogue;
variable loopCounter1;
variable loopCounter2;
variable loopCounter3;
dialog customDialog_4;
variable loopCounter5;
dialog customDialog_5;
dialog customDialog_6;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    STAR_TIP_TOOLS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    t_str1000ChannelsTipCount = Translate("1000Channels");
    t_str300MPHTipCount = Translate("300MPH");
    t_str300ChannelTipCount = Translate("300Channels");
    t_str50ChannelTipCount = Translate("50Channels");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.Seq_1000mL_tips_Pos_1_96, t_str1000ChannelsTipCount, 999);
    STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.Seq_300uL_tips_MPH_Pos_1_96, t_str300ChannelTipCount, 999);
    STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.Seq_300uL_tips_Pos_1_384, t_str300MPHTipCount, 999);
    STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.Seq_50uL_tips_Pos_1_96, t_str50ChannelTipCount, 999);
    Number_of_Samples = 40;
    customDialog_2.InitCustomDialog("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");
    customDialog_2.SetCustomDialogProperty( "Number_of_Samples.Value", Number_of_Samples );
    customDialog_2.ShowCustomDialog();
    t_varDialogue = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
    Number_of_Samples = customDialog_2.GetCustomDialogProperty( "Number_of_Samples.Value" );
    TrcTrace(Translate("Number_of_Samples = "), Number_of_Samples);
    customDialog_3.InitCustomDialog("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");
    customDialog_3.ShowCustomDialog();
    t_varDialogue = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
    customDialog_6.InitCustomDialog("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");
    customDialog_6.ShowCustomDialog();
    t_varDialogue = customDialog_6.GetCustomDialogProperty( "ReturnValue" );
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.Seq_1000mL_tips_Pos_1_96, t_str1000ChannelsTipCount, 16);
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.Seq_50uL_tips_Pos_1_96, t_str50ChannelTipCount, 1);
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.Seq_300uL_tips_Pos_1_384, t_str300ChannelTipCount, 8);
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR.Seq_Samples_5x_Pos_1_40.SetCount(Number_of_Samples);
    ML_STAR.Seq_Sample_250x_Dil_Pos_1_40.SetCount(Number_of_Samples);
    ML_STAR.Seq_Sample_5000x_Dil_Pos_1_40.SetCount(Number_of_Samples);
    ML_STAR.Seq_Sample_10000x_Dil_Pos_1_40.SetCount(Number_of_Samples);
    ML_STAR.Seq_Read1_Samples_10000x_Pos_1_40.SetCount(Number_of_Samples);
    ML_STAR.Seq_Read2_Samples_10000x_Pos_1_40.SetCount(Number_of_Samples);
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.Seq_1000mL_tips_Pos_1_96, t_str1000ChannelsTipCount, 40);
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    {
      loopCounter1 = 0;
      while (
         (ML_STAR.Seq_Sample_250x_Dil_Pos_1_40.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Seq_1000mL_tips_Pos_1_96, 1, ML_STAR.Seq_Sample_250x_Dil_Pos_1_40, 1);
        loopCounter1 = loopCounter1 + 1;
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (
           (ML_STAR.Seq_Sample_250x_Dil_Pos_1_40.GetCurrentPosition() > 0 && ML_STAR.Seq_Sample_250x_Dil_Pos_1_40.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Seq_1000mL_tips_Pos_1_96.SetMax(ML_STAR.Seq_1000mL_tips_Pos_1_96.GetTotal());
      ML_STAR.Seq_Sample_250x_Dil_Pos_1_40.SetMax(ML_STAR.Seq_Sample_250x_Dil_Pos_1_40.GetTotal());
      ML_STAR.Seq_Sample_250x_Dil_Pos_1_40.SetCurrentPosition(1);
    }
    {
      loopCounter1 = 0;
      while (
         (ML_STAR.Seq_Sample_5000x_Dil_Pos_1_40.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Seq_1000mL_tips_Pos_1_96, 1, ML_STAR.Seq_Sample_5000x_Dil_Pos_1_40, 1);
        loopCounter1 = loopCounter1 + 1;
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (
           (ML_STAR.Seq_Sample_5000x_Dil_Pos_1_40.GetCurrentPosition() > 0 && ML_STAR.Seq_Sample_5000x_Dil_Pos_1_40.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Seq_1000mL_tips_Pos_1_96.SetMax(ML_STAR.Seq_1000mL_tips_Pos_1_96.GetTotal());
      ML_STAR.Seq_Sample_5000x_Dil_Pos_1_40.SetMax(ML_STAR.Seq_Sample_5000x_Dil_Pos_1_40.GetTotal());
      ML_STAR.Seq_Sample_5000x_Dil_Pos_1_40.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    {
      loopCounter1 = 0;
      while (
         (ML_STAR.Seq_Sample_10000x_Dil_Pos_1_40.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Seq_1000mL_tips_Pos_1_96, 1, ML_STAR.Seq_Sample_10000x_Dil_Pos_1_40, 1);
        loopCounter1 = loopCounter1 + 1;
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (
           (ML_STAR.Seq_Sample_10000x_Dil_Pos_1_40.GetCurrentPosition() > 0 && ML_STAR.Seq_Sample_10000x_Dil_Pos_1_40.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Seq_1000mL_tips_Pos_1_96.SetMax(ML_STAR.Seq_1000mL_tips_Pos_1_96.GetTotal());
      ML_STAR.Seq_Sample_10000x_Dil_Pos_1_40.SetMax(ML_STAR.Seq_Sample_10000x_Dil_Pos_1_40.GetTotal());
      ML_STAR.Seq_Sample_10000x_Dil_Pos_1_40.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    {
      loopCounter2 = 0;
      while (
         (ML_STAR.Seq_Sample_250x_Dil_Pos_1_40.GetCurrentPosition() > 0)
      && (ML_STAR.Seq_Samples_5x_Pos_1_40.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Seq_300uL_tips_Pos_1_384, 1, ML_STAR.Seq_Sample_250x_Dil_Pos_1_40, 1, ML_STAR.Seq_Samples_5x_Pos_1_40, 1);
        loopCounter2 = loopCounter2 + 1;
        STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.Seq_300uL_tips_Pos_1_384, t_str300ChannelTipCount, 40);
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.Seq_Sample_250x_Dil_Pos_1_40.GetCurrentPosition() > 0 && ML_STAR.Seq_Sample_250x_Dil_Pos_1_40.GetMax() == 0 )
        && (ML_STAR.Seq_Samples_5x_Pos_1_40.GetCurrentPosition() > 0 && ML_STAR.Seq_Samples_5x_Pos_1_40.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Seq_300uL_tips_Pos_1_384.SetMax(ML_STAR.Seq_300uL_tips_Pos_1_384.GetTotal());
      ML_STAR.Seq_Sample_250x_Dil_Pos_1_40.SetMax(ML_STAR.Seq_Sample_250x_Dil_Pos_1_40.GetTotal());
      ML_STAR.Seq_Samples_5x_Pos_1_40.SetMax(ML_STAR.Seq_Samples_5x_Pos_1_40.GetTotal());
      ML_STAR.Seq_Sample_250x_Dil_Pos_1_40.SetCurrentPosition(1);
      ML_STAR.Seq_Samples_5x_Pos_1_40.SetCurrentPosition(1);
    }
    {
      loopCounter3 = 0;
      while (
         (ML_STAR.Seq_Sample_250x_Dil_Pos_1_40.GetCurrentPosition() > 0)
      && (ML_STAR.Seq_Sample_5000x_Dil_Pos_1_40.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Seq_300uL_tips_Pos_1_384, 1, ML_STAR.Seq_Sample_250x_Dil_Pos_1_40, 1, ML_STAR.Seq_Sample_5000x_Dil_Pos_1_40, 1);
        loopCounter3 = loopCounter3 + 1;
        STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.Seq_300uL_tips_Pos_1_384, t_str300ChannelTipCount, 40);
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.Seq_Sample_250x_Dil_Pos_1_40.GetCurrentPosition() > 0 && ML_STAR.Seq_Sample_250x_Dil_Pos_1_40.GetMax() == 0 )
        && (ML_STAR.Seq_Sample_5000x_Dil_Pos_1_40.GetCurrentPosition() > 0 && ML_STAR.Seq_Sample_5000x_Dil_Pos_1_40.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Seq_300uL_tips_Pos_1_384.SetMax(ML_STAR.Seq_300uL_tips_Pos_1_384.GetTotal());
      ML_STAR.Seq_Sample_250x_Dil_Pos_1_40.SetMax(ML_STAR.Seq_Sample_250x_Dil_Pos_1_40.GetTotal());
      ML_STAR.Seq_Sample_5000x_Dil_Pos_1_40.SetMax(ML_STAR.Seq_Sample_5000x_Dil_Pos_1_40.GetTotal());
      ML_STAR.Seq_Sample_250x_Dil_Pos_1_40.SetCurrentPosition(1);
      ML_STAR.Seq_Sample_5000x_Dil_Pos_1_40.SetCurrentPosition(1);
    }
    {
      loopCounter3 = 0;
      while (
         (ML_STAR.Seq_Sample_10000x_Dil_Pos_1_40.GetCurrentPosition() > 0)
      && (ML_STAR.Seq_Sample_5000x_Dil_Pos_1_40.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Seq_300uL_tips_Pos_1_384, 1, ML_STAR.Seq_Sample_10000x_Dil_Pos_1_40, 1, ML_STAR.Seq_Sample_5000x_Dil_Pos_1_40, 1);
        loopCounter3 = loopCounter3 + 1;
        STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.Seq_300uL_tips_Pos_1_384, t_str300ChannelTipCount, 40);
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.Seq_Sample_10000x_Dil_Pos_1_40.GetCurrentPosition() > 0 && ML_STAR.Seq_Sample_10000x_Dil_Pos_1_40.GetMax() == 0 )
        && (ML_STAR.Seq_Sample_5000x_Dil_Pos_1_40.GetCurrentPosition() > 0 && ML_STAR.Seq_Sample_5000x_Dil_Pos_1_40.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Seq_300uL_tips_Pos_1_384.SetMax(ML_STAR.Seq_300uL_tips_Pos_1_384.GetTotal());
      ML_STAR.Seq_Sample_10000x_Dil_Pos_1_40.SetMax(ML_STAR.Seq_Sample_10000x_Dil_Pos_1_40.GetTotal());
      ML_STAR.Seq_Sample_5000x_Dil_Pos_1_40.SetMax(ML_STAR.Seq_Sample_5000x_Dil_Pos_1_40.GetTotal());
      ML_STAR.Seq_Sample_10000x_Dil_Pos_1_40.SetCurrentPosition(1);
      ML_STAR.Seq_Sample_5000x_Dil_Pos_1_40.SetCurrentPosition(1);
    }
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.Seq_300uL_tips_Pos_1_384, t_str300ChannelTipCount, 8);
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    {
      loopCounter5 = 0;
      while (
         (ML_STAR.Seq_Sample_10000x_Dil_Pos_1_40.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Seq_300uL_tips_Pos_1_384, 1, ML_STAR.Seq_Sample_10000x_Dil_Pos_1_40, 1);
        loopCounter5 = loopCounter5 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.Seq_Sample_10000x_Dil_Pos_1_40.GetCurrentPosition() > 0 && ML_STAR.Seq_Sample_10000x_Dil_Pos_1_40.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Seq_300uL_tips_Pos_1_384.SetMax(ML_STAR.Seq_300uL_tips_Pos_1_384.GetTotal());
      ML_STAR.Seq_Sample_10000x_Dil_Pos_1_40.SetMax(ML_STAR.Seq_Sample_10000x_Dil_Pos_1_40.GetTotal());
      ML_STAR.Seq_Sample_10000x_Dil_Pos_1_40.SetCurrentPosition(1);
    }
    customDialog_4.InitCustomDialog("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");
    customDialog_4.ShowCustomDialog();
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.Seq_300uL_tips_MPH_Pos_1_96, t_str300MPHTipCount, 96);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    customDialog_5.InitCustomDialog("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");
    customDialog_5.ShowCustomDialog();
    STAR_TIP_TOOLS::_ExitLibrary();
  } }
