global device ML_STAR ("Ribogreen Test_WIP.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "STAR Tools\\STAR Tip Tools.hs_" }
#include "Ribogreen Test_WIP.res"
dialog customDialog_1;
variable Number_of_Samples;
variable t_varDialogue;
dialog customDialog_2;
variable loopCounter1;
variable loopCounter2;
variable loopCounter3;
variable loopCounter4;
dialog customDialog_3;
dialog customDialog_4;
dialog customDialog_5;
dialog customDialog_6;
dialog customDialog_7;
variable t_str1000ChannelsTipCount;
variable t_str300ChannelTipCount;
variable t_str50ChannelTipCount;
variable t_str300MPHTipCount;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    STAR_TIP_TOOLS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    customDialog_6.InitCustomDialog("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");
    customDialog_6.ShowCustomDialog();
    t_str1000ChannelsTipCount = Translate("1000Channels");
    t_str300MPHTipCount = Translate("300MPH");
    t_str300ChannelTipCount = Translate("300Channels");
    t_str50ChannelTipCount = Translate("50Channels");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.Seq_1000mL_tips_Pos_1_96, t_str1000ChannelsTipCount, 999);
    STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.Seq_300uL_tips_96_head_Pos_1_96, t_str300ChannelTipCount, 999);
    STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.Seq_300ul_Tips_Pos_1_480, t_str300MPHTipCount, 999);
    STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.Seq_50ul_Tips_Pos_1_192, t_str50ChannelTipCount, 999);
    Number_of_Samples = 20;
    customDialog_1.InitCustomDialog("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");
    customDialog_1.SetCustomDialogProperty( "Number_of_Samples.Value", Number_of_Samples );
    customDialog_1.ShowCustomDialog();
    t_varDialogue = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
    Number_of_Samples = customDialog_1.GetCustomDialogProperty( "Number_of_Samples.Value" );
    TrcTrace(Translate("Number_of_Samples = "), Number_of_Samples);
    customDialog_7.InitCustomDialog("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");
    customDialog_7.ShowCustomDialog();
    customDialog_2.InitCustomDialog("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");
    customDialog_2.ShowCustomDialog();
    t_varDialogue = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
    customDialog_4.InitCustomDialog("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");
    customDialog_4.ShowCustomDialog();
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.Seq_1000mL_tips_Pos_1_96, t_str1000ChannelsTipCount, 16);
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.Seq_50ul_Tips_Pos_1_192, t_str50ChannelTipCount, 1);
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.Seq_300ul_Tips_Pos_1_480, t_str300ChannelTipCount, 8);
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR.Seq_Sample_Plate_Pos_1_20.SetCount(Number_of_Samples);
    ML_STAR.Seq_20x_Samples_1_20.SetCount(Number_of_Samples);
    ML_STAR.Seq_200x_Samples_1_20.SetCount(Number_of_Samples);
    ML_STAR.Seq_5000x_Samples_1_20.SetCount(Number_of_Samples);
    ML_STAR.Seq_10000x_Samples_1_20.SetCount(Number_of_Samples);
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.Seq_1000mL_tips_Pos_1_96, t_str1000ChannelsTipCount, 20);
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    {
      loopCounter1 = 0;
      while (
         (ML_STAR.Seq_20x_Samples_1_20.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Seq_1000mL_tips_Pos_1_96, 1, ML_STAR.Seq_20x_Samples_1_20, 1);
        loopCounter1 = loopCounter1 + 1;
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (
           (ML_STAR.Seq_20x_Samples_1_20.GetCurrentPosition() > 0 && ML_STAR.Seq_20x_Samples_1_20.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Seq_1000mL_tips_Pos_1_96.SetMax(ML_STAR.Seq_1000mL_tips_Pos_1_96.GetTotal());
      ML_STAR.Seq_20x_Samples_1_20.SetMax(ML_STAR.Seq_20x_Samples_1_20.GetTotal());
      ML_STAR.Seq_20x_Samples_1_20.SetCurrentPosition(1);
    }
    {
      loopCounter1 = 0;
      while (
         (ML_STAR.Seq_200x_Samples_1_20.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Seq_1000mL_tips_Pos_1_96, 1, ML_STAR.Seq_200x_Samples_1_20, 1);
        loopCounter1 = loopCounter1 + 1;
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (
           (ML_STAR.Seq_200x_Samples_1_20.GetCurrentPosition() > 0 && ML_STAR.Seq_200x_Samples_1_20.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Seq_1000mL_tips_Pos_1_96.SetMax(ML_STAR.Seq_1000mL_tips_Pos_1_96.GetTotal());
      ML_STAR.Seq_200x_Samples_1_20.SetMax(ML_STAR.Seq_200x_Samples_1_20.GetTotal());
      ML_STAR.Seq_200x_Samples_1_20.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    {
      loopCounter1 = 0;
      while (
         (ML_STAR.Seq_5000x_Samples_1_20.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Seq_1000mL_tips_Pos_1_96, 1, ML_STAR.Seq_5000x_Samples_1_20, 1);
        loopCounter1 = loopCounter1 + 1;
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (
           (ML_STAR.Seq_5000x_Samples_1_20.GetCurrentPosition() > 0 && ML_STAR.Seq_5000x_Samples_1_20.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Seq_1000mL_tips_Pos_1_96.SetMax(ML_STAR.Seq_1000mL_tips_Pos_1_96.GetTotal());
      ML_STAR.Seq_5000x_Samples_1_20.SetMax(ML_STAR.Seq_5000x_Samples_1_20.GetTotal());
      ML_STAR.Seq_5000x_Samples_1_20.SetCurrentPosition(1);
    }
    {
      loopCounter1 = 0;
      while (
         (ML_STAR.Seq_10000x_Samples_1_20.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Seq_10000x_Samples_1_20, 1, ML_STAR.Seq_1000mL_tips_Pos_1_96, 1);
        loopCounter1 = loopCounter1 + 1;
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (
           (ML_STAR.Seq_10000x_Samples_1_20.GetCurrentPosition() > 0 && ML_STAR.Seq_10000x_Samples_1_20.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Seq_10000x_Samples_1_20.SetMax(ML_STAR.Seq_10000x_Samples_1_20.GetTotal());
      ML_STAR.Seq_1000mL_tips_Pos_1_96.SetMax(ML_STAR.Seq_1000mL_tips_Pos_1_96.GetTotal());
      ML_STAR.Seq_1000mL_tips_Pos_1_96.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    {
      loopCounter2 = 0;
      while (
         (ML_STAR.Seq_20x_Samples_1_20.GetCurrentPosition() > 0)
      && (ML_STAR.Seq_Sample_Plate_Pos_1_20.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Seq_20x_Samples_1_20, 1, ML_STAR.Seq_300ul_Tips_Pos_1_480, 1, ML_STAR.Seq_Sample_Plate_Pos_1_20, 1);
        loopCounter2 = loopCounter2 + 1;
        STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.Seq_300ul_Tips_Pos_1_480, t_str300ChannelTipCount, 20);
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.Seq_20x_Samples_1_20.GetCurrentPosition() > 0 && ML_STAR.Seq_20x_Samples_1_20.GetMax() == 0 )
        && (ML_STAR.Seq_Sample_Plate_Pos_1_20.GetCurrentPosition() > 0 && ML_STAR.Seq_Sample_Plate_Pos_1_20.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Seq_20x_Samples_1_20.SetMax(ML_STAR.Seq_20x_Samples_1_20.GetTotal());
      ML_STAR.Seq_300ul_Tips_Pos_1_480.SetMax(ML_STAR.Seq_300ul_Tips_Pos_1_480.GetTotal());
      ML_STAR.Seq_Sample_Plate_Pos_1_20.SetMax(ML_STAR.Seq_Sample_Plate_Pos_1_20.GetTotal());
      ML_STAR.Seq_20x_Samples_1_20.SetCurrentPosition(1);
      ML_STAR.Seq_Sample_Plate_Pos_1_20.SetCurrentPosition(1);
    }
    {
      loopCounter3 = 0;
      while (
         (ML_STAR.Seq_200x_Samples_1_20.GetCurrentPosition() > 0)
      && (ML_STAR.Seq_20x_Samples_1_20.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Seq_200x_Samples_1_20, 1, ML_STAR.Seq_20x_Samples_1_20, 1, ML_STAR.Seq_300ul_Tips_Pos_1_480, 1);
        loopCounter3 = loopCounter3 + 1;
        STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.Seq_300ul_Tips_Pos_1_480, t_str300ChannelTipCount, 20);
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.Seq_200x_Samples_1_20.GetCurrentPosition() > 0 && ML_STAR.Seq_200x_Samples_1_20.GetMax() == 0 )
        && (ML_STAR.Seq_20x_Samples_1_20.GetCurrentPosition() > 0 && ML_STAR.Seq_20x_Samples_1_20.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Seq_200x_Samples_1_20.SetMax(ML_STAR.Seq_200x_Samples_1_20.GetTotal());
      ML_STAR.Seq_20x_Samples_1_20.SetMax(ML_STAR.Seq_20x_Samples_1_20.GetTotal());
      ML_STAR.Seq_300ul_Tips_Pos_1_480.SetMax(ML_STAR.Seq_300ul_Tips_Pos_1_480.GetTotal());
      ML_STAR.Seq_200x_Samples_1_20.SetCurrentPosition(1);
      ML_STAR.Seq_20x_Samples_1_20.SetCurrentPosition(1);
    }
    {
      loopCounter3 = 0;
      while (
         (ML_STAR.Seq_200x_Samples_1_20.GetCurrentPosition() > 0)
      && (ML_STAR.Seq_5000x_Samples_1_20.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Seq_200x_Samples_1_20, 1, ML_STAR.Seq_300ul_Tips_Pos_1_480, 1, ML_STAR.Seq_5000x_Samples_1_20, 1);
        loopCounter3 = loopCounter3 + 1;
        STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.Seq_300ul_Tips_Pos_1_480, t_str300ChannelTipCount, 20);
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.Seq_200x_Samples_1_20.GetCurrentPosition() > 0 && ML_STAR.Seq_200x_Samples_1_20.GetMax() == 0 )
        && (ML_STAR.Seq_5000x_Samples_1_20.GetCurrentPosition() > 0 && ML_STAR.Seq_5000x_Samples_1_20.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Seq_200x_Samples_1_20.SetMax(ML_STAR.Seq_200x_Samples_1_20.GetTotal());
      ML_STAR.Seq_300ul_Tips_Pos_1_480.SetMax(ML_STAR.Seq_300ul_Tips_Pos_1_480.GetTotal());
      ML_STAR.Seq_5000x_Samples_1_20.SetMax(ML_STAR.Seq_5000x_Samples_1_20.GetTotal());
      ML_STAR.Seq_200x_Samples_1_20.SetCurrentPosition(1);
      ML_STAR.Seq_5000x_Samples_1_20.SetCurrentPosition(1);
    }
    {
      loopCounter3 = 0;
      ML_STAR.Seq_10000x_Samples_1_20.SetCurrentPosition(1);
      while (
         (ML_STAR.Seq_10000x_Samples_1_20.GetCurrentPosition() > 0)
      && (ML_STAR.Seq_5000x_Samples_1_20.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Seq_10000x_Samples_1_20, 1, ML_STAR.Seq_300ul_Tips_Pos_1_480, 1, ML_STAR.Seq_5000x_Samples_1_20, 1);
        loopCounter3 = loopCounter3 + 1;
        STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.Seq_300ul_Tips_Pos_1_480, t_str300ChannelTipCount, 20);
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.Seq_10000x_Samples_1_20.GetCurrentPosition() > 0 && ML_STAR.Seq_10000x_Samples_1_20.GetMax() == 0 )
        && (ML_STAR.Seq_5000x_Samples_1_20.GetCurrentPosition() > 0 && ML_STAR.Seq_5000x_Samples_1_20.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Seq_10000x_Samples_1_20.SetMax(ML_STAR.Seq_10000x_Samples_1_20.GetTotal());
      ML_STAR.Seq_300ul_Tips_Pos_1_480.SetMax(ML_STAR.Seq_300ul_Tips_Pos_1_480.GetTotal());
      ML_STAR.Seq_5000x_Samples_1_20.SetMax(ML_STAR.Seq_5000x_Samples_1_20.GetTotal());
      ML_STAR.Seq_5000x_Samples_1_20.SetCurrentPosition(1);
    }
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.Seq_300ul_Tips_Pos_1_480, t_str300ChannelTipCount, 8);
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    {
      loopCounter4 = 0;
      while (
         (ML_STAR.Seq_5000x_Samples_1_20.GetCurrentPosition() > 0)
      && (ML_STAR.Seq_Read1_5000x_Samples_1_20.GetCurrentPosition() > 0)
      && (ML_STAR.Seq_Read2_5000x_Samples_1_20.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Seq_300ul_Tips_Pos_1_480, 1, ML_STAR.Seq_5000x_Samples_1_20, 1, ML_STAR.Seq_Read1_5000x_Samples_1_20, 1, ML_STAR.Seq_Read2_5000x_Samples_1_20, 1);
        loopCounter4 = loopCounter4 + 1;
        STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.Seq_300ul_Tips_Pos_1_480, t_str300ChannelTipCount, 20);
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.Seq_5000x_Samples_1_20.GetCurrentPosition() > 0 && ML_STAR.Seq_5000x_Samples_1_20.GetMax() == 0 )
        && (ML_STAR.Seq_Read1_5000x_Samples_1_20.GetCurrentPosition() > 0 && ML_STAR.Seq_Read1_5000x_Samples_1_20.GetMax() == 0 )
        && (ML_STAR.Seq_Read2_5000x_Samples_1_20.GetCurrentPosition() > 0 && ML_STAR.Seq_Read2_5000x_Samples_1_20.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Seq_300ul_Tips_Pos_1_480.SetMax(ML_STAR.Seq_300ul_Tips_Pos_1_480.GetTotal());
      ML_STAR.Seq_5000x_Samples_1_20.SetMax(ML_STAR.Seq_5000x_Samples_1_20.GetTotal());
      ML_STAR.Seq_Read1_5000x_Samples_1_20.SetMax(ML_STAR.Seq_Read1_5000x_Samples_1_20.GetTotal());
      ML_STAR.Seq_Read2_5000x_Samples_1_20.SetMax(ML_STAR.Seq_Read2_5000x_Samples_1_20.GetTotal());
      ML_STAR.Seq_5000x_Samples_1_20.SetCurrentPosition(1);
      ML_STAR.Seq_Read1_5000x_Samples_1_20.SetCurrentPosition(1);
      ML_STAR.Seq_Read2_5000x_Samples_1_20.SetCurrentPosition(1);
    }
    {
      loopCounter4 = 0;
      ML_STAR.Seq_10000x_Samples_1_20.SetCurrentPosition(1);
      while (
         (ML_STAR.Seq_10000x_Samples_1_20.GetCurrentPosition() > 0)
      && (ML_STAR.Seq_Read1_10000x_Samples_1_20.GetCurrentPosition() > 0)
      && (ML_STAR.Seq_Read2_10000x_Samples_1_20.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Seq_10000x_Samples_1_20, 1, ML_STAR.Seq_300ul_Tips_Pos_1_480, 1, ML_STAR.Seq_Read1_10000x_Samples_1_20, 1, ML_STAR.Seq_Read2_10000x_Samples_1_20, 1);
        loopCounter4 = loopCounter4 + 1;
        STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.Seq_300ul_Tips_Pos_1_480, t_str300ChannelTipCount, 20);
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.Seq_10000x_Samples_1_20.GetCurrentPosition() > 0 && ML_STAR.Seq_10000x_Samples_1_20.GetMax() == 0 )
        && (ML_STAR.Seq_Read1_10000x_Samples_1_20.GetCurrentPosition() > 0 && ML_STAR.Seq_Read1_10000x_Samples_1_20.GetMax() == 0 )
        && (ML_STAR.Seq_Read2_10000x_Samples_1_20.GetCurrentPosition() > 0 && ML_STAR.Seq_Read2_10000x_Samples_1_20.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Seq_10000x_Samples_1_20.SetMax(ML_STAR.Seq_10000x_Samples_1_20.GetTotal());
      ML_STAR.Seq_300ul_Tips_Pos_1_480.SetMax(ML_STAR.Seq_300ul_Tips_Pos_1_480.GetTotal());
      ML_STAR.Seq_Read1_10000x_Samples_1_20.SetMax(ML_STAR.Seq_Read1_10000x_Samples_1_20.GetTotal());
      ML_STAR.Seq_Read2_10000x_Samples_1_20.SetMax(ML_STAR.Seq_Read2_10000x_Samples_1_20.GetTotal());
      ML_STAR.Seq_Read1_10000x_Samples_1_20.SetCurrentPosition(1);
      ML_STAR.Seq_Read2_10000x_Samples_1_20.SetCurrentPosition(1);
    }
    customDialog_3.InitCustomDialog("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");
    customDialog_3.ShowCustomDialog();
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.Seq_300uL_tips_96_head_Pos_1_96, t_str300MPHTipCount, 96);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    customDialog_5.InitCustomDialog("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");
    customDialog_5.ShowCustomDialog();
    STAR_TIP_TOOLS::_ExitLibrary();
  } }
