 namespace _Method { #include "HSLInhecoTECLib.hsl" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "GreenLight\\hamSTAR Methods\\HSLTrcLib.hsl" }
 namespace _Method { #include "STAR Tools\\STAR Tip Tools.hs_" }
 namespace _Method { #include "Visual_NTR_Library\\Visual_NTR_library_NTRdiscardEdits.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
#include "HH-mRNA-Hamilton-Methods\\PCRPool[2.0].res"
dialog customDialog_1;
dialog customDialog_2;
dialog customDialog_3;
dialog customDialog_4;
dialog customDialog_5;
dialog customDialog_6;
variable t_str7ChannelPattern;
variable t_intControlID;
variable t_str300CountChannels;
variable t_strCPACError;
variable t_blnIsAliquot;
variable t_str8ChannelPattern;
variable t_str2ChannelPattern;
variable t_intDeviceID;
variable t_blnIsPoolPlates;
variable t_varDialogue;
global device ML_STAR ("HH-mRNA-Hamilton-Methods\\PCRPool[2.0].lay", "ML_STAR", hslTrue);
global variable t_intPlateNumber;
global variable t_intWellsToProcess;
variable t_intPoolVolume;
variable t_str300Count96MPH;
dialog customDialog_7;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    STAR_TIP_TOOLS::_InitLibrary();
    VISUAL_NTR_LIBRARY_NTRDISCARDEDITS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("\n_________________________________________________________________________________________________\nGreenLight BioSciences\n\nPCR Pool\nLast Edit: 12/05/2022\nDesc. Pools up to 12 PCR plates into Two (2) 1ml deep well plates. Creates 10x dilution plate for DNA spectrometry measurement.\n*Need to spec plates after DNA Pool SPRI\n*Pooling done with 96-head stamp\n\n\n_________________________________________________________________________________________________\n\n"));
    t_str300CountChannels = Translate("");
    t_str300Count96MPH = Translate("");
    t_intPlateNumber = 0;
    t_str7ChannelPattern = Translate("11111110");
    t_str8ChannelPattern = Translate("11111111");
    t_str2ChannelPattern = Translate("11000000");
    t_blnIsPoolPlates = 0;
    t_blnIsAliquot = 0;
    t_intPoolVolume = 0;
    STAR_TIP_TOOLS::BuildChannelPattern(7, 8, t_str7ChannelPattern);
    STAR_TIP_TOOLS::BuildChannelPattern(8, 8, t_str8ChannelPattern);
    STAR_TIP_TOOLS::BuildChannelPattern(2, 8, t_str2ChannelPattern);
    customDialog_6.InitCustomDialog("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");
    customDialog_6.ShowCustomDialog();
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    customDialog_2.InitCustomDialog("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");
    customDialog_2.SetCustomDialogProperty( "numeric1.Value", t_intPoolVolume );
    customDialog_2.ShowCustomDialog();
    t_varDialogue = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
    t_intPlateNumber = customDialog_2.GetCustomDialogProperty( "PlateNumber.Value" );
    t_intPoolVolume = customDialog_2.GetCustomDialogProperty( "numeric1.Value" );
    t_blnIsPoolPlates = customDialog_2.GetCustomDialogProperty( "radioButton1.IsChecked" );
    t_blnIsAliquot = customDialog_2.GetCustomDialogProperty( "radioButton2.IsChecked" );
    TrcTrace4(Translate("_________________Pool Plates is equal to --------------->"), t_blnIsPoolPlates, Translate("_________________Aliquot Plates is equal to --------------->"), t_blnIsAliquot);
    TrcTrace(Translate("_______________ Number of Plates is ----------------------------->"), t_intPlateNumber);
    TrcTrace(Translate("_______________Pool Volume is ----------------------------->"), t_intPoolVolume);
    t_intWellsToProcess = t_intPlateNumber * 96;
    t_intPoolVolume = t_intPoolVolume + 5;
    ML_STAR.seqPCRPlates_All.SetCount(t_intWellsToProcess);
    if (t_blnIsPoolPlates == 1)
    {
      customDialog_5.InitCustomDialog("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");
      customDialog_5.ShowCustomDialog();
      STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.seq_MlStar300ulSVTwithFilter_96MPH, t_str300Count96MPH, 999);
    }
    if (t_blnIsAliquot == 1)
    {
      customDialog_3.InitCustomDialog("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");
      customDialog_3.ShowCustomDialog();
      STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.seq_MlStar300ulSVTwithFilter_96MPH, t_str300Count96MPH, 999);
      STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.seq_MlStar300ulSVTwithFilter_Channels, t_str300CountChannels, 999);
    }
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    t_varDialogue = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
    if (t_blnIsPoolPlates == 1)
    {
      MECC::TraceComment(Translate("------------------------------------------------------------------------------------------------------------------------------\n\n                                         Pooling Begin\n\n------------------------------------------------------------------------------------------------------------------------------"));
      PoolingProtocol(ML_STAR.seqPCRPlates_All);
      MECC::TraceComment(Translate("------------------------------------------------------------------------------------------------------------------------------\n\n                                         Pooling End\n\n------------------------------------------------------------------------------------------------------------------------------"));
    }
    if (t_blnIsAliquot == 1)
    {
      MECC::TraceComment(Translate("------------------------------------------------------------------------------------------------------------------------------\n\n                                         Aliquot Begin\n\n------------------------------------------------------------------------------------------------------------------------------"));
      PostPoolAliquot();
      MECC::TraceComment(Translate("------------------------------------------------------------------------------------------------------------------------------\n\n                                         Aliquot End\n\n------------------------------------------------------------------------------------------------------------------------------"));
    }
    customDialog_4.InitCustomDialog("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");
    customDialog_4.ShowCustomDialog();
    HSLInhecoTECLib::StopTemperatureControl(t_intControlID, t_intDeviceID, t_strCPACError);
    HSLInhecoTECLib::Terminate(1);
    STAR_TIP_TOOLS::_ExitLibrary();
    VISUAL_NTR_LIBRARY_NTRDISCARDEDITS::_ExitLibrary();
  } }
