 namespace _Method { #include "HSLMPELib.hsl" }
#include "SPE_method_1.0.1.res"
 namespace _Method { #include "MPE\\HSLMPELib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "HSLInhecoTECLib.hsl" }
 namespace _Method { #include "HSLInhecoTEC\\HSLInhecoTECLib.hsl" }
 namespace _Method { #include "GreenLight\\hamSTAR Methods\\HSLTrcLib.hsl" }
 namespace _Method { #include "STAR Tools\\STAR Tip Tools.hs_" }
variable MPE1;
dialog dialogHandle_1;
dialog dialogHandle_2;
dialog dialogHandle_3;
dialog dialogHandle_4;
variable collectionPlateHeight;
variable nozzleHeight;
variable InParameters;
variable offsetFromNozzles;
variable filterPlateHeight;
variable wasteContainer;
dialog dialogHandle_5;
variable mpeCmdReturn;
dialog dialogHandle_6;
dialog dialogHandle_7;
dialog dialogHandle_8;
dialog dialogHandle_9;
global device ML_STAR ("SPE_method_1.0.1.lay", "ML_STAR", hslTrue);
dialog customDialog_10;
dialog customDialog_11;
dialog customDialog_12;
variable t_intControlID;
variable t_intGripperChannel;
variable t_int3to1;
variable t_strMPHTipCount;
variable t_fltHHSTemp;
variable t_int2to1;
variable t_strCPACError;
variable t_int1to1;
variable t_strChannelTipCount;
variable t_hdlHHS;
variable t_intDeviceID;
variable t_intDeckLoading;
variable t_str300MPHTipCount;
variable t_strChannelPattern;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    STAR_TIP_TOOLS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("###########################################\n\nSPE_method_1.0.2\n\nThis is a method to purify mRNA after IVT.  It will mix loading buffer and crude mRNA before loading onto SPE filter plate and processing. \n This is followed by a wash.  Finally the mRNA will be eluted with warmed NF H20.\nRecent modifications have added heater shaker library and CPAC\n\n###########################################"));
    filterPlateHeight = 44;
    nozzleHeight = 3.5;
    wasteContainer = 0;
    collectionPlateHeight = 44;
    offsetFromNozzles = 0;
    InParameters = Translate("pressure,5,10");
    MECC::TraceComment(Translate("Initialize Devices\n"));
    t_int3to1 = 0;
    t_int2to1 = 0;
    t_int1to1 = 0;
    t_intDeckLoading = 0;
    t_intControlID = 0;
    t_intDeviceID = 1;
    t_strMPHTipCount = Translate("");
    t_str300MPHTipCount = Translate("");
    t_strChannelTipCount = Translate("");
    t_strChannelPattern = Translate("11111111");
    t_intGripperChannel = 1;
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    HSLHamHeaterShaker::CreateStarDevice(ML_STAR, 1, t_hdlHHS);
    t_fltHHSTemp = 0;
    HSLHamHeaterShaker::StartTempCtrl(t_hdlHHS, 60, 0);
    HSLHamHeaterShaker::GetTemperature(t_hdlHHS, t_fltHHSTemp);
    TrcTrace(Translate("++++++++++++++++++++++++HHS TEMP++++++++++++++++++++++++:            "), t_fltHHSTemp);
    HSLInhecoTECLib::Initialize(0, 0, t_strCPACError);
    HSLInhecoTECLib::SetTargetTemperature(0, 1, 60.0, t_strCPACError);
    HSLInhecoTECLib::StartTemperatureControl(0, 1, t_strCPACError);
    HSLInhecoTECLib::SetTargetTemperature(0, 2, 60.0, t_strCPACError);
    HSLInhecoTECLib::StartTemperatureControl(0, 2, t_strCPACError);
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    HSLMPELib::ConnectUsingCOM(5, 921600, 0, MPE1, 3);
    HSLMPELib::Initialize(MPE1);
    if(0){
      mpeCmdReturn = HSLMPELib::Prime(MPE1, 1, 50, 700, 0);
      mpeCmdReturn = HSLMPELib::Flush(MPE1, 100, 700, 0);
    }
    dialogHandle_3.SetOutput(Translate("Place a filter plate in the upper plate nest of the MPE module."));
    dialogHandle_3.ShowOutput(Translate("Place filter plate"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    HSLMPELib::FilterPlatePlaced(MPE1, filterPlateHeight, nozzleHeight);
    dialogHandle_4.SetOutput(Translate("The filter plate is about to be clamped. Please make sure that your hands are clear of the device."));
    dialogHandle_4.ShowOutput(Translate("About to clamp filter plate"), hslOKOnly | hslQuestion | hslDefButton1, hslInfinite);
    HSLMPELib::ClampFilterPlate(MPE1);
    if(0){
      mpeCmdReturn = HSLMPELib::Dispense(MPE1, 1, 50, 700, 0);
    }
    dialogHandle_5.SetOutput(Translate("Place a collection plate in the plate nest of the MPE module."));
    dialogHandle_5.ShowOutput(Translate("Place collection plate"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    HSLMPELib::CollectionPlatePlaced(MPE1, collectionPlateHeight, offsetFromNozzles);
    HSLMPELib::ProcessFilterToCollectionPlate(MPE1, InParameters, 1);
    dialogHandle_1.SetOutput(Translate("Remove the collection plate."));
    dialogHandle_1.ShowOutput(Translate("Remove Collection Plate"), hslOKOnly | hslQuestion | hslDefButton1, hslInfinite);
    HSLMPELib::CollectionPlateRemoved(MPE1);
    HSLMPELib::RetrieveFilterPlate(MPE1);
    dialogHandle_2.SetOutput(Translate("Remove the filter plate."));
    dialogHandle_2.ShowOutput(Translate("Remove Filter Plate"), hslOKOnly | hslQuestion | hslDefButton1, hslInfinite);
    HSLMPELib::FilterPlateRemoved(MPE1);
    if(0){
      dialogHandle_6.SetOutput(Translate("Place the evaporator in the upper plate nest of the MPE module."));
      dialogHandle_6.ShowOutput(Translate("Place Evaporator"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      mpeCmdReturn = HSLMPELib::EvaporatePrepare(MPE1, 50, 40, 4);
      dialogHandle_8.SetOutput(Translate("Place a collection plate in the plate nest of the MPE module."));
      dialogHandle_8.ShowOutput(Translate("Place collection plate"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      mpeCmdReturn = HSLMPELib::Evaporate(MPE1, 43, 0, 41, 60);
      dialogHandle_7.SetOutput(Translate("Remove the collection plate."));
      dialogHandle_7.ShowOutput(Translate("Remove Collection Plate"), hslOKOnly | hslQuestion | hslDefButton1, hslInfinite);
      mpeCmdReturn = HSLMPELib::EvaporateEnd(MPE1, 0);
      dialogHandle_9.SetOutput(Translate("Remove Evaporator from MPE."));
      dialogHandle_9.ShowOutput(Translate("Remove collection Evaporator"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    }
    HSLMPELib::Disconnect(MPE1);
    STAR_TIP_TOOLS::_ExitLibrary();
  } }
