global device ML_STAR ("Miniprep Example.lay", "ML_STAR", hslTrue);
#include "Miniprep Example.res"
 namespace _Method { #include "HSLTrcLib.hsl" }
variable loopCounter1;
variable loopCounter2;
dialog customDialog_1;
dialog customDialog_2;
variable t_varDialogue;
dialog customDialog_3;
dialog customDialog_4;
variable Number_of_MiniPreps;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("#####################\n\nMini Prep Method V1.0.0\n\nPrepares 24 Qiagen MiniPreps up to addition into spin columns\n\n#####################"));
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    Number_of_MiniPreps = 24;
    customDialog_4.InitCustomDialog("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");
    customDialog_4.SetCustomDialogProperty( "Number_of_MiniPreps.Value", Number_of_MiniPreps );
    customDialog_4.ShowCustomDialog();
    t_varDialogue = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
    Number_of_MiniPreps = customDialog_4.GetCustomDialogProperty( "Number_of_MiniPreps.Value" );
    TrcTrace(Translate("Number_of_MiniPreps = "), Number_of_MiniPreps);
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    t_varDialogue = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
    MECC::TraceComment(Translate("#####################\n\nLoop 1: Mixes Buffer A and RNase 1 with cell pellet and moves mixture to mixing tubes\n\n#####################"));
    ML_STAR.Seq_Mixing_Tubes_Pos_01_24.SetCount(Number_of_MiniPreps);
    ML_STAR.Pelleted_Cell_Tubes.SetCount(Number_of_MiniPreps);
    ML_STAR.Seq_Pelleted_Cells_Pos_01_24.SetCount(Number_of_MiniPreps);
    {
      loopCounter1 = 0;
      while (
         (ML_STAR.Pelleted_Cell_Tubes.GetCurrentPosition() > 0)
      && (ML_STAR.Seq_Mixing_Tubes_Pos_01_24.GetCurrentPosition() > 0)
      && (ML_STAR.Seq_Pelleted_Cells_Pos_01_24.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Pelleted_Cell_Tubes, 1, ML_STAR.Seq_300uL_Tips_Pos_01_96, 1, ML_STAR.Seq_Mixing_Tubes_Pos_01_24, 1, ML_STAR.Seq_Pelleted_Cells_Pos_01_24, 1);
        loopCounter1 = loopCounter1 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.Pelleted_Cell_Tubes.GetCurrentPosition() > 0 && ML_STAR.Pelleted_Cell_Tubes.GetMax() == 0 )
        && (ML_STAR.Seq_Mixing_Tubes_Pos_01_24.GetCurrentPosition() > 0 && ML_STAR.Seq_Mixing_Tubes_Pos_01_24.GetMax() == 0 )
        && (ML_STAR.Seq_Pelleted_Cells_Pos_01_24.GetCurrentPosition() > 0 && ML_STAR.Seq_Pelleted_Cells_Pos_01_24.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Pelleted_Cell_Tubes.SetMax(ML_STAR.Pelleted_Cell_Tubes.GetTotal());
      ML_STAR.Seq_300uL_Tips_Pos_01_96.SetMax(ML_STAR.Seq_300uL_Tips_Pos_01_96.GetTotal());
      ML_STAR.Seq_Mixing_Tubes_Pos_01_24.SetMax(ML_STAR.Seq_Mixing_Tubes_Pos_01_24.GetTotal());
      ML_STAR.Seq_Pelleted_Cells_Pos_01_24.SetMax(ML_STAR.Seq_Pelleted_Cells_Pos_01_24.GetTotal());
      ML_STAR.Pelleted_Cell_Tubes.SetCurrentPosition(1);
      ML_STAR.Seq_Mixing_Tubes_Pos_01_24.SetCurrentPosition(1);
      ML_STAR.Seq_Pelleted_Cells_Pos_01_24.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("#####################\n\nLoop 2: Mixes Buffer B with existing solution\n\n#####################"));
    ML_STAR.Seq_Mixing_Tubes_Pos_01_24.SetCount(Number_of_MiniPreps);
    ML_STAR.Seq_Mixing_Tubes_Pos_01_24.SetCurrentPosition(1);
    {
      loopCounter2 = 0;
      while (
         (ML_STAR.Cells_and_Buffer_Mixing_Tubes.GetCurrentPosition() > 0)
      && (ML_STAR.Seq_Mixing_Tubes_Pos_01_24.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Cells_and_Buffer_Mixing_Tubes, 1, ML_STAR.Seq_300uL_Tips_Pos_01_96, 1, ML_STAR.Seq_Mixing_Tubes_Pos_01_24, 1);
        loopCounter2 = loopCounter2 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.Cells_and_Buffer_Mixing_Tubes.GetCurrentPosition() > 0 && ML_STAR.Cells_and_Buffer_Mixing_Tubes.GetMax() == 0 )
        && (ML_STAR.Seq_Mixing_Tubes_Pos_01_24.GetCurrentPosition() > 0 && ML_STAR.Seq_Mixing_Tubes_Pos_01_24.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Cells_and_Buffer_Mixing_Tubes.SetMax(ML_STAR.Cells_and_Buffer_Mixing_Tubes.GetTotal());
      ML_STAR.Seq_300uL_Tips_Pos_01_96.SetMax(ML_STAR.Seq_300uL_Tips_Pos_01_96.GetTotal());
      ML_STAR.Seq_Mixing_Tubes_Pos_01_24.SetMax(ML_STAR.Seq_Mixing_Tubes_Pos_01_24.GetTotal());
      ML_STAR.Cells_and_Buffer_Mixing_Tubes.SetCurrentPosition(1);
      ML_STAR.Seq_Mixing_Tubes_Pos_01_24.SetCurrentPosition(1);
    }
    MECC::TraceComment(Translate("#####################\n\nLoop 3: Mixes Buffer C with existing solution\n\n#####################"));
    ML_STAR.Seq_Mixing_Tubes_Pos_01_24.SetCurrentPosition(1);
    {
      loopCounter2 = 0;
      while (
         (ML_STAR.Seq_Mixing_Tubes_Pos_01_24.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Seq_1000uL_Tips_Pos_01_96, 1, ML_STAR.Seq_Mixing_Tubes_Pos_01_24, 1);
        loopCounter2 = loopCounter2 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.Seq_Mixing_Tubes_Pos_01_24.GetCurrentPosition() > 0 && ML_STAR.Seq_Mixing_Tubes_Pos_01_24.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Seq_1000uL_Tips_Pos_01_96.SetMax(ML_STAR.Seq_1000uL_Tips_Pos_01_96.GetTotal());
      ML_STAR.Seq_Mixing_Tubes_Pos_01_24.SetMax(ML_STAR.Seq_Mixing_Tubes_Pos_01_24.GetTotal());
      ML_STAR.Seq_Mixing_Tubes_Pos_01_24.SetCurrentPosition(1);
    }
    customDialog_2.InitCustomDialog("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");
    customDialog_2.ShowCustomDialog();
    t_varDialogue = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
    MECC::TraceComment(Translate("#####################\n\nLoop 3: Moves mixture to Spin Column\n\n#####################"));
    ML_STAR.Seq_Mixing_Tubes_Pos_01_24.SetCurrentPosition(1);
    ML_STAR.Seq_Spin_Columns_Pos_01_24.SetCount(Number_of_MiniPreps);
    {
      loopCounter2 = 0;
      while (
         (ML_STAR.Seq_Mixing_Tubes_Pos_01_24.GetCurrentPosition() > 0)
      && (ML_STAR.Seq_Spin_Columns_Pos_01_24.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Seq_1000uL_Tips_Pos_01_96, 1, ML_STAR.Seq_Mixing_Tubes_Pos_01_24, 1, ML_STAR.Seq_Spin_Columns_Pos_01_24, 1);
        loopCounter2 = loopCounter2 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.Seq_Mixing_Tubes_Pos_01_24.GetCurrentPosition() > 0 && ML_STAR.Seq_Mixing_Tubes_Pos_01_24.GetMax() == 0 )
        && (ML_STAR.Seq_Spin_Columns_Pos_01_24.GetCurrentPosition() > 0 && ML_STAR.Seq_Spin_Columns_Pos_01_24.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Seq_1000uL_Tips_Pos_01_96.SetMax(ML_STAR.Seq_1000uL_Tips_Pos_01_96.GetTotal());
      ML_STAR.Seq_Mixing_Tubes_Pos_01_24.SetMax(ML_STAR.Seq_Mixing_Tubes_Pos_01_24.GetTotal());
      ML_STAR.Seq_Spin_Columns_Pos_01_24.SetMax(ML_STAR.Seq_Spin_Columns_Pos_01_24.GetTotal());
      ML_STAR.Seq_Mixing_Tubes_Pos_01_24.SetCurrentPosition(1);
      ML_STAR.Seq_Spin_Columns_Pos_01_24.SetCurrentPosition(1);
    }
    customDialog_3.InitCustomDialog("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");
    customDialog_3.ShowCustomDialog();
    t_varDialogue = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
  } }
