 namespace _Method { #include "STAR Tools\\STAR Tip Tools.hs_" }
 namespace _Method { #include "Visual_NTR_Library\\Visual_NTR_library_NTRdiscardEdits.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "AppsLibrary\\HSLAppsLib.hsl" }
 namespace _Method { #include "GreenLight\\hamSTAR Methods\\HSLTrcLib.hsl" }
 namespace _Method { #include "HSLDeckVisualize.hsl" }
#include "HTP-dsRNA-Methods\\OligoTemplateSetup2.0.res"
dialog customDialog_1;
dialog customDialog_2;
dialog customDialog_3;
variable t_str7ChannelPattern;
variable t_strStandardVolumeTips;
variable t_strCPACError;
variable t_strBarcodePositions;
variable t_intNumberOfPlates;
variable t_blnIsPlateOOO;
variable t_arr_blnMatchBarcodes[];
variable t_varDialogue;
global sequence seqTargetWorlist;
global sequence seqSourceWorklist;
global sequence default;
global device ML_STAR ("HTP-dsRNA-Methods\\OligoTemplateSetup2.0.lay", "ML_STAR", hslTrue);
dialog customDialog_4;
dialog dialogHandle_5;
dialog dialogHandle_6;
dialog dialogHandle_7;
dialog dialogHandle_8;
variable t_str50ulVolumeTips;
dialog dialogHandle_9;
dialog dialogHandle_10;
dialog dialogHandle_11;
dialog dialogHandle_12;
dialog dialogHandle_13;
dialog dialogHandle_14;
dialog dialogHandle_15;
dialog dialogHandle_16;
dialog dialogHandle_17;
dialog dialogHandle_18;
dialog dialogHandle_19;
dialog dialogHandle_20;
dialog dialogHandle_21;
variable t_str300ulVolumeTips;
dialog dialogHandle_22;
dialog dialogHandle_23;
variable t_str1ChannelPattern;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    STAR_TIP_TOOLS::_InitLibrary();
    VISUAL_NTR_LIBRARY_NTRDISCARDEDITS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("\n_________________________________________________________________________________________________\nGreenLight BioSciences\nOligo-Template Plate Setup2.0\nLast Edit: 6/29/2022\nDesc.: Formats Oligo Template plate from working plates, dilutes template DNA to 0.4 ng/uL, adds forward and reverse primers to 15 uM\nAdds 4 uL of Working Plate g-block to 56 uL of water\n20 uL of Fwd and Rev primer @ 75uM added on top, total volume 100 uL\ncan generate up to 4 Oligo Plates at a time\n\n_________________________________________________________________________________________________\n"));
    if(0){
      t_blnIsPlateOOO = 0;
    }
    t_intNumberOfPlates = 0;
    t_str50ulVolumeTips = Translate("50ulHead");
    t_str300ulVolumeTips = Translate("");
    t_str7ChannelPattern = Translate("");
    t_str1ChannelPattern = Translate("");
    t_strCPACError = Translate("");
    t_strBarcodePositions = Translate("");
    t_arr_blnMatchBarcodes.SetSize(0);
    MECC::TraceComment(Translate("Initialize Devices\n"));
    customDialog_3.InitCustomDialog("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");
    customDialog_3.ShowCustomDialog();
    t_varDialogue = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    customDialog_4.InitCustomDialog("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");
    customDialog_4.ShowCustomDialog();
    t_varDialogue = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
    t_intNumberOfPlates = customDialog_4.GetCustomDialogProperty( "numeric1.Value" );
    TrcTrace(Translate("Plates to process: "), t_intNumberOfPlates);
    MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------\n\n                                           Deck Loading\n\n\n-----------------------------------------------------------------------------------------------------------"));
    TrcTrace(Translate("Plates to process: "), t_intNumberOfPlates);
    if (t_intNumberOfPlates == 1)
    {
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.DNA_1, 6, Translate("WP Plate"));
      dialogHandle_5.SetOutput(Translate("Please load Working plate at indicated positions"));
      dialogHandle_5.ShowOutput(Translate("OTP"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.DNA_1, 5, Translate("WP Plate"));
    }
    else
    {
      if (t_intNumberOfPlates == 2)
      {
        DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.WP_1to2, 6, Translate("WP Plate"));
        dialogHandle_6.SetOutput(Translate("Please load Working plates at indicated positions"));
        dialogHandle_6.ShowOutput(Translate("OTP"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.WP_1to2, 5, Translate("WP Plate"));
      }
      else
      {
        if (t_intNumberOfPlates == 3)
        {
          DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.WP_1to3, 6, Translate("WP Plate"));
          dialogHandle_7.SetOutput(Translate("Please load Working plates at indicated positions"));
          dialogHandle_7.ShowOutput(Translate("OTP"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.OTP_1to3, 5, Translate("WP Plate"));
        }
        else
        {
          if (t_intNumberOfPlates == 4)
          {
            DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.WP_1to4, 6, Translate("WP Plate"));
            dialogHandle_8.SetOutput(Translate("Please load Working plates at indicated positions"));
            dialogHandle_8.ShowOutput(Translate("OTP"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.OTP_1to4, 5, Translate("WP Plate"));
          }
        }
      }
    }
    if (t_intNumberOfPlates == 1)
    {
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.OTP_1, 6, Translate("OTP Plate"));
      dialogHandle_11.SetOutput(Translate("Please load Blue Fischer (OTP) plate at indicated positions"));
      dialogHandle_11.ShowOutput(Translate("OTP"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.OTP_1, 5, Translate("OTP Plate"));
    }
    else
    {
      if (t_intNumberOfPlates == 2)
      {
        DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.OTP_1to2, 6, Translate("OTP Plate"));
        dialogHandle_12.SetOutput(Translate("Please load Blue Fischer (OTP) plates at indicated positions"));
        dialogHandle_12.ShowOutput(Translate("OTP"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.OTP_1to2, 5, Translate("OTP Plate"));
      }
      else
      {
        if (t_intNumberOfPlates == 3)
        {
          DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.OTP_1to3, 6, Translate("OTP Plate"));
          dialogHandle_9.SetOutput(Translate("Please load Blue Fischer (OTP) plates at indicated positions"));
          dialogHandle_9.ShowOutput(Translate("OTP"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
          DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.OTP_1to3, 5, Translate("OTP Plate"));
        }
        else
        {
          if (t_intNumberOfPlates == 4)
          {
            DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.OTP_1to4, 6, Translate("OTP Plate"));
            dialogHandle_10.SetOutput(Translate("Please load Blue Fischer (OTP) plates at indicated positions"));
            dialogHandle_10.ShowOutput(Translate("OTP"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
            DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.OTP_1to4, 5, Translate("OTP Plate"));
          }
        }
      }
    }
    TrcTrace(Translate("Plates to process: "), t_intNumberOfPlates);
    if (t_intNumberOfPlates <= 2)
    {
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.FwdPrimerPlate_1, 6, Translate("Forward Primer Plate"));
      dialogHandle_17.SetOutput(Translate("Please load Forward primer plate at indicated positions"));
      dialogHandle_17.ShowOutput(Translate("Primer Plate"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.FwdPrimerPlate_1, 5, Translate("Forward Primer Plate"));
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.RevPrimerPlate_1, 6, Translate("Reverse Primer Plate"));
      dialogHandle_16.SetOutput(Translate("Please load Reverse primer plate at indicated positions"));
      dialogHandle_16.ShowOutput(Translate("Primer Plate"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.FwdPrimerPlate_1, 5, Translate("Reverse Primer Plate"));
    }
    if (t_intNumberOfPlates >= 3)
    {
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.FwdPrimerPlate_1, 6, Translate("Forward Primer Plate"));
      dialogHandle_20.SetOutput(Translate("Please load Forward primer plate at indicated positions"));
      dialogHandle_20.ShowOutput(Translate("Primer Plate"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.FwdPrimerPlate_1, 5, Translate("Forward Primer Plate"));
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.RevPrimerPlate_1, 6, Translate("Reverse Primer Plate"));
      dialogHandle_21.SetOutput(Translate("Please load Reverse primer plate at indicated positions"));
      dialogHandle_21.ShowOutput(Translate("Primer Plate"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.FwdPrimerPlate_1, 5, Translate("Reverse Primer Plate"));
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_FwdPrimerPlates2, 6, Translate("Forward Primer Plate"));
      dialogHandle_19.SetOutput(Translate("Please load Forward primer plates at indicated positions"));
      dialogHandle_19.ShowOutput(Translate("Primer Plate"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_FwdPrimerPlates2, 5, Translate("Forward Primer Plate"));
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_RevPrimerPlates2, 6, Translate("Reverse Primer Plate"));
      dialogHandle_18.SetOutput(Translate("Please load Reverse primer plates at indicated positions"));
      dialogHandle_18.ShowOutput(Translate("Primer Plate"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_FwdPrimerPlates2, 5, Translate("Reverse Primer Plate"));
    }
    DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.H20, 6, Translate("Water Trough"));
    dialogHandle_15.SetOutput(Translate("Please load NF Water Trough at indicated position"));
    dialogHandle_15.ShowOutput(Translate("Water"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.H20, 5, Translate("Water Trough"));
    DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_GblockSense, 6, Translate("Gblock Sense"));
    dialogHandle_13.SetOutput(Translate("Please load Sense (S) control tube at indicated position"));
    dialogHandle_13.ShowOutput(Translate("OTP"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_GblockSense, 5, Translate("GBlock Sense"));
    DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_GblockAntiSense, 6, Translate("Gblock Anti-Sense"));
    dialogHandle_14.SetOutput(Translate("Please load Anti-Sense (AS) control tube at indicated position"));
    dialogHandle_14.ShowOutput(Translate("OTP"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_GblockAntiSense, 5, Translate("GBlock Anti-Sense"));
    if (t_intNumberOfPlates == 1)
    {
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_300ulTips_1, 6, Translate("300ul CORE tips"));
      dialogHandle_23.SetOutput(Translate("Please load 300ul filtered tips at indicated positions"));
      dialogHandle_23.ShowOutput(Translate("Primer Plate"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
      DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_300ulTips_1, 5, Translate("300ul CORE tips"));
    }
    else
    {
      if (t_intNumberOfPlates >= 2)
      {
        DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_300ulTips_All, 6, Translate("300ul CORE tips"));
        dialogHandle_22.SetOutput(Translate("Please load 300ul filtered tips at indicated positions"));
        dialogHandle_22.ShowOutput(Translate("Tip Loading"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_300ulTips_All, 5, Translate("300ul CORE tips"));
      }
    }
    STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.seq_300ulTips_All, t_str300ulVolumeTips, 999);
    STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, t_str50ulVolumeTips, 999);
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    t_varDialogue = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
    Aliquot();
    MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------\n\n                                            Aliquot DONE\n\n\n-----------------------------------------------------------------------------------------------------------"));
    customDialog_2.InitCustomDialog("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");
    customDialog_2.ShowCustomDialog();
    t_varDialogue = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300ulVolumeTips);
    abort;
    STAR_TIP_TOOLS::_ExitLibrary();
    VISUAL_NTR_LIBRARY_NTRDISCARDEDITS::_ExitLibrary();
  } }
