private function Aliquot(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300ulVolumeTips);
}

private function Aliquot(  ) void {
  private variable t_intWellsToProcess;
  private variable loopCounter1;
  private variable loopCounter2;
  private variable t_strChannelPattern;
  private variable t_intWellsForDNA;
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------\n\n                                            Water Addition 56ul\n\n-----------------------------------------------------------------------------------------------------------\n\n\n\n"));
  ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
  {
    for(loopCounter1 = 0; loopCounter1 < t_intNumberOfPlates;)
    {
      loopCounter1 = loopCounter1 + 1;
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300ulVolumeTips);
    }
  }
  ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------\n\n                                            DNA Addition 4ul\n\n-----------------------------------------------------------------------------------------------------------"));
  t_intWellsForDNA = t_intNumberOfPlates * 84;
  ML_STAR.seq_OTPDNA_All.SetCount(t_intWellsForDNA);
  {
    loopCounter1 = 0;
    while (
       (ML_STAR.seq_DNAPlate_2Rows.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.seq_DNAPlate_2Rows, 1);
      loopCounter1 = loopCounter1 + 1;
      STAR_TIP_TOOLS::BuildChannelPattern(7, 8, t_str7ChannelPattern);
      STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, t_str50ulVolumeTips, 8);
      STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, t_str50ulVolumeTips, t_str7ChannelPattern);
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, t_str50ulVolumeTips);
      if (
         (ML_STAR.seq_DNAPlate_2Rows.GetCurrentPosition() > 0 && ML_STAR.seq_DNAPlate_2Rows.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.seq_DNAPlate_2Rows.SetMax(ML_STAR.seq_DNAPlate_2Rows.GetTotal());
    ML_STAR.seq_DNAPlate_2Rows.SetCurrentPosition(1);
  }
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------\n\n                                            Control Addition\n\n-----------------------------------------------------------------------------------------------------------"));
  if (t_intNumberOfPlates >= 1)
  {
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, t_str50ulVolumeTips, 6);
    t_strChannelPattern = Translate("10000000");
    STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, t_strStandardVolumeTips, t_strChannelPattern);
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    if(0){
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    if(0){
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, t_str50ulVolumeTips);
  }
  if (t_intNumberOfPlates >= 2)
  {
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, t_str50ulVolumeTips, 6);
    t_strChannelPattern = Translate("10000000");
    STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, t_strStandardVolumeTips, t_strChannelPattern);
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, t_str50ulVolumeTips);
  }
  if (t_intNumberOfPlates >= 3)
  {
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, t_str50ulVolumeTips, 6);
    t_strChannelPattern = Translate("10000000");
    STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, t_strStandardVolumeTips, t_strChannelPattern);
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, t_str50ulVolumeTips);
  }
  if (t_intNumberOfPlates >= 4)
  {
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, t_str50ulVolumeTips, 6);
    t_strChannelPattern = Translate("10000000");
    STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, t_strStandardVolumeTips, t_strChannelPattern);
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, t_str50ulVolumeTips);
  }
  MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------\n\n                                            Primer Addition\n\n-----------------------------------------------------------------------------------------------------------"));
  TrcTrace(Translate("Plates to process: "), t_intNumberOfPlates);
  t_intWellsToProcess = t_intNumberOfPlates * 96;
  if(0){
    TrcTrace(Translate("Plates to process: "), t_intWellsToProcess);
  }
  SeqResetSequenceIndexes(ML_STAR.seq_OTPlates_All);
  ML_STAR.seq_OTPlates_All.SetCount(t_intWellsToProcess);
  TrcTraceSequence(ML_STAR.seq_OTPlates_All);
  {
    loopCounter2 = 0;
    while (
       (ML_STAR.seq_OTPlates_All.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.seq_OTPlates_All, 1);
      loopCounter2 = loopCounter2 + 1;
      STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.seq_300ulTips_All, t_str300ulVolumeTips, 96);
      if(0){
        STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, t_str50ulVolumeTips, t_str7ChannelPattern);
        STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, t_str50ulVolumeTips);
      }
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      if (
         (ML_STAR.seq_OTPlates_All.GetCurrentPosition() > 0 && ML_STAR.seq_OTPlates_All.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.seq_OTPlates_All.SetMax(ML_STAR.seq_OTPlates_All.GetTotal());
    ML_STAR.seq_OTPlates_All.SetCurrentPosition(1);
  }
  SeqResetSequenceIndexes(ML_STAR.seq_OTPlates_All);
  ML_STAR.seq_OTPlates_All.SetCount(t_intWellsToProcess);
  {
    loopCounter2 = 0;
    while (
       (ML_STAR.seq_OTPlates_All.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.seq_OTPlates_All, 1);
      loopCounter2 = loopCounter2 + 1;
      STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.seq_300ulTips_All, t_str300ulVolumeTips, 96);
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      if(0){
        STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.seq_300ulTips_All, t_str300ulVolumeTips, 999);
        STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300ulVolumeTips);
      }
      if (
         (ML_STAR.seq_OTPlates_All.GetCurrentPosition() > 0 && ML_STAR.seq_OTPlates_All.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.seq_OTPlates_All.SetMax(ML_STAR.seq_OTPlates_All.GetTotal());
    ML_STAR.seq_OTPlates_All.SetCurrentPosition(1);
  }
  STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.seq_300ulTips_All, t_str300ulVolumeTips);
}
