private function PoolingProtocol( sequence i_seqWellsToProcess ) void ;
private function PostPoolAliquot(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  HSLInhecoTECLib::StopTemperatureControl(t_intControlID, t_intDeviceID, t_strCPACError);
  HSLInhecoTECLib::Terminate(1);
}

private function PoolingProtocol( sequence i_seqWellsToProcess ) void {
  private variable loopColumnDispense;
  private variable t_intEndPosition;
  private variable t_intPlateNumber_2;
  private variable t_intEndPosition_2;
  MECC::TraceComment(Translate("********************POOLING**************************"));
  if (t_intPlateNumber > 1)
  {
    t_intEndPosition = t_intPlateNumber * 96;
    ML_STAR.seqPCRPlates1to6.SetCount(t_intEndPosition);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    {
      loopColumnDispense = 0;
      while (
         (ML_STAR.seqPCRPlates1to6.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.seqPCRPlates1to6, 1);
        loopColumnDispense = loopColumnDispense + 1;
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        SeqResetSequenceIndexes(ML_STAR.seqPoolPlate_1);
        if (
           (ML_STAR.seqPCRPlates1to6.GetCurrentPosition() > 0 && ML_STAR.seqPCRPlates1to6.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.seqPCRPlates1to6.SetMax(ML_STAR.seqPCRPlates1to6.GetTotal());
      ML_STAR.seqPCRPlates1to6.SetCurrentPosition(1);
    }
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.seq_MlStar300ulSVTwithFilter_96MPH, t_str300Count96MPH);
  }
  if (t_intPlateNumber > 6)
  {
    t_intPlateNumber_2 = t_intPlateNumber - 6;
    t_intEndPosition_2 = t_intPlateNumber_2 * 96;
    ML_STAR.seqPCRPlates7to12.SetCount(t_intEndPosition_2);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    {
      loopColumnDispense = 0;
      while (
         (ML_STAR.seqPCRPlates7to12.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.seqPCRPlates7to12, 1);
        loopColumnDispense = loopColumnDispense + 1;
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        SeqResetSequenceIndexes(ML_STAR.seqPoolPlate_2);
        if (
           (ML_STAR.seqPCRPlates7to12.GetCurrentPosition() > 0 && ML_STAR.seqPCRPlates7to12.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.seqPCRPlates7to12.SetMax(ML_STAR.seqPCRPlates7to12.GetTotal());
      ML_STAR.seqPCRPlates7to12.SetCurrentPosition(1);
    }
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.seq_MlStar300ulSVTwithFilter_96MPH, t_str300Count96MPH);
  }
}

private function PostPoolAliquot(  ) void {
  private variable t_intEndPosition_2;
  private variable t_intEndPosition;
  private variable loopCounter2;
  MECC::TraceComment(Translate("******************POST-POOLING ALIQUOT**********************"));
  ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
  ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
  ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
  ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
  SeqResetSequenceIndexes(ML_STAR.seqAliquot_1);
  t_intEndPosition = t_intPlateNumber * 84;
  ML_STAR.seqPoolPlate_1_Samples.SetCount(t_intEndPosition);
  {
    loopCounter2 = 0;
    while (
       (ML_STAR.seqPoolPlate_1_Samples.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.seqPoolPlate_1_Samples, 1);
      loopCounter2 = loopCounter2 + 1;
      t_str7ChannelPattern = Translate("11111110");
      STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, ML_STAR.seq_MlStar300ulSVTwithFilter_Channels, t_str300CountChannels, t_str7ChannelPattern);
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.seq_MlStar300ulSVTwithFilter_Channels, t_str300CountChannels);
      if (
         (ML_STAR.seqPoolPlate_1_Samples.GetCurrentPosition() > 0 && ML_STAR.seqPoolPlate_1_Samples.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.seqPoolPlate_1_Samples.SetMax(ML_STAR.seqPoolPlate_1_Samples.GetTotal());
    ML_STAR.seqPoolPlate_1_Samples.SetCurrentPosition(1);
  }
  STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, ML_STAR.seq_MlStar300ulSVTwithFilter_Channels, t_str300CountChannels, t_str8ChannelPattern);
  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
  ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
  ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.seq_MlStar300ulSVTwithFilter_Channels, t_str300CountChannels);
  if (t_intPlateNumber == 2)
  {
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.seq_MlStar300ulSVTwithFilter_96MPH, t_str300Count96MPH);
    SeqResetSequenceIndexes(ML_STAR.seqAliquot_2);
    t_intEndPosition_2 = t_intPlateNumber * 84;
    t_intEndPosition_2 = t_intEndPosition_2 - 84;
    ML_STAR.seqPoolPlate_2_Samples.SetCount(t_intEndPosition_2);
    {
      loopCounter2 = 0;
      while (
         (ML_STAR.seqPoolPlate_2_Samples.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.seqPoolPlate_2_Samples, 1);
        loopCounter2 = loopCounter2 + 1;
        t_str7ChannelPattern = Translate("11111110");
        STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, ML_STAR.seq_MlStar300ulSVTwithFilter_Channels, t_str300CountChannels, t_str7ChannelPattern);
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.seq_MlStar300ulSVTwithFilter_Channels, t_str300CountChannels);
        if (
           (ML_STAR.seqPoolPlate_2_Samples.GetCurrentPosition() > 0 && ML_STAR.seqPoolPlate_2_Samples.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.seqPoolPlate_2_Samples.SetMax(ML_STAR.seqPoolPlate_2_Samples.GetTotal());
      ML_STAR.seqPoolPlate_2_Samples.SetCurrentPosition(1);
    }
    STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, ML_STAR.seq_MlStar300ulSVTwithFilter_Channels, t_str300CountChannels, t_str8ChannelPattern);
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.seq_MlStar300ulSVTwithFilter_Channels, t_str300CountChannels);
  }
  MECC::TraceComment(Translate("*******************ALIQUOT CONTROLS*******************"));
  STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, ML_STAR.seq_MlStar300ulSVTwithFilter_Channels, t_str300CountChannels, t_str2ChannelPattern);
  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
  ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
  ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, ML_STAR.seq_MlStar300ulSVTwithFilter_Channels, t_str300CountChannels, t_str2ChannelPattern);
  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
  ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
  ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
  ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
  ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.seq_MlStar300ulSVTwithFilter_Channels, t_str300CountChannels);
  if (t_intPlateNumber == 2)
  {
    STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, ML_STAR.seq_MlStar300ulSVTwithFilter_Channels, t_str300CountChannels, t_str2ChannelPattern);
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.seq_MlStar300ulSVTwithFilter_Channels, t_str300CountChannels);
    STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, ML_STAR.seq_MlStar300ulSVTwithFilter_Channels, t_str300CountChannels, t_str2ChannelPattern);
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.seq_MlStar300ulSVTwithFilter_Channels, t_str300CountChannels);
  }
}
