 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "STAR Tools\\STAR Tip Tools.hs_" }
 namespace _Method { #include "HSLMthLib.hsl" }
 namespace _Method { #include "HSLAppsLib.hsl" }
#include "PD-mRNA_Normalization_V2.0.2.res"
variable loopCounter1;
variable mRNA_Vol;
sequence Seq_mRNA_Source;
variable arr_mRNA_vol[];
variable Des_Labware_ID;
variable loopCounter2;
variable Des_Pos_ID;
sequence Seq_mRNA_Destination;
dialog customDialog_1;
variable Worklist_File;
variable Source_Labware_ID_Water;
variable Source_Pos_ID_Water;
variable Source_Pos_ID_mRNA;
variable Source_Labware_ID_mRNA;
variable Water_Vol;
file file1;
variable arr_Water_vol[];
variable loopCounter3;
sequence Seq_Water_Des;
sequence Seq_WaterSource_200ml;
variable Worklist_Location;
file file3;
variable loopCounter4;
variable loopCounter5;
dialog customDialog_2;
variable t_str300CountChannels;
dialog customDialog_3;
dialog customDialog_4;
variable t_int_four_and_half_mg_button;
variable t_int_four_and_two_mg_button;
dialog customDialog_5;
variable t_varDialogue;
global device ML_STAR ("PD-mRNA_Normalization_V2.0.2.lay", "ML_STAR", hslTrue);
variable t_str50CountChannels;
dialog customDialog_6;
dialog customDialog_7;
dialog customDialog_8;
dialog customDialog_9;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    STAR_TIP_TOOLS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("##################################\nPD-mRNA Normalization\nv1.0.0\n\nThis is a method to normalize up crude mRNA material to a user defined concentration.\n\nLabware loaded for this method only allows for a maximum of 200uL normalized material. \n\n#################################\n"));
    Worklist_Location = Translate("");
    t_str300CountChannels = Translate("300Channels");
    t_str50CountChannels = Translate("50Channels");
    t_int_four_and_half_mg_button = 0;
    t_int_four_and_two_mg_button = 0;
    STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.Seq_300ul_Tips_192pos, t_str300CountChannels, 999);
    STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.Seq_50uL_tips, t_str50CountChannels, 999);
    if(0){
      customDialog_3.InitCustomDialog("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");
      customDialog_3.ShowCustomDialog();
    }
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    Worklist_File = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
    Worklist_Location = customDialog_1.GetCustomDialogProperty( "path1.Path" );
    customDialog_4.InitCustomDialog("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");
    customDialog_4.SetCustomDialogProperty( "checkBox1.IsChecked", t_int_four_and_two_mg_button );
    customDialog_4.SetCustomDialogProperty( "checkBox2.IsChecked", t_int_four_and_half_mg_button );
    customDialog_4.ShowCustomDialog();
    t_int_four_and_two_mg_button = customDialog_4.GetCustomDialogProperty( "checkBox1.IsChecked" );
    t_int_four_and_half_mg_button = customDialog_4.GetCustomDialogProperty( "checkBox2.IsChecked" );
    customDialog_7.InitCustomDialog("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");
    customDialog_7.ShowCustomDialog();
    t_varDialogue = customDialog_7.GetCustomDialogProperty( "ReturnValue" );
    customDialog_9.InitCustomDialog("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");
    customDialog_9.ShowCustomDialog();
    customDialog_8.InitCustomDialog("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");
    customDialog_8.ShowCustomDialog();
    arr_mRNA_vol.SetSize(0);
    arr_Water_vol.SetSize(0);
    file3.SetExtendedProperties( "IMEX=1");
    file3.AddField("Source_Labware_ID_mRNA", Source_Labware_ID_mRNA, hslString, 255);
    file3.AddField("Source_Pos_ID_mRNA", Source_Pos_ID_mRNA, hslString, 255);
    file3.AddField("mRNA_Vol", mRNA_Vol, hslFloat);
    file3.AddField("Source_Labware_ID_Water", Source_Labware_ID_Water, hslString, 255);
    file3.AddField("Source_Pos_ID_Water", Source_Pos_ID_Water, hslString, 255);
    file3.AddField("Water_Vol", Water_Vol, hslFloat);
    file3.AddField("Des_Labware_ID", Des_Labware_ID, hslString, 255);
    file3.AddField("Des_Pos_ID", Des_Pos_ID, hslString, 255);
    if( 0 == file3.Open(Worklist_Location + " " + "Sheet1$", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, Worklist_Location, "HxMetEdCompCmd");
    }
    {
      loopCounter1 = 0;
      while (
         (file3.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == file3.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        SeqAdd(Seq_mRNA_Source, Source_Labware_ID_mRNA, Source_Pos_ID_mRNA);
        SeqAdd(Seq_mRNA_Destination, Des_Labware_ID, Des_Pos_ID);
        SeqAdd(Seq_WaterSource_200ml, Source_Labware_ID_Water, Source_Pos_ID_Water);
        SeqAdd(Seq_Water_Des, Des_Labware_ID, Des_Pos_ID);
        arr_mRNA_vol.AddAsLast(mRNA_Vol);
        arr_Water_vol.AddAsLast(Water_Vol);
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    TrcTraceSequence(Seq_mRNA_Source);
    TrcTraceSequence(Seq_mRNA_Destination);
    TrcTraceSequence(Seq_WaterSource_200ml);
    TrcTraceSequence(Seq_Water_Des);
    TrcTrace(Translate("Arr_volumes"), arr_mRNA_vol.ElementAt( 1 -1));
    TrcTrace(Translate("Water_volumes"), arr_Water_vol.ElementAt( 1 -1));
    Seq_mRNA_Source.SetCurrentPosition(1);
    if(0){
      Seq_mRNA_Source.SetCount(100);
    }
    Seq_mRNA_Destination.SetCurrentPosition(1);
    if(0){
      Seq_mRNA_Destination.SetCount(100);
    }
    Seq_WaterSource_200ml.SetCurrentPosition(1);
    Seq_Water_Des.SetCurrentPosition(1);
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    MECC::TraceComment(Translate("#######################################\n\nAddition of water. Worklisted to normalize at 4 mg/mL\n\n#######################################"));
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    {
      loopCounter3 = 0;
      while (
         (Seq_WaterSource_200ml.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, Seq_WaterSource_200ml, 1);
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        loopCounter3 = loopCounter3 + 7;
        if (
           (Seq_WaterSource_200ml.GetCurrentPosition() > 0 && Seq_WaterSource_200ml.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      Seq_WaterSource_200ml.SetMax(Seq_WaterSource_200ml.GetTotal());
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    MECC::TraceComment(Translate("#######################################\n\nAddition of mRNA. Worklisted to normalize at 4 mg/mL\n\n#######################################"));
    {
      loopCounter2 = 0;
      while (
         (Seq_mRNA_Source.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, Seq_mRNA_Source, 1);
        loopCounter2 = loopCounter2 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        loopCounter2 = loopCounter2 + 7;
        if (
           (Seq_mRNA_Source.GetCurrentPosition() > 0 && Seq_mRNA_Source.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      Seq_mRNA_Source.SetMax(Seq_mRNA_Source.GetTotal());
    }
    MECC::TraceComment(Translate("*********\nAddition of water for 4mg/mL to 2mg/mL\n\n*********"));
    if (t_int_four_and_two_mg_button == 1)
    {
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      {
        for(loopCounter4 = 0; loopCounter4 < 3;)
        {
          loopCounter4 = loopCounter4 + 1;
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
      }
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      MECC::TraceComment(Translate("**************\nAddition of 4mg/mL RNA for 2mg/mL dilution\n\n**************"));
      {
        for(loopCounter5 = 0; loopCounter5 < 3;)
        {
          loopCounter5 = loopCounter5 + 1;
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
      }
    }
    MECC::TraceComment(Translate("*************\n\nAdditon of NFW to 0.5mg dilution plate\n\n***********"));
    if (t_int_four_and_half_mg_button == 1)
    {
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      {
        for(loopCounter4 = 0; loopCounter4 < 3;)
        {
          loopCounter4 = loopCounter4 + 1;
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
      }
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      MECC::TraceComment(Translate("**************\nAddition of 4mg/mL RNA for final 0.5mg/mL dilution\n\n**************"));
      {
        for(loopCounter5 = 0; loopCounter5 < 3;)
        {
          loopCounter5 = loopCounter5 + 1;
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
      }
    }
    MECC::TraceComment(Translate("**************\nMixing 0.5mg/mL dilution\n\n**************"));
    {
      for(loopCounter5 = 0; loopCounter5 < 3;)
      {
        loopCounter5 = loopCounter5 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
    }
    customDialog_2.InitCustomDialog("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");
    customDialog_2.ShowCustomDialog();
    abort;
    STAR_TIP_TOOLS::_ExitLibrary();
  } }
