global device ML_STAR ("Z:\\Shared\\Human Health\\005 - Pre-Clinical Prod\\Sample Gen\\Hamilton\\HH Protocols\\100_200_400_A260_TK.lay", "ML_STAR", hslTrue);
#include "Z:\\Shared\\Human Health\\005 - Pre-Clinical Prod\\Sample Gen\\Hamilton\\HH Protocols\\100_200_400_A260_TK.res"
variable loopCounter1;
variable loopCounter2;
variable loopCounter3;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("***********************************************************************************\n\nThis method dilutes mRNA 100X, 200X, and 400X. \n\nMoves diluted mRNA to a half area plate for A260 quantification.\n\n\n***********************************************************************************"));
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    MECC::TraceComment(Translate("*********************************************************\nPick up RNA\n\n*******************************************************\n"));
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    MECC::TraceComment(Translate("********************************\n\nMixing Dilutions\n\n**************************"));
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    MECC::TraceComment(Translate("************************\nPlating of 100/200/400X dilutions into deepwell for duplicate reads at each concnetration.\n***************************"));
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
  } }
