#include "100_200_400_A260_TK_V.2.res"
 namespace _Method { #include "STAR Tools\\STAR Tip Tools.hs_" }
 namespace _Method { #include "HSLMPELib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
variable loopCounter2;
dialog customDialog_1;
variable t_str50CountChannels;
variable t_str1000CountChannels;
global device ML_STAR ("100_200_400_A260_TK_V.2.lay", "ML_STAR", hslTrue);
dialog customDialog_2;
dialog customDialog_3;
dialog customDialog_4;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    STAR_TIP_TOOLS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("*************************\nV2.0.0\n\nThis method dilutes up to 15 samples 100/200/400X and sets up a half area plate for A260 reads. \n\n*****************************"));
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    MECC::TraceComment(Translate("***************\nAddition of water to DWDP\n\n**************"));
    t_str50CountChannels = Translate("50Channels");
    t_str1000CountChannels = Translate("1000Channels");
    customDialog_4.InitCustomDialog("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");
    customDialog_4.ShowCustomDialog();
    customDialog_3.InitCustomDialog("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");
    customDialog_3.ShowCustomDialog();
    STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.Seq_50uL_tips_pos_1_96, t_str50CountChannels, 999);
    STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.Seq_1000uL_tip_pickup_pos_1_96, t_str1000CountChannels, 999);
    customDialog_2.InitCustomDialog("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");
    customDialog_2.ShowCustomDialog();
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    MECC::TraceComment(Translate("*********************\nAddition of RNA\n\n**************\n"));
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    MECC::TraceComment(Translate("*******\nMixing and transfer of diluted RNA throughout DWDP\n\n*********"));
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    MECC::TraceComment(Translate("*******************\nDiluted RNA is plated in duplicate on half area plate\n\n******************"));
    if(0){
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    }
    {
      for(loopCounter2 = 0; loopCounter2 < 6;)
      {
        loopCounter2 = loopCounter2 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      }
    }
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    STAR_TIP_TOOLS::_ExitLibrary();
  } }
