// {{{ 2 "SubmethodForwardDeclaration" ""
private function Aliquot(  ) void ;
function OnAbort(  ) void ;
// }} ""
// {{{ 5 "OnAbort" "Begin"
function OnAbort(  ) void {
// }} ""
// {{ 5 "OnAbort" "InitLocals"
// }} ""
// {{{ 5 "OnAbort" "End"
}
// }} ""
// {{{ 5 "Aliquot" "Begin"
private function Aliquot(  ) void {
// }} ""
private variable loopCounter1;
private variable t_str50ulTips;
// {{ 5 "Aliquot" "InitLocals"
// }} ""
// {{ 132 1 0 "cc3abbb6_a71e_4b1c_8f980dd5671ceab1" "ML_STAR:{BD0D210B-0816-4C86-A903-D6B2DF73F78B}"
{
	variable arrRetValues[];
	arrRetValues = ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("cc3abbb6_a71e_4b1c_8f980dd5671ceab1"); // Head96TipPickUp
}
// }} ""
// {{ 133 1 0 "d5972cc1_841a_4cf1_a2f89cf2334c2407" "{B31F3532-5D80-11d4-A5EB-0050DA737D89}"
{
for(loopCounter1 = 0; loopCounter1 < t_intNumberOfPlates;)
{
loopCounter1 = loopCounter1 + 1;
// }} ""
// {{ 134 1 0 "ff51f961_b973_4cb3_b86f2508af3c9964" "ML_STAR:{827392A0-B7E8-4472-9ED3-B45B71B5D27A}"
{
	variable arrRetValues[];
	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("ff51f961_b973_4cb3_b86f2508af3c9964"); // Head96Aspirate
}
// }} ""
// {{ 135 1 0 "71bf323c_2868_42ae_95c8eca596c811de" "ML_STAR:{A48573A5-62ED-4951-9EF9-03207EFE34FB}"
{
	variable arrRetValues[];
	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("71bf323c_2868_42ae_95c8eca596c811de"); // Head96Dispense
}
// }} ""
// {{{ 136 1 0 "3e223c54_3659_4888_a78901b16e25755f" "{7C4EF7A7-39BE-406a-897F-71F3A35B4093}"
STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.seq_50ulTips_All, t_str50ulTips);
// }} ""
// {{ 137 1 0 "d5972cc1_841a_4cf1_a2f89cf2334c2407" "{B31F3532-5D80-11d4-A5EB-0050DA737D89}"
}
}
// }} ""
// {{ 138 1 0 "05bc5145_195e_4da8_b805419043a1e1d9" "ML_STAR:{2880E77A-3D6D-40FE-AF57-1BD1FE13960C}"
{
	variable arrRetValues[];
	arrRetValues = ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("05bc5145_195e_4da8_b805419043a1e1d9"); // Head96TipEject
}
// }} ""
// {{{ 5 "Aliquot" "End"
}
// }} ""
/* {{ 2 "SubmethodInsertLine" "" */ // }} ""
// $$author=tkelly$$valid=0$$time=2023-05-01 15:10$$checksum=f01cdcdd$$length=085$$