 namespace _Method { #include "STAR Tools\\STAR Tip Tools.hs_" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLDeckVisualize.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "AppsLibrary\\HSLAppsLib.hsl" }
 namespace _Method { #include "HSLArrLib.hsl" }
 namespace _Method { #include "Visual_NTR_Library\\Visual_NTR_library_NTRdiscardEdits.hs_" }
#include "Z:\\Shared\\Human Health\\005 - Pre-Clinical Prod\\Sample Gen\\Hamilton\\HH Protocols\\HH-PCR Template Aliquot V2.0.1.res"
variable t_intArrayControl;
variable t_strUserDefinedFilename;
variable t_strCPACError;
variable t_strBarcodePositions;
variable t_intNumberOfPlates;
variable t_blnIsPlateOOO;
variable t_strChannelPattern;
variable t_arr_blnMatchBarcodes[];
dialog customDialog_1;
dialog customDialog_2;
variable t_varDialogue;
dialog customDialog_3;
global sequence seqTargetWorlist;
global sequence seqSourceWorklist;
global variable l_strDNAIdentifier;
global variable l_strTargetWell;
global variable l_strTargetPlate;
global variable l_intWorkPlateArraySize;
variable t_arr_strTargetWell[];
variable t_arr_strTargetPlate[];
variable t_arr_strDNA_ID[];
global variable t_arr_strWell_ID[];
variable t_intTransferVol;
dialog dialogHandle_4;
dialog dialogHandle_5;
dialog dialogHandle_6;
dialog dialogHandle_7;
dialog dialogHandle_8;
dialog customDialog_9;
dialog customDialog_10;
dialog customDialog_11;
dialog customDialog_12;
dialog dialogHandle_13;
dialog dialogHandle_14;
dialog dialogHandle_15;
dialog dialogHandle_16;
dialog dialogHandle_17;
variable t_str50ulTips;
dialog dialogHandle_18;
dialog dialogHandle_19;
dialog dialogHandle_20;
dialog dialogHandle_21;
dialog dialogHandle_22;
global device ML_STAR ("Z:\\Shared\\Human Health\\005 - Pre-Clinical Prod\\Sample Gen\\Hamilton\\HH Protocols\\HH-PCR Template Aliquot V2.0.1.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    STAR_TIP_TOOLS::_InitLibrary();
    VISUAL_NTR_LIBRARY_NTRDISCARDEDITS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("\n_________________________________________________________________________________________________\nGreenLight BioSciences\n\nWorking Plate Setup\nLast Edit: 4/12/2020\nDesc.: Transfers user-defined volume (typically 2 uL) from IDT/Azenta plates to the Working Plate. Processes up to 5 plates at a time, with 96 MPH head\nNo worklisting, infrastructure in place to add barcoding if wanted.\n_________________________________________________________________________________________________\n"));
    if(0){
      t_blnIsPlateOOO = 0;
    }
    t_str50ulTips = Translate("50ulHead");
    if(0){
      t_strUserDefinedFilename = Translate("");
    }
    t_intNumberOfPlates = 0;
    if(0){
      t_intArrayControl = 1;
      t_strChannelPattern = Translate("11111111");
      t_strCPACError = Translate("");
      t_strBarcodePositions = Translate("");
    }
    t_intTransferVol = 0;
    if(0){
      t_arr_strDNA_ID.SetSize(0);
      t_arr_strTargetPlate.SetSize(0);
      t_arr_strTargetWell.SetSize(0);
      t_arr_blnMatchBarcodes.SetSize(0);
    }
    MECC::TraceComment(Translate("Initialize Devices\n"));
    customDialog_2.InitCustomDialog("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");
    customDialog_2.ShowCustomDialog();
    t_varDialogue = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    t_varDialogue = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
    t_intTransferVol = customDialog_1.GetCustomDialogProperty( "numeric1.Value" );
    t_intNumberOfPlates = customDialog_1.GetCustomDialogProperty( "numeric2.Value" );
    TrcTrace(Translate("Volume to Dispense: "), t_intTransferVol);
    if(0){
      MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------\n\n                                            Deck Loading\n\n\n-----------------------------------------------------------------------------------------------------------"));
      TrcTrace(Translate("Plates to process: "), t_intNumberOfPlates);
      if (t_intNumberOfPlates == 1)
      {
        DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.NormTemplate_1, 6, Translate("Normalized Template"));
        dialogHandle_13.SetOutput(Translate("Please load the Normalized Template plate at the indicated position."));
        dialogHandle_13.ShowOutput(Translate("Normalized Template"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.NormTemplate_1, 5, Translate("Normalized Template"));
      }
      if (t_intNumberOfPlates == 2)
      {
        DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.NormTemplate_1, 6, Translate("NormTemplate_1to2"));
        dialogHandle_16.SetOutput(Translate("Please load the Normalized Template plate at the indicated positions."));
        dialogHandle_16.ShowOutput(Translate("Normalized Templates"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.NormTemplate_1, 5, Translate("NormTemplate_1to2"));
      }
      if (t_intNumberOfPlates == 3)
      {
        DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.NormTemplate_1, 6, Translate("NormTemplate_1to3"));
        dialogHandle_15.SetOutput(Translate("Please load the Normalized Template plate at the indicated positions."));
        dialogHandle_15.ShowOutput(Translate("Normalized Templates"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.NormTemplate_1, 5, Translate("NormTemplate_1to3"));
      }
      if (t_intNumberOfPlates == 4)
      {
        DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.NormTemplate_1, 6, Translate("NormTemplate_1to4"));
        dialogHandle_17.SetOutput(Translate("Please load the Normalized Template plate at the indicated positions."));
        dialogHandle_17.ShowOutput(Translate("Normalized Templates"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.NormTemplate_1, 5, Translate("NormTemplate_1to4"));
      }
      if (t_intNumberOfPlates == 5)
      {
        DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.NormTemplate_1, 6, Translate("All Normalized Template Plates"));
        dialogHandle_14.SetOutput(Translate("Please load the Normalized Template plate at the indicated positions."));
        dialogHandle_14.ShowOutput(Translate("All Normalized Template Plates"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.NormTemplate_1, 5, Translate("All Normalized Template Plates"));
      }
      if (t_intNumberOfPlates == 1)
      {
        DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.WorkingPlate_1, 6, Translate(""));
        dialogHandle_4.SetOutput(Translate("Please Load Blue Fisher plate (WP) at indicated position"));
        dialogHandle_4.ShowOutput(Translate(""), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.WorkingPlate_1, 5, Translate(""));
      }
      if (t_intNumberOfPlates == 2)
      {
        DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.WP_1to2, 6, Translate(""));
        dialogHandle_6.SetOutput(Translate("Please Load Blue Fisher plates (WP) at indicated positions"));
        dialogHandle_6.ShowOutput(Translate(""), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.WP_1to2, 5, Translate(""));
      }
      if (t_intNumberOfPlates == 3)
      {
        DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.WP_1to3, 6, Translate(""));
        dialogHandle_5.SetOutput(Translate("Please Load Blue Fisher plates (WP) at indicated positions"));
        dialogHandle_5.ShowOutput(Translate(""), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.WP_1to3, 5, Translate(""));
      }
      if (t_intNumberOfPlates == 4)
      {
        DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.WP_1to4, 6, Translate(""));
        dialogHandle_7.SetOutput(Translate("Please Load Blue Fisher plates (WP) at indicated positions"));
        dialogHandle_7.ShowOutput(Translate(""), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.WP_1to4, 5, Translate(""));
      }
      if (t_intNumberOfPlates == 5)
      {
        DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seqWorkingPlates_ALL, 6, Translate(""));
        dialogHandle_8.SetOutput(Translate("Please Load IBlue Fisher plates (WP) at indicated positions"));
        dialogHandle_8.ShowOutput(Translate(""), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seqWorkingPlates_ALL, 5, Translate(""));
      }
      if (t_intNumberOfPlates == 1)
      {
        DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_50ulTips_1, 6, Translate(""));
        dialogHandle_19.SetOutput(Translate("Please Load 50ul tips at the indicated position."));
        dialogHandle_19.ShowOutput(Translate(""), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_50ulTips_1, 5, Translate(""));
      }
      if (t_intNumberOfPlates == 2)
      {
        DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_50ulTips_1, 6, Translate(""));
        dialogHandle_22.SetOutput(Translate("Please Load 50ul tips at the indicated position."));
        dialogHandle_22.ShowOutput(Translate(""), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_50ulTips_1, 5, Translate(""));
      }
      if (t_intNumberOfPlates == 3)
      {
        DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_50ulTips_1, 6, Translate(""));
        dialogHandle_20.SetOutput(Translate("Please Load 50ul tips at the indicated position."));
        dialogHandle_20.ShowOutput(Translate(""), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_50ulTips_1, 5, Translate(""));
      }
      if (t_intNumberOfPlates == 4)
      {
        DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_50ulTips_1, 6, Translate(""));
        dialogHandle_21.SetOutput(Translate("Please Load 50ul tips at the indicated position."));
        dialogHandle_21.ShowOutput(Translate(""), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_50ulTips_1, 5, Translate(""));
      }
      if (t_intNumberOfPlates == 5)
      {
        DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_50ulTips_1, 6, Translate(""));
        dialogHandle_18.SetOutput(Translate("Please Load 50ul tips at the indicated position."));
        dialogHandle_18.ShowOutput(Translate(""), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        DeckVisualize::UpdateUsedPositions(ML_STAR, ML_STAR.seq_50ulTips_1, 5, Translate(""));
      }
      if (t_intNumberOfPlates == 1)
      {
        customDialog_11.InitCustomDialog("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");
        customDialog_11.ShowCustomDialog();
      }
      if (t_intNumberOfPlates == 2)
      {
        customDialog_12.InitCustomDialog("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");
        customDialog_12.ShowCustomDialog();
      }
      if (t_intNumberOfPlates >= 3)
      {
        customDialog_10.InitCustomDialog("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");
        customDialog_10.ShowCustomDialog();
      }
    }
    STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.seq_50ulTips_All, t_str50ulTips, 999);
    customDialog_9.InitCustomDialog("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");
    customDialog_9.ShowCustomDialog();
    t_varDialogue = customDialog_9.GetCustomDialogProperty( "ReturnValue" );
    MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------\n\n                                            Aliquot BEGIN\n\n\n-----------------------------------------------------------------------------------------------------------"));
    Aliquot();
    TrcTrace4(Translate(" Volume Transfered to Working Plate: -------------------->"), t_intTransferVol, Translate("   uL "), Translate(""));
    MECC::TraceComment(Translate("----------------------------------------------------------------------------------------------------------\n\n                                            Aliquot DONE\n\n\n-----------------------------------------------------------------------------------------------------------"));
    customDialog_3.InitCustomDialog("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");
    customDialog_3.ShowCustomDialog();
    t_varDialogue = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
    abort;
    STAR_TIP_TOOLS::_ExitLibrary();
    VISUAL_NTR_LIBRARY_NTRDISCARDEDITS::_ExitLibrary();
  } }
