 namespace _Method { #include "HSLMPELib.hsl" }
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "Visual_NTR_Library\\Visual_NTR_library_NTRdiscardEdits.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "STAR Tools\\STAR Tip Tools.hs_" }
#include "RNASwiftProcess[1.5].res"
 namespace _Method { #include "HSLAppsLib.hsl" }
 namespace _Method { #include "HSLMPELib.hs_" }
 namespace _Method { #include "Z:\\Shared\\Human Health\\005 - Pre-Clinical Prod\\Sample Gen\\Hamilton\\Library\\HSLMPELib.hsl" }
dialog customDialog_1;
dialog customDialog_2;
dialog customDialog_3;
dialog customDialog_4;
dialog customDialog_5;
dialog customDialog_6;
dialog customDialog_7;
dialog customDialog_8;
dialog customDialog_9;
dialog customDialog_10;
dialog customDialog_11;
dialog customDialog_12;
dialog customDialog_13;
dialog customDialog_14;
dialog customDialog_15;
dialog customDialog_16;
variable t_blnIsDiluted;
variable t_str300CountChannels;
variable t_fltHHSTemp;
variable t_intMPEError;
variable t_intAspirateHeight;
variable t_intMixVolume;
variable t_strNTRCount;
variable t_varDialogue;
variable t_str8ChannelPattern;
variable t_intCurrentPlate;
variable t_hdlMPE;
variable t_hdlHHS;
variable t_blnIsCheckMPE;
variable t_intPlatesToProcess;
variable t_str1000CountChannels;
variable t_blnRunFlushWaste;
variable t_blnIsPCR;
variable t_blnIsDWP;
variable t_blnMPEInitialized;
variable t_str1000CountMPH;
global device ML_STAR ("RNASwiftProcess[1.5].lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    VISUAL_NTR_LIBRARY_NTRDISCARDEDITS::_InitLibrary();
    STAR_TIP_TOOLS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("\n_________________________________________________________________________________________________\nGreenLight BioSciences\n\nRNA Swift Process\nLast Edit: 3/26/2020\n\n_____________________________________________________________\n"));
    t_intPlatesToProcess = 0;
    t_strNTRCount = Translate("");
    t_str1000CountMPH = Translate("MPH1000");
    t_str1000CountChannels = Translate("Channels1000");
    t_str300CountChannels = Translate("Channels300");
    t_intCurrentPlate = 1;
    t_intAspirateHeight = 1;
    t_fltHHSTemp = 0;
    t_blnRunFlushWaste = 0;
    t_blnIsDWP = 0;
    t_blnIsPCR = 0;
    t_blnIsDiluted = 0;
    t_blnIsCheckMPE = 0;
    t_intMPEError = 0;
    t_str8ChannelPattern = Translate("11111111");
    customDialog_16.InitCustomDialog("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");
    customDialog_16.ShowCustomDialog();
    t_varDialogue = customDialog_16.GetCustomDialogProperty( "ReturnValue" );
    if (t_varDialogue == 3)
    {
      abort;
    }
    MECC::TraceComment(Translate("Initialize Devices\n"));
    t_blnMPEInitialized = 0;
    customDialog_14.InitCustomDialog("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");
    customDialog_14.ShowCustomDialog();
    t_varDialogue = customDialog_14.GetCustomDialogProperty( "ReturnValue" );
    if (t_varDialogue == 3)
    {
      abort;
    }
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    if(0){
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
      t_intMPEError = HSLMPELib::ConnectUsingCOM(6, 921600, 0, t_hdlMPE, 0);
      t_intMPEError = HSLMPELib::Initialize(t_hdlMPE);
    }
    if (t_intMPEError >= 1)
    {
      if (t_intMPEError == 1705)
      {
        t_intMPEError = HSLMPELib::ConnectUsingCOM(6, 921600, 0, t_hdlMPE, 0);
        t_intMPEError = HSLMPELib::Initialize(t_hdlMPE);
        if (t_intMPEError >= 1)
        {
          _MPEError();
        }
      }
      else
      {
        if (t_intMPEError >= 1)
        {
          _MPEError();
        }
      }
    }
    HSLHamHeaterShaker::CreateStarDevice(ML_STAR, 1, t_hdlHHS);
    customDialog_7.InitCustomDialog("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");
    customDialog_7.ShowCustomDialog();
    t_varDialogue = customDialog_7.GetCustomDialogProperty( "ReturnValue" );
    HSLHamHeaterShaker::StartTempCtrl(t_hdlHHS, 50, 0);
    customDialog_8.InitCustomDialog("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");
    customDialog_8.ShowCustomDialog();
    t_varDialogue = customDialog_8.GetCustomDialogProperty( "ReturnValue" );
    t_blnIsCheckMPE = customDialog_8.GetCustomDialogProperty( "checkBox1.IsChecked" );
    if (t_blnIsCheckMPE == 1)
    {
      _CheckMPE();
    }
    ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    customDialog_10.InitCustomDialog("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");
    customDialog_10.ShowCustomDialog();
    t_varDialogue = customDialog_10.GetCustomDialogProperty( "ReturnValue" );
    t_blnIsDiluted = customDialog_10.GetCustomDialogProperty( "checkBox1.IsChecked" );
    if (t_blnIsDiluted == 1)
    {
      customDialog_3.InitCustomDialog("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");
      customDialog_3.ShowCustomDialog();
      t_varDialogue = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
      t_intPlatesToProcess = customDialog_3.GetCustomDialogProperty( "numeric1.Value" );
      t_blnIsDWP = 1;
    }
    else
    {
      customDialog_11.InitCustomDialog("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");
      customDialog_11.ShowCustomDialog();
      t_varDialogue = customDialog_11.GetCustomDialogProperty( "ReturnValue" );
      t_intPlatesToProcess = customDialog_11.GetCustomDialogProperty( "numeric1.Value" );
      t_blnIsDWP = customDialog_11.GetCustomDialogProperty( "radioButton1.IsChecked" );
      t_blnIsPCR = customDialog_11.GetCustomDialogProperty( "radioButton2.IsChecked" );
    }
    if (t_varDialogue == 3)
    {
      abort;
    }
    if (t_blnIsDiluted == 1)
    {
      customDialog_4.InitCustomDialog("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");
      customDialog_4.ShowCustomDialog();
      t_varDialogue = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
    }
    else
    {
      customDialog_9.InitCustomDialog("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");
      customDialog_9.ShowCustomDialog();
      t_varDialogue = customDialog_9.GetCustomDialogProperty( "ReturnValue" );
    }
    if (t_varDialogue == 3)
    {
      abort;
    }
    customDialog_15.InitCustomDialog("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");
    customDialog_15.ShowCustomDialog();
    t_varDialogue = customDialog_15.GetCustomDialogProperty( "ReturnValue" );
    if (t_varDialogue == 3)
    {
      abort;
    }
    customDialog_13.InitCustomDialog("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");
    customDialog_13.ShowCustomDialog();
    t_varDialogue = customDialog_13.GetCustomDialogProperty( "ReturnValue" );
    if (t_varDialogue == 3)
    {
      abort;
    }
    HSLHamHeaterShaker::SetPlateLock(t_hdlHHS, 1);
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    t_varDialogue = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
    VISUAL_NTR_LIBRARY_NTRDISCARDEDITS::MPH_TipCounter_Edit(ML_STAR, ML_STAR.NTR300Tips, t_strNTRCount, Translate("300 uL NTR Tip Edit"), 0, 999);
    ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
    TipCount::Edit2(ML_STAR.seq1000MPH, t_str1000CountMPH, ML_STAR, 999);
    TipCount::Edit2(ML_STAR.seq300Channels, t_str300CountChannels, ML_STAR, 999);
    ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
    customDialog_5.InitCustomDialog("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");
    customDialog_5.ShowCustomDialog();
    t_varDialogue = customDialog_5.GetCustomDialogProperty( "ReturnValue" );
    if (t_varDialogue == 3)
    {
      abort;
    }
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    if (t_intPlatesToProcess >= 1)
    {
      if (t_blnIsDWP == 1)
      {
        t_intMixVolume = 250;
        DilutionAndLysis(ML_STAR.SamplePlate_1, ML_STAR.DilutionPlate_1, ML_STAR.AssayPlate_1, ML_STAR.CollectionPlate_1mL_1);
      }
      if (t_blnIsPCR == 1)
      {
        t_intMixVolume = 50;
        DilutionAndLysis(ML_STAR.PCRSample_1, ML_STAR.DilutionPlate_1, ML_STAR.AssayPlate_1, ML_STAR.CollectionPlate_1mL_1);
      }
      FilterPlateProcessing(ML_STAR.AssayPlate_1, ML_STAR.trpAssayPlate_1, ML_STAR.ElutePlate_1, ML_STAR.CollectionPlate_1mL_1);
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
      if (t_intPlatesToProcess > 1)
      {
        customDialog_12.InitCustomDialog("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");
        customDialog_12.ShowCustomDialog();
        t_varDialogue = customDialog_12.GetCustomDialogProperty( "ReturnValue" );
        if (t_varDialogue == 3)
        {
          abort;
        }
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
        ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
        TipCount::Edit2(ML_STAR.seq1000MPH, t_str1000CountMPH, ML_STAR, 999);
      }
    }
    if (t_intPlatesToProcess >= 2)
    {
      if (t_blnIsDWP == 1)
      {
        DilutionAndLysis(ML_STAR.SamplePlate_2, ML_STAR.DilutionPlate_2, ML_STAR.AssayPlate_2, ML_STAR.CollectionPlate_1mL_2);
        t_intAspirateHeight = 5;
      }
      if (t_blnIsPCR == 1)
      {
        DilutionAndLysis(ML_STAR.PCRSample_2, ML_STAR.DilutionPlate_2, ML_STAR.AssayPlate_2, ML_STAR.CollectionPlate_1mL_2);
        t_intAspirateHeight = 1;
      }
      FilterPlateProcessing(ML_STAR.AssayPlate_2, ML_STAR.trpAssayPlate_2, ML_STAR.ElutePlate_2, ML_STAR.CollectionPlate_1mL_2);
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      if(0){
        ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      }
      ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      if(0){
        ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
      }
      if (t_intPlatesToProcess > 2)
      {
        customDialog_6.InitCustomDialog("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");
        customDialog_6.ShowCustomDialog();
        t_varDialogue = customDialog_6.GetCustomDialogProperty( "ReturnValue" );
        if (t_varDialogue == 3)
        {
          abort;
        }
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
        ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
        ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
        TipCount::Edit2(ML_STAR.seq1000MPH, t_str1000CountMPH, ML_STAR, 999);
      }
    }
    TipCount::Write2(ML_STAR.seq1000MPH, t_str1000CountMPH, ML_STAR);
    ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    customDialog_2.InitCustomDialog("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");
    customDialog_2.ShowCustomDialog();
    t_varDialogue = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
    t_blnRunFlushWaste = customDialog_2.GetCustomDialogProperty( "radioButton1.IsChecked" );
    if (t_blnRunFlushWaste == 1)
    {
      Waste_Flush();
    }
    abort;
    VISUAL_NTR_LIBRARY_NTRDISCARDEDITS::_ExitLibrary();
    STAR_TIP_TOOLS::_ExitLibrary();
  } }
