private function DilutionAndLysis( sequence & i_seqSamplePlate, sequence & i_seqDilutionPlate, sequence & i_seqAssayPlate, sequence & i_seqCollectionPlate ) void ;
private function FilterPlateProcessing( sequence & i_seqAssayPlate, sequence & i_seqtrpAssayPlate, sequence & i_seqElutePlate, sequence & i_seqCollectionPlate ) void ;
private function MPHTipEject(  ) void ;
private function Waste_Flush(  ) void ;
private function _CheckMPE(  ) void ;
private function _MPEError(  ) void ;
private function _TestMethod(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
}

private function DilutionAndLysis( sequence & i_seqSamplePlate, sequence & i_seqDilutionPlate, sequence & i_seqAssayPlate, sequence & i_seqCollectionPlate ) void {
  private variable t_intGripperChannel;
  private variable loopCountOverPlate;
  private sequence default;
  MECC::TraceComment(Translate("=========================================================================================\nDilutionAndLysis\n========================================================================================="));
  t_intGripperChannel = 1;
  t_intGripperChannel = t_intGripperChannel + 1;
  if (t_intGripperChannel > 8)
  {
    t_intGripperChannel = 2;
  }
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  MECC::TraceComment(Translate("++++++++++++++++++++++++++DILUTIONANDLYSIS++++++++++++++++++++++++++TROUBLESHOOT 1++++++++++++++++++++++++++"));
  if (t_blnIsDiluted == 1)
  {
  }
  else
  {
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._700BFFB5_1B7F_4b9d_85D9_08ED3AAF7E46("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"); // Head96Move
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    VISUAL_NTR_LIBRARY_NTRDISCARDEDITS::MPH_TipCounter_Write(ML_STAR, ML_STAR.NTR300Tips, t_strNTRCount, default, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, 8, 0, 0, Translate("Add additional NTR tips"), 1, 999);
    SeqResetSequenceIndexes(i_seqDilutionPlate);
    MECC::TraceComment(Translate("++++++++++++++++++++++++++DILUTIONANDLYSIS++++++++++++++++++++++++++TROUBLESHOOT 2++++++++++++++++++++++++++"));
    STAR_TIP_TOOLS::BuildChannelPattern(8, 8, t_str8ChannelPattern);
    {
      loopCountOverPlate = 0;
      while (
         (i_seqDilutionPlate.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, i_seqDilutionPlate, 1);
        loopCountOverPlate = loopCountOverPlate + 1;
        STAR_TIP_TOOLS::Optimized1mLTipPickup2(ML_STAR, ML_STAR.seq300Channels, t_str300CountChannels, t_str8ChannelPattern);
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (i_seqDilutionPlate.GetCurrentPosition() > 0 && i_seqDilutionPlate.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      i_seqDilutionPlate.SetMax(i_seqDilutionPlate.GetTotal());
      i_seqDilutionPlate.SetCurrentPosition(1);
    }
    SeqResetSequenceIndexes(i_seqDilutionPlate);
  }
  MECC::TraceComment(Translate("++++++++++++++++++++++++++DILUTIONANDLYSIS++++++++++++++++++++++++++TROUBLESHOOT 3++++++++++++++++++++++++++"));
  HSLHamHeaterShaker::GetTemperature(t_hdlHHS, t_fltHHSTemp);
  TrcTrace(Translate(":::::::::::::::::::::::::::::::::::::::::::::::::HHS TEMP ---      "), t_fltHHSTemp);
  ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
  ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
  ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
  ML_STAR._700BFFB5_1B7F_4b9d_85D9_08ED3AAF7E46("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"); // Head96Move
  ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
  SeqResetSequenceIndexes(i_seqAssayPlate);
  VISUAL_NTR_LIBRARY_NTRDISCARDEDITS::MPH_TipCounter_Write(ML_STAR, ML_STAR.NTR300Tips, t_strNTRCount, default, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, 8, 0, 0, Translate("Add additional NTR tips"), 1, 999);
  MECC::TraceComment(Translate("++++++++++++++++++++++++++DILUTIONANDLYSIS++++++++++++++++++++++++++TROUBLESHOOT 4++++++++++++++++++++++++++"));
  ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
  ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
  ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
  ML_STAR._700BFFB5_1B7F_4b9d_85D9_08ED3AAF7E46("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"); // Head96Move
  ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
  VISUAL_NTR_LIBRARY_NTRDISCARDEDITS::MPH_TipCounter_Write(ML_STAR, ML_STAR.NTR300Tips, t_strNTRCount, default, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, 8, 0, 0, Translate("Add additional NTR tips"), 1, 999);
  SeqResetSequenceIndexes(i_seqAssayPlate);
  MECC::TraceComment(Translate("++++++++++++++++++++++++++DILUTIONANDLYSIS++++++++++++++++++++++++++TROUBLESHOOT 5++++++++++++++++++++++++++"));
  ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
  ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
  ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
  ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
  VISUAL_NTR_LIBRARY_NTRDISCARDEDITS::MPH_TipCounter_Write(ML_STAR, ML_STAR.NTR300Tips, t_strNTRCount, default, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, 8, 0, 0, Translate("Add additional NTR tips"), 1, 999);
  SeqResetSequenceIndexes(i_seqAssayPlate);
  MECC::TraceComment(Translate("++++++++++++++++++++++++++DILUTIONANDLYSIS++++++++++++++++++++++++++TROUBLESHOOT 6++++++++++++++++++++++++++"));
  ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
  ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
  ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
  ML_STAR._700BFFB5_1B7F_4b9d_85D9_08ED3AAF7E46("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"); // Head96Move
  ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
  SeqResetSequenceIndexes(i_seqAssayPlate);
  VISUAL_NTR_LIBRARY_NTRDISCARDEDITS::MPH_TipCounter_Write(ML_STAR, ML_STAR.NTR300Tips, t_strNTRCount, default, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, 8, 0, 0, Translate("Add additional NTR tips"), 1, 999);
}

private function FilterPlateProcessing( sequence & i_seqAssayPlate, sequence & i_seqtrpAssayPlate, sequence & i_seqElutePlate, sequence & i_seqCollectionPlate ) void {
  private variable t_intGripperChannel;
  private variable SPEFilterPlate;
  private variable l_strParameterSPE;
  private variable l_intWasteContainer;
  private variable l_strParameterWash;
  private variable l_fltOffsetFromNozzlesFilter;
  private variable l_fltOffsetFromNozzlesSPE;
  private variable l_strParameterDry;
  private variable l_fltSPEPlateHeight;
  private variable l_fltFilterPlateHeight;
  private variable l_fltHPLCPlateHeight;
  private variable l_fltSPEElutionPlateHeight;
  private variable l_strParameterFilter;
  private variable l_fltCollectionPlateHeight;
  private variable loopCounter2;
  private variable loopCounter3;
  private variable l_fltFilterNozzleHeight;
  private variable l_fltSPENozzleHeight;
  private variable mpeSPEFilter;
  private variable l_strParameterElute;
  private sequence default;
  MECC::TraceComment(Translate("=========================================================================================\n\nFilterPlateProcessing\n\n========================================================================================="));
  l_fltFilterPlateHeight = 63.2;
  l_fltSPEElutionPlateHeight = 62.6;
  l_fltSPEPlateHeight = 15.275;
  l_fltFilterNozzleHeight = 32.2;
  l_fltSPENozzleHeight = 38;
  l_intWasteContainer = 0;
  l_fltCollectionPlateHeight = 31.5;
  l_fltHPLCPlateHeight = 27.75;
  l_fltOffsetFromNozzlesFilter = 0;
  l_fltOffsetFromNozzlesSPE = -1;
  l_strParameterFilter = Translate("pressure,6,10;");
  l_strParameterSPE = Translate("pressure,6,75;");
  l_strParameterWash = Translate("pressure,6,60;idle,0,10;");
  l_strParameterDry = Translate("pressure,25,240;");
  l_strParameterElute = Translate("idle,0,120;pressure,6,60;");
  SPEFilterPlate = Translate("SPEFilterPlate");
  mpeSPEFilter = Translate("trpMPESPEFilter");
  t_intGripperChannel = 1;
  if(0){
    MECC::TraceComment(Translate("++++++++++++++++++++++++++FILTERPLATEPROCESSING++++++++++++++++++++++++++TROUBLESHOOT 1++++++++++++++++++++++++++"));
    t_intMPEError = HSLMPELib::FilterPlatePlaced(t_hdlMPE, l_fltFilterPlateHeight, l_fltFilterNozzleHeight);
    if (t_intMPEError >= 1)
    {
      _MPEError();
    }
  }
  MECC::TraceComment(Translate("++++++++++++++++++++++++++FILTERPLATEPROCESSING++++++++++++++++++++++++++TROUBLESHOOT 2++++++++++++++++++++++++++"));
  if(0){
    t_intMPEError = HSLMPELib::ProcessFilterToWasteContainer(t_hdlMPE, l_strParameterFilter, 1, 0, 1);
    if (t_intMPEError >= 1)
    {
      _MPEError();
    }
  }
  MECC::TraceComment(Translate("++++++++++++++++++++++++++FILTERPLATEPROCESSING++++++++++++++++++++++++++TROUBLESHOOT 3++++++++++++++++++++++++++"));
  t_intGripperChannel = t_intGripperChannel + 1;
  if (t_intGripperChannel > 8)
  {
    t_intGripperChannel = 2;
  }
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  t_intMPEError = HSLMPELib::FilterPlateRemoved(t_hdlMPE);
  if (t_intMPEError >= 1)
  {
    _MPEError();
  }
  MECC::TraceComment(Translate("++++++++++++++++++++++++++FILTERPLATEPROCESSING++++++++++++++++++++++++++TROUBLESHOOT 4++++++++++++++++++++++++++"));
  ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
  ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
  ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
  ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
  TipCount::Write2(ML_STAR.seq1000MPH, t_str1000CountMPH, ML_STAR);
  SeqResetSequenceIndexes(i_seqCollectionPlate);
  MECC::TraceComment(Translate("++++++++++++++++++++++++++FILTERPLATEPROCESSING++++++++++++++++++++++++++TROUBLESHOOT 5++++++++++++++++++++++++++"));
  APPSLIB::MoveLabware(ML_STAR, SPEFilterPlate, 0, 0, 8);
  APPSLIB::MoveLabware(ML_STAR, mpeSPEFilter, 0, 0.5, 8);
  t_intGripperChannel = t_intGripperChannel + 1;
  if (t_intGripperChannel > 8)
  {
    t_intGripperChannel = 2;
  }
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  APPSLIB::MoveLabware(ML_STAR, SPEFilterPlate, 0, 0, -8);
  APPSLIB::MoveLabware(ML_STAR, mpeSPEFilter, 0, -0.5, -8);
  t_intMPEError = HSLMPELib::FilterPlatePlaced(t_hdlMPE, l_fltSPEPlateHeight, l_fltSPENozzleHeight);
  if (t_intMPEError >= 1)
  {
    _MPEError();
  }
  MECC::TraceComment(Translate("++++++++++++++++++++++++++FILTERPLATEPROCESSING++++++++++++++++++++++++++TROUBLESHOOT 6++++++++++++++++++++++++++"));
  ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
  ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
  ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
  ML_STAR._700BFFB5_1B7F_4b9d_85D9_08ED3AAF7E46("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"); // Head96Move
  ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
  HSLHamHeaterShaker::SetPlateLock(t_hdlHHS, 0);
  TipCount::Write2(ML_STAR.seq1000MPH, t_str1000CountMPH, ML_STAR);
  MECC::TraceComment(Translate("++++++++++++++++++++++++++FILTERPLATEPROCESSING++++++++++++++++++++++++++TROUBLESHOOT 7++++++++++++++++++++++++++"));
  t_intMPEError = HSLMPELib::FilterPlatePlaced(t_hdlMPE, l_fltSPEPlateHeight, l_fltSPENozzleHeight);
  t_intMPEError = HSLMPELib::ProcessFilterToWasteContainer(t_hdlMPE, l_strParameterSPE, 1, 0, 1);
  if (t_intMPEError >= 1)
  {
    _MPEError();
  }
  MECC::TraceComment(Translate("++++++++++++++++++++++++++FILTERPLATEPROCESSING++++++++++++++++++++++++++TROUBLESHOOT 8++++++++++++++++++++++++++"));
  ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
  ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
  ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
  ML_STAR._700BFFB5_1B7F_4b9d_85D9_08ED3AAF7E46("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"); // Head96Move
  ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
  TipCount::Write2(ML_STAR.seq1000MPH, t_str1000CountMPH, ML_STAR);
  MECC::TraceComment(Translate("++++++++++++++++++++++++++FILTERPLATEPROCESSING++++++++++++++++++++++++++TROUBLESHOOT 9++++++++++++++++++++++++++"));
  t_intMPEError = HSLMPELib::FilterPlatePlaced(t_hdlMPE, l_fltSPEPlateHeight, l_fltSPENozzleHeight);
  t_intMPEError = HSLMPELib::ProcessFilterToWasteContainer(t_hdlMPE, l_strParameterWash, 0, 0, 1);
  if (t_intMPEError >= 1)
  {
    _MPEError();
  }
  MECC::TraceComment(Translate("++++++++++++++++++++++++++FILTERPLATEPROCESSING++++++++++++++++++++++++++TROUBLESHOOT 10++++++++++++++++++++++++++"));
  t_intMPEError = HSLMPELib::ProcessFilterToWasteContainer(t_hdlMPE, l_strParameterDry, 1, 0, 1);
  if (t_intMPEError >= 1)
  {
    _MPEError();
  }
  MECC::TraceComment(Translate("++++++++++++++++++++++++++FILTERPLATEPROCESSING++++++++++++++++++++++++++TROUBLESHOOT 11++++++++++++++++++++++++++"));
  APPSLIB::MoveLabware(ML_STAR, SPEFilterPlate, 0, 0, 8);
  APPSLIB::MoveLabware(ML_STAR, mpeSPEFilter, 0, 0, 8);
  t_intGripperChannel = t_intGripperChannel + 1;
  if (t_intGripperChannel > 8)
  {
    t_intGripperChannel = 2;
  }
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  APPSLIB::MoveLabware(ML_STAR, SPEFilterPlate, 0, 0, -8);
  APPSLIB::MoveLabware(ML_STAR, mpeSPEFilter, 0, 0, -8);
  t_intMPEError = HSLMPELib::FilterPlateRemoved(t_hdlMPE);
  if (t_intMPEError >= 1)
  {
    _MPEError();
  }
  MECC::TraceComment(Translate("++++++++++++++++++++++++++FILTERPLATEPROCESSING++++++++++++++++++++++++++TROUBLESHOOT 12++++++++++++++++++++++++++"));
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  MECC::TraceComment(Translate("++++++++++++++++++++++++++FILTERPLATEPROCESSING++++++++++++++++++++++++++TROUBLESHOOT 13++++++++++++++++++++++++++"));
  APPSLIB::MoveLabware(ML_STAR, SPEFilterPlate, 0, 0, 8);
  APPSLIB::MoveLabware(ML_STAR, mpeSPEFilter, 0, 0, 55);
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  APPSLIB::MoveLabware(ML_STAR, SPEFilterPlate, 0, 0, -8);
  APPSLIB::MoveLabware(ML_STAR, mpeSPEFilter, 0, 0, -55);
  t_intMPEError = HSLMPELib::FilterPlatePlaced(t_hdlMPE, l_fltSPEElutionPlateHeight, 0);
  if (t_intMPEError >= 1)
  {
    _MPEError();
  }
  MECC::TraceComment(Translate("++++++++++++++++++++++++++FILTERPLATEPROCESSING++++++++++++++++++++++++++TROUBLESHOOT 14++++++++++++++++++++++++++"));
  ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
  {
    for(loopCounter3 = 0; loopCounter3 < 2;)
    {
      loopCounter3 = loopCounter3 + 1;
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    }
  }
  ML_STAR._700BFFB5_1B7F_4b9d_85D9_08ED3AAF7E46("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"); // Head96Move
  ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
  VISUAL_NTR_LIBRARY_NTRDISCARDEDITS::MPH_TipCounter_Write(ML_STAR, ML_STAR.NTR300Tips, t_strNTRCount, default, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, 8, 0, 0, Translate("Add additional NTR tips"), 1, 999);
  MECC::TraceComment(Translate("++++++++++++++++++++++++++FILTERPLATEPROCESSING++++++++++++++++++++++++++TROUBLESHOOT 15++++++++++++++++++++++++++"));
  t_intMPEError = HSLMPELib::ProcessFilterToWasteContainer(t_hdlMPE, l_strParameterElute, 1, 0, 1);
  if (t_intMPEError >= 1)
  {
    _MPEError();
  }
  MECC::TraceComment(Translate("++++++++++++++++++++++++++FILTERPLATEPROCESSING++++++++++++++++++++++++++TROUBLESHOOT 16++++++++++++++++++++++++++"));
  APPSLIB::MoveLabware(ML_STAR, SPEFilterPlate, 0, 0, 8);
  APPSLIB::MoveLabware(ML_STAR, mpeSPEFilter, 0, 0, 55);
  {
    for(loopCounter2 = 0; loopCounter2 < 3;)
    {
      loopCounter2 = loopCounter2 + 1;
      ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
      APPSLIB::MoveLabware(ML_STAR, mpeSPEFilter, 0, 0, 5);
      ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      APPSLIB::MoveLabware(ML_STAR, mpeSPEFilter, 0, 0, -5);
    }
  }
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  APPSLIB::MoveLabware(ML_STAR, SPEFilterPlate, 0, 0, -8);
  APPSLIB::MoveLabware(ML_STAR, mpeSPEFilter, 0, 0, -55);
  t_intMPEError = HSLMPELib::FilterPlateRemoved(t_hdlMPE);
  if (t_intMPEError >= 1)
  {
    _MPEError();
  }
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  MECC::TraceComment(Translate("++++++++++++++++++++++++++FILTERPLATEPROCESSING++++++++++++++++++++++++++TROUBLESHOOT 17++++++++++++++++++++++++++"));
}

private function MPHTipEject(  ) void {
  ML_STAR._700BFFB5_1B7F_4b9d_85D9_08ED3AAF7E46("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"); // Head96Move
  ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
}

private function Waste_Flush(  ) void {
  private dialog customDialog_1;
  private variable wasteContainer;
  private variable ret_FlushWasteQuery;
  MECC::TraceComment(Translate("=============================== Waste_Flush START"));
  HSLMPELib::StartVacuum(t_hdlMPE, wasteContainer, 10, 1);
  customDialog_1.InitCustomDialog("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");
  customDialog_1.ShowCustomDialog();
  ret_FlushWasteQuery = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
  HSLMPELib::StopVacuum(t_hdlMPE);
  MECC::TraceComment(Translate("=============================== Waste_Flush FINISH"));
}

private function _CheckMPE(  ) void {
  private dialog customDialog_2;
  private dialog customDialog_3;
  private variable SPEFilterPlate;
  private variable l_intWasteContainer;
  private variable l_fltOffsetFromNozzlesFilter;
  private variable l_strParameterWash;
  private variable l_fltSPEPlateHeight;
  private variable l_fltOffsetFromNozzlesSPE;
  private variable l_fltFilterPlateHeight;
  private variable l_fltSPEElutionPlateHeight;
  private variable l_fltHPLCPlateHeight;
  private variable l_fltCollectionPlateHeight;
  private variable l_fltSPENozzleHeight;
  private variable l_fltFilterNozzleHeight;
  private variable mpeSPEFilter;
  l_fltFilterPlateHeight = 33;
  l_fltSPEElutionPlateHeight = 62.6;
  l_fltSPEPlateHeight = 15.275;
  l_fltFilterNozzleHeight = 32.2;
  l_fltSPENozzleHeight = 38;
  l_intWasteContainer = 0;
  l_fltCollectionPlateHeight = 31.5;
  l_fltHPLCPlateHeight = 27.75;
  l_fltOffsetFromNozzlesFilter = 0;
  l_fltOffsetFromNozzlesSPE = -1;
  l_strParameterWash = Translate("pressure,15,2;");
  SPEFilterPlate = Translate("SPEFilterPlate");
  mpeSPEFilter = Translate("trpMPESPEFilter");
  customDialog_3.InitCustomDialog("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");
  customDialog_3.ShowCustomDialog();
  t_varDialogue = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
  t_intMPEError = HSLMPELib::FilterPlatePlaced(t_hdlMPE, l_fltFilterPlateHeight, l_fltFilterNozzleHeight);
  if (t_intMPEError >= 1)
  {
    _MPEError();
  }
  t_intMPEError = HSLMPELib::ProcessFilterToWasteContainer(t_hdlMPE, l_strParameterWash, 1, 0, 1);
  if (t_intMPEError >= 1)
  {
    _MPEError();
  }
  customDialog_2.InitCustomDialog("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");
  customDialog_2.ShowCustomDialog();
  t_varDialogue = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
  t_intMPEError = HSLMPELib::FilterPlateRemoved(t_hdlMPE);
  if (t_intMPEError >= 1)
  {
    _MPEError();
  }
}

private function _MPEError(  ) void {
  private dialog customDialog_4;
  private variable retValueDialog;
  customDialog_4.InitCustomDialog("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");
  customDialog_4.ShowCustomDialog();
  retValueDialog = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
  abort;
}

private function _TestMethod(  ) void {
  private sequence i_seqAssayPlate;
  private sequence i_seqDilutionPlate;
  private sequence default;
  if(0){
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._700BFFB5_1B7F_4b9d_85D9_08ED3AAF7E46("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"); // Head96Move
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    VISUAL_NTR_LIBRARY_NTRDISCARDEDITS::MPH_TipCounter_Write(ML_STAR, ML_STAR.NTR300Tips, t_strNTRCount, default, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, 8, 0, 0, Translate("Add additional NTR tips"), 1, 999);
    SeqResetSequenceIndexes(i_seqDilutionPlate);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._700BFFB5_1B7F_4b9d_85D9_08ED3AAF7E46("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"); // Head96Move
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    VISUAL_NTR_LIBRARY_NTRDISCARDEDITS::MPH_TipCounter_Write(ML_STAR, ML_STAR.NTR300Tips, t_strNTRCount, default, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, 8, 0, 0, Translate("Add additional NTR tips"), 1, 999);
    SeqResetSequenceIndexes(i_seqAssayPlate);
  }
  ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
  ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
  ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
  ML_STAR._700BFFB5_1B7F_4b9d_85D9_08ED3AAF7E46("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"); // Head96Move
  ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
  SeqResetSequenceIndexes(i_seqAssayPlate);
  VISUAL_NTR_LIBRARY_NTRDISCARDEDITS::MPH_TipCounter_Write(ML_STAR, ML_STAR.NTR300Tips, t_strNTRCount, default, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, 8, 0, 0, Translate("Add additional NTR tips"), 1, 999);
}
