 namespace _Method { #include "GreenLight\\hamSTAR Methods\\HSLTrcLib.hsl" }
 namespace _Method { #include "STAR Tools\\STAR Tip Tools.hs_" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "AppsLibrary\\HSLAppsLib.hsl" }
 namespace _Method { #include "GreenLight\\hamSTAR Methods\\HSLSeqLib.hsl" }
 namespace _Method { #include "Visual_NTR_Library\\Visual_NTR_library_NTRdiscardEdits.hs_" }
#include "SpecDilutionPrepLayout.res"
dialog customDialog_1;
dialog customDialog_2;
variable t_varDialogue;
variable t_strNTRCount;
dialog customDialog_3;
dialog customDialog_4;
variable t_boolHPLCPlate;
variable t_boolFAPlate;
variable t_intRetainVolume;
variable t_str50CountChannels;
dialog customDialog_5;
variable t_bInDilCtrlAdd;
variable i_inGen100x;
global device ML_STAR ("SpecDilutionPrepLayout.lay", "ML_STAR", hslTrue);
dialog customDialog_6;
variable io_Norm;
variable io_Unnorm;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    STAR_TIP_TOOLS::_InitLibrary();
    VISUAL_NTR_LIBRARY_NTRDISCARDEDITS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("\n_________________________________________________________________________________________________\nGreenLight BioSciences\n\nSpec Dilution Prep Protocol\nLast Edit: 4/14/2021\nDesc.: Creates dilution and spec plates from IVT Pool plates for RNA quantification. Generates 100x plate for HPLC analysis and\nFragment Analyzer plates\n*Very sensitive! Custom liquid classes used to enhance serial dilution\n*Can start from 48 well plate or 96 well plate (using 48 well plate will enable technical replicate spec values)\n\n\n_________________________________________________________________________________________________\n"));
    MECC::TraceComment(Translate("Initialize Devices\n"));
    io_Norm = 0;
    io_Unnorm = 0;
    t_boolFAPlate = 0;
    t_boolHPLCPlate = 0;
    t_intRetainVolume = 0;
    t_str50CountChannels = Translate("");
    t_bInDilCtrlAdd = 0;
    i_inGen100x = 0;
    customDialog_2.InitCustomDialog("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");
    customDialog_2.ShowCustomDialog();
    t_varDialogue = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    VISUAL_NTR_LIBRARY_NTRDISCARDEDITS::MPH_TipCounter_Edit(ML_STAR, ML_STAR.NTR300Tips, t_strNTRCount, Translate("300uL NTR Tip Edit"), 0, 999);
    STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.MlStar50ulTip, t_str50CountChannels, 999);
    customDialog_3.InitCustomDialog("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");
    customDialog_3.ShowCustomDialog();
    t_varDialogue = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
    customDialog_5.InitCustomDialog("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");
    customDialog_5.SetCustomDialogProperty( "checkBox1.IsChecked", t_boolHPLCPlate );
    customDialog_5.SetCustomDialogProperty( "checkBox2.IsChecked", t_boolFAPlate );
    customDialog_5.SetCustomDialogProperty( "numeric1.Value", t_intRetainVolume );
    customDialog_5.SetCustomDialogProperty( "checkBox3.IsChecked", t_bInDilCtrlAdd );
    customDialog_5.SetCustomDialogProperty( "checkBox4.IsChecked", i_inGen100x );
    customDialog_5.ShowCustomDialog();
    t_varDialogue = customDialog_5.GetCustomDialogProperty( "ReturnValue" );
    t_boolHPLCPlate = customDialog_5.GetCustomDialogProperty( "checkBox1.IsChecked" );
    t_boolFAPlate = customDialog_5.GetCustomDialogProperty( "checkBox2.IsChecked" );
    t_intRetainVolume = customDialog_5.GetCustomDialogProperty( "numeric1.Value" );
    t_bInDilCtrlAdd = customDialog_5.GetCustomDialogProperty( "checkBox3.IsChecked" );
    i_inGen100x = customDialog_5.GetCustomDialogProperty( "checkBox4.IsChecked" );
    customDialog_6.InitCustomDialog("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");
    customDialog_6.SetCustomDialogProperty( "radioButton1.IsChecked", io_Unnorm );
    customDialog_6.SetCustomDialogProperty( "radioButton2.IsChecked", io_Norm );
    customDialog_6.ShowCustomDialog();
    t_varDialogue = customDialog_6.GetCustomDialogProperty( "ReturnValue" );
    io_Unnorm = customDialog_6.GetCustomDialogProperty( "radioButton1.IsChecked" );
    io_Norm = customDialog_6.GetCustomDialogProperty( "radioButton2.IsChecked" );
    customDialog_4.InitCustomDialog("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");
    customDialog_4.ShowCustomDialog();
    t_varDialogue = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
    Aliquot(t_boolHPLCPlate, t_boolFAPlate, t_intRetainVolume, t_bInDilCtrlAdd, i_inGen100x, io_Unnorm, io_Norm);
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    t_varDialogue = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
    abort;
    STAR_TIP_TOOLS::_ExitLibrary();
    VISUAL_NTR_LIBRARY_NTRDISCARDEDITS::_ExitLibrary();
  } }
