private function Aliquot( variable & HPLCPlate, variable & FAPlate, variable & RetainPlateVolume, variable & DilCtrlAdd, variable & Gen100xPlate, variable & Unnorm, variable & Norm ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
}

private function Aliquot( variable & HPLCPlate, variable & FAPlate, variable & RetainPlateVolume, variable & DilCtrlAdd, variable & Gen100xPlate, variable & Unnorm, variable & Norm ) void {
  private sequence default;
  private dialog customDialog_1;
  private dialog customDialog_2;
  private dialog customDialog_3;
  if (t_intRetainVolume > 0)
  {
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    VISUAL_NTR_LIBRARY_NTRDISCARDEDITS::MPH_TipCounter_Write(ML_STAR, ML_STAR.NTR300Tips, t_strNTRCount, default, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, 8, 0, 0, Translate("Add additional NTR tips"), 1, 999);
    customDialog_2.InitCustomDialog("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");
    customDialog_2.ShowCustomDialog();
    t_varDialogue = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
    if (t_varDialogue == 3)
    {
      abort;
    }
  }
  ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
  ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
  ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
  ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
  ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
  ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
  ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
  ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
  ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
  if (i_inGen100x == 0)
  {
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
  }
  ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
  VISUAL_NTR_LIBRARY_NTRDISCARDEDITS::MPH_TipCounter_Write(ML_STAR, ML_STAR.NTR300Tips, t_strNTRCount, default, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, 8, 0, 0, Translate("Add additional NTR tips"), 1, 999);
  if (t_bInDilCtrlAdd == 1)
  {
    if (io_Unnorm == 1)
    {
      STAR_TIP_TOOLS::TipCheck2(ML_STAR, ML_STAR.MlStar50ulTip, ML_STAR.MlStar50ulTip, t_str50CountChannels);
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      SeqResetSequenceIndexes(ML_STAR.seqDilCtrlPos);
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar50ulTip, t_str50CountChannels);
    }
    if (io_Norm == 1)
    {
      STAR_TIP_TOOLS::TipCheck2(ML_STAR, ML_STAR.MlStar50ulTip, ML_STAR.MlStar50ulTip, t_str50CountChannels);
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      SeqResetSequenceIndexes(ML_STAR.seqDilCtrlPos);
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar50ulTip, t_str50CountChannels);
    }
  }
  ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
  ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
  ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
  ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
  VISUAL_NTR_LIBRARY_NTRDISCARDEDITS::MPH_TipCounter_Write(ML_STAR, ML_STAR.NTR300Tips, t_strNTRCount, default, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, 8, 0, 0, Translate("Add additional NTR tips"), 1, 999);
  ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
  ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
  ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
  if (i_inGen100x == 0)
  {
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    VISUAL_NTR_LIBRARY_NTRDISCARDEDITS::MPH_TipCounter_Write(ML_STAR, ML_STAR.NTR300Tips, t_strNTRCount, default, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, 8, 0, 0, Translate("Add additional NTR tips"), 1, 999);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    VISUAL_NTR_LIBRARY_NTRDISCARDEDITS::MPH_TipCounter_Write(ML_STAR, ML_STAR.NTR300Tips, t_strNTRCount, default, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, 8, 0, 0, Translate("Add additional NTR tips"), 1, 999);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
  }
  ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
  VISUAL_NTR_LIBRARY_NTRDISCARDEDITS::MPH_TipCounter_Write(ML_STAR, ML_STAR.NTR300Tips, t_strNTRCount, default, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, 8, 0, 0, Translate("Add additional NTR tips"), 1, 999);
  ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
  ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
  ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
  ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
  VISUAL_NTR_LIBRARY_NTRDISCARDEDITS::MPH_TipCounter_Write(ML_STAR, ML_STAR.NTR300Tips, t_strNTRCount, default, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, 8, 0, 0, Translate("Add additional NTR tips"), 1, 999);
  if (i_inGen100x == 0)
  {
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    VISUAL_NTR_LIBRARY_NTRDISCARDEDITS::MPH_TipCounter_Write(ML_STAR, ML_STAR.NTR300Tips, t_strNTRCount, default, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, 8, 0, 0, Translate("Add additional NTR tips"), 1, 999);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    VISUAL_NTR_LIBRARY_NTRDISCARDEDITS::MPH_TipCounter_Write(ML_STAR, ML_STAR.NTR300Tips, t_strNTRCount, default, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, 8, 0, 0, Translate("Add additional NTR tips"), 1, 999);
  }
  customDialog_1.InitCustomDialog("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");
  customDialog_1.ShowCustomDialog();
  t_varDialogue = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
  if (t_boolHPLCPlate == 1)
  {
    SeqResetSequenceIndexes(ML_STAR.SpecPlate_100x);
    SeqResetSequenceIndexes(ML_STAR.DilutionPlate_100x);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    VISUAL_NTR_LIBRARY_NTRDISCARDEDITS::MPH_TipCounter_Write(ML_STAR, ML_STAR.NTR300Tips, t_strNTRCount, default, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, 8, 0, 0, Translate("Add additional NTR tips"), 1, 999);
  }
  if (t_boolFAPlate == 1)
  {
    SeqResetSequenceIndexes(ML_STAR.DilutionPlate_200x);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    SeqResetSequenceIndexes(ML_STAR.FAPlate);
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    VISUAL_NTR_LIBRARY_NTRDISCARDEDITS::MPH_TipCounter_Write(ML_STAR, ML_STAR.NTR300Tips, t_strNTRCount, default, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 0, 8, 0, 0, Translate("Add additional NTR tips"), 1, 999);
    STAR_TIP_TOOLS::TipCheck2(ML_STAR, ML_STAR.MlStar50ulTip, ML_STAR.MlStar50ulTip, t_str50CountChannels);
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    STAR_TIP_TOOLS::TipCounter_Write(ML_STAR, ML_STAR.MlStar50ulTip, t_str50CountChannels);
  }
}
