global device ML_STAR ("Stoich IVT 1.0.0.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
#include "Stoich IVT 1.0.0.res"
 namespace _Method { #include "HSLTipCountingLib.hsl" }
 namespace _Method { #include "HSLDeckVisualize.hsl" }
 namespace _Method { #include "STAR Tools\\STAR Tip Tools.hs_" }
dialog customDialog_1;
variable Worklist_Stoich_IVT;
variable arr_DNA_Vol[];
variable arr_Water_vol[];
variable arr_ATP_Vol[];
variable arr_CTP_Vol[];
variable arr_N1Y_Vol[];
variable arr_GTP_Vol[];
variable Source_Pos_ID_GTP;
variable Source_Pos_ID_N1Y;
variable Source_Labware_ID_Water;
variable Source_Pos_ID_Water;
variable Source_Labware_ID_DNA;
variable DNA_Vol;
variable Source_Labware_ID_NTP;
variable Des_Labware_ID;
variable Source_Pos_ID_DNA;
variable ATP_Vol;
variable Source_Pos_ID_ATP;
variable Des_Pos_ID;
variable CTP_Vol;
variable Water_Vol;
variable Source_Pos_ID_CTP;
variable N1Y_Vol;
variable GTP_Vol;
sequence Seq_WaterSource_200ml;
sequence Seq_Water_Des;
sequence Seq_CTP_Source;
sequence Seq_ATP_Des;
sequence Seq_DNA_Source;
sequence Seq_ATP_Source;
sequence Seq_DNA_Des;
sequence Seq_CTP_Des;
sequence Seq_GTP_Source;
sequence Seq_N1Y_Des;
sequence Seq_GTP_Des;
sequence Seq_N1Y_Source;
variable loopCounter1;
variable loopCounter2;
variable loopCounter3;
file file2;
variable loopCounter4;
variable loopCounter5;
variable loopCounter6;
variable loopCounter7;
dialog customDialog_2;
variable t_str300CountChannels;
variable t_strMPHTipCount;
variable t_str1000CountChannels;
dialog customDialog_3;
dialog customDialog_4;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    STAR_TIP_TOOLS::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("###############################################\n\nStoich IVT 1.0.3\n\nThis is a method to setup 1ml Stoichiometric IVT reactions using a worklist.  \nThe user will define the volumes of DNA, NF water, ATP, CTP, GTP, and UTP/N1M to be added to the reaction.\nVersion 1.0.3 update to include tip counter and reworked column format on worklist\n\n###############################################"));
    Worklist_Stoich_IVT = Translate("");
    t_str300CountChannels = Translate("300Channels");
    t_str1000CountChannels = Translate("1000Channels");
    t_strMPHTipCount = Translate("1000MPH");
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    Worklist_Stoich_IVT = customDialog_1.GetCustomDialogProperty( "Worklist.Path" );
    arr_DNA_Vol.SetSize(0);
    arr_Water_vol.SetSize(0);
    arr_ATP_Vol.SetSize(0);
    arr_CTP_Vol.SetSize(0);
    arr_GTP_Vol.SetSize(0);
    arr_N1Y_Vol.SetSize(0);
    file2.SetExtendedProperties( "IMEX=1");
    file2.AddField("Source_Labware_ID_DNA", Source_Labware_ID_DNA, hslString, 255);
    file2.AddField("Source_Pos_ID_DNA", Source_Pos_ID_DNA, hslString, 255);
    file2.AddField("DNA_Vol", DNA_Vol, hslFloat);
    file2.AddField("Source_Labware_ID_Water", Source_Labware_ID_Water, hslString, 255);
    file2.AddField("Source_Pos_ID_Water", Source_Pos_ID_Water, hslString, 255);
    file2.AddField("Water_Vol", Water_Vol, hslFloat);
    file2.AddField("Des_Labware_ID", Des_Labware_ID, hslString, 255);
    file2.AddField("Des_Pos_ID", Des_Pos_ID, hslString, 255);
    file2.AddField("Source_Labware_ID_NTP", Source_Labware_ID_NTP, hslString, 255);
    file2.AddField("Source_Pos_ID_ATP", Source_Pos_ID_ATP, hslString, 255);
    file2.AddField("ATP_Vol", ATP_Vol, hslFloat);
    file2.AddField("Source_Pos_ID_CTP", Source_Pos_ID_CTP, hslString, 255);
    file2.AddField("CTP_Vol", CTP_Vol, hslFloat);
    file2.AddField("Source_Pos_ID_GTP", Source_Pos_ID_GTP, hslString, 255);
    file2.AddField("GTP_Vol", GTP_Vol, hslFloat);
    file2.AddField("Source_Pos_ID_N1Y", Source_Pos_ID_N1Y, hslString, 255);
    file2.AddField("N1Y_Vol", N1Y_Vol, hslFloat);
    if( 0 == file2.Open(Worklist_Stoich_IVT + " " + "Sheet1$", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, Worklist_Stoich_IVT, "HxMetEdCompCmd");
    }
    {
      loopCounter1 = 0;
      while (
         (file2.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == file2.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        SeqAdd(Seq_DNA_Source, Source_Labware_ID_DNA, Source_Pos_ID_DNA);
        SeqAdd(Seq_DNA_Des, Des_Labware_ID, Des_Pos_ID);
        SeqAdd(Seq_WaterSource_200ml, Source_Labware_ID_Water, Source_Pos_ID_Water);
        SeqAdd(Seq_Water_Des, Des_Labware_ID, Des_Pos_ID);
        SeqAdd(Seq_ATP_Source, Source_Labware_ID_NTP, Source_Pos_ID_ATP);
        SeqAdd(Seq_ATP_Des, Des_Labware_ID, Des_Pos_ID);
        SeqAdd(Seq_CTP_Source, Source_Labware_ID_NTP, Source_Pos_ID_CTP);
        SeqAdd(Seq_CTP_Des, Des_Labware_ID, Des_Pos_ID);
        SeqAdd(Seq_GTP_Source, Source_Labware_ID_NTP, Source_Pos_ID_GTP);
        SeqAdd(Seq_GTP_Des, Des_Labware_ID, Des_Pos_ID);
        SeqAdd(Seq_N1Y_Source, Source_Labware_ID_NTP, Source_Pos_ID_N1Y);
        SeqAdd(Seq_N1Y_Des, Des_Labware_ID, Des_Pos_ID);
        arr_DNA_Vol.AddAsLast(DNA_Vol);
        arr_Water_vol.AddAsLast(Water_Vol);
        arr_ATP_Vol.AddAsLast(ATP_Vol);
        arr_CTP_Vol.AddAsLast(CTP_Vol);
        arr_GTP_Vol.AddAsLast(GTP_Vol);
        arr_N1Y_Vol.AddAsLast(N1Y_Vol);
      }
    }
    if( 0 != file2.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file2.RemoveFields();
    TrcTraceSequence(Seq_DNA_Source);
    TrcTraceSequence(Seq_DNA_Des);
    TrcTraceSequence(Seq_WaterSource_200ml);
    TrcTraceSequence(Seq_Water_Des);
    TrcTraceSequence(Seq_ATP_Source);
    TrcTraceSequence(Seq_ATP_Des);
    TrcTraceSequence(Seq_CTP_Source);
    TrcTraceSequence(Seq_CTP_Des);
    TrcTraceSequence(Seq_GTP_Source);
    TrcTraceSequence(Seq_GTP_Des);
    TrcTraceSequence(Seq_N1Y_Source);
    TrcTraceSequence(Seq_N1Y_Des);
    TrcTrace(Translate("DNA_Volumes"), arr_DNA_Vol.ElementAt( 1 -1));
    TrcTrace(Translate("Water_volumes"), arr_Water_vol.ElementAt( 1 -1));
    TrcTrace(Translate("ATP_Volumes"), arr_ATP_Vol.ElementAt( 1 -1));
    TrcTrace(Translate("CTP_Volumes"), arr_CTP_Vol.ElementAt( 1 -1));
    TrcTrace(Translate("GTP_Volumes"), arr_GTP_Vol.ElementAt( 1 -1));
    TrcTrace(Translate("N1Y_Volumes"), arr_N1Y_Vol.ElementAt( 1 -1));
    Seq_WaterSource_200ml.SetCurrentPosition(1);
    Seq_Water_Des.SetCurrentPosition(1);
    Seq_DNA_Source.SetCurrentPosition(1);
    Seq_DNA_Des.SetCurrentPosition(1);
    Seq_ATP_Source.SetCurrentPosition(1);
    Seq_ATP_Des.SetCurrentPosition(1);
    Seq_CTP_Source.SetCurrentPosition(1);
    Seq_CTP_Des.SetCurrentPosition(1);
    Seq_GTP_Source.SetCurrentPosition(1);
    Seq_GTP_Des.SetCurrentPosition(1);
    Seq_N1Y_Source.SetCurrentPosition(1);
    Seq_N1Y_Des.SetCurrentPosition(1);
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    customDialog_4.InitCustomDialog("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");
    customDialog_4.ShowCustomDialog();
    customDialog_3.InitCustomDialog("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");
    customDialog_3.ShowCustomDialog();
    STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300CountChannels, 999);
    STAR_TIP_TOOLS::TipCounter_Edit(ML_STAR, ML_STAR.Seq_1000ul_tip_pickup, t_strMPHTipCount, 999);
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300CountChannels, 576);
    MECC::TraceComment(Translate("#######################################\n\nAddition of water\n\n#######################################"));
    {
      loopCounter2 = 0;
      while (
         (Seq_WaterSource_200ml.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, Seq_WaterSource_200ml, 1);
        loopCounter2 = loopCounter2 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        loopCounter2 = loopCounter2 + 7;
        if (
           (Seq_WaterSource_200ml.GetCurrentPosition() > 0 && Seq_WaterSource_200ml.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      Seq_WaterSource_200ml.SetMax(Seq_WaterSource_200ml.GetTotal());
    }
    MECC::TraceComment(Translate("#######################################\n\nAddition of ATP\n\n#######################################"));
    {
      loopCounter3 = 0;
      while (
         (Seq_ATP_Source.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, Seq_ATP_Source, 1);
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        loopCounter3 = loopCounter3 + 7;
        if (
           (Seq_ATP_Source.GetCurrentPosition() > 0 && Seq_ATP_Source.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      Seq_ATP_Source.SetMax(Seq_ATP_Source.GetTotal());
    }
    MECC::TraceComment(Translate("#######################################\n\nAddition of CTP\n\n#######################################"));
    {
      loopCounter4 = 0;
      while (
         (Seq_CTP_Source.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, Seq_CTP_Source, 1);
        loopCounter4 = loopCounter4 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        loopCounter4 = loopCounter4 + 7;
        if (
           (Seq_CTP_Source.GetCurrentPosition() > 0 && Seq_CTP_Source.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      Seq_CTP_Source.SetMax(Seq_CTP_Source.GetTotal());
    }
    MECC::TraceComment(Translate("#######################################\n\nAddition of GTP\n\n#######################################"));
    {
      loopCounter5 = 0;
      while (
         (Seq_GTP_Source.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, Seq_GTP_Source, 1);
        loopCounter5 = loopCounter5 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        loopCounter5 = loopCounter5 + 7;
        if (
           (Seq_GTP_Source.GetCurrentPosition() > 0 && Seq_GTP_Source.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      Seq_GTP_Source.SetMax(Seq_GTP_Source.GetTotal());
    }
    MECC::TraceComment(Translate("#######################################\n\nAddition of N1Y/UTP\n\n#######################################"));
    {
      loopCounter6 = 0;
      while (
         (Seq_N1Y_Source.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, Seq_N1Y_Source, 1);
        loopCounter6 = loopCounter6 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        loopCounter6 = loopCounter6 + 7;
        if (
           (Seq_N1Y_Source.GetCurrentPosition() > 0 && Seq_N1Y_Source.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      Seq_N1Y_Source.SetMax(Seq_N1Y_Source.GetTotal());
    }
    STAR_TIP_TOOLS::TipCheck(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, t_str300CountChannels, 96);
    MECC::TraceComment(Translate("#######################################\n\nAddition of DNA template\n\n#######################################"));
    {
      loopCounter7 = 0;
      while (
         (Seq_DNA_Source.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, Seq_DNA_Source, 1);
        loopCounter7 = loopCounter7 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        loopCounter7 = loopCounter7 + 7;
        if (
           (Seq_DNA_Source.GetCurrentPosition() > 0 && Seq_DNA_Source.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      Seq_DNA_Source.SetMax(Seq_DNA_Source.GetTotal());
    }
    MECC::TraceComment(Translate("#######################################\n\nAddition of IVT Master Mix\n\n#######################################"));
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    customDialog_2.InitCustomDialog("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");
    customDialog_2.ShowCustomDialog();
    STAR_TIP_TOOLS::_ExitLibrary();
  } }
