#include "mRNA_Array_TK.res"
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLDeckVisualize.hsl" }
global device ML_STAR ("mRNA_Array_TK.lay", "ML_STAR", hslTrue);
variable loopCounter1;
variable Souce_Labware_ID;
variable mRNA_Vol;
variable Souce_Pos_ID;
file file1;
sequence Seq_mRNA_Source;
dialog customDialog_1;
variable Worklist_Location;
variable arr_mRNA_vol[];
variable Des_Labware_ID;
variable Des_pos_ID;
sequence Seq_mRNA_Destination;
variable loopCounter2;
dialog customDialog_2;
dialog customDialog_3;
dialog customDialog_4;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("**********************\nmRNA_Array_TK\n\nmethod to cherry pick mRNA\n\nDependencies: mRNA_Array.lay\n\n**********************"));
    arr_mRNA_vol.SetSize(0);
    Worklist_Location = Translate("");
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    Worklist_Location = customDialog_1.GetCustomDialogProperty( "path1.Path" );
    file1.AddField("Souce_Labware_ID", Souce_Labware_ID, hslString, 255);
    file1.AddField("Des_Labware_ID", Des_Labware_ID, hslString, 255);
    file1.AddField("Des_pos_ID", Des_pos_ID, hslString, 255);
    file1.AddField("Souce_Pos_ID", Souce_Pos_ID, hslString, 255);
    file1.AddField("mRNA_Vol", mRNA_Vol, hslFloat);
    if( 0 == file1.Open(Worklist_Location + " " + "Sheet1$", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, Worklist_Location, "HxMetEdCompCmd");
    }
    {
      loopCounter1 = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        SeqAdd(Seq_mRNA_Source, Souce_Labware_ID, Souce_Pos_ID);
        SeqAdd(Seq_mRNA_Destination, Des_Labware_ID, Des_pos_ID);
        arr_mRNA_vol.AddAsLast(mRNA_Vol);
      }
    }
    TrcTraceSequence(Seq_mRNA_Source);
    TrcTraceSequence(Seq_mRNA_Destination);
    TrcTrace(Translate("arr_volumes"), arr_mRNA_vol.ElementAt( 1 -1));
    Seq_mRNA_Source.SetCurrentPosition(1);
    Seq_mRNA_Destination.SetCurrentPosition(1);
    DeckVisualize::UpdateUsedPositions(ML_STAR, Seq_mRNA_Source, 6, Translate("load mRNA"));
    customDialog_4.InitCustomDialog("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");
    customDialog_4.ShowCustomDialog();
    DeckVisualize::UpdateUsedPositions(ML_STAR, Seq_mRNA_Source, 5, Translate("please load mRNA"));
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    {
      loopCounter2 = 0;
      while (
         (Seq_mRNA_Source.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Seq_300uL_tips, 1, Seq_mRNA_Source, 1);
        loopCounter2 = loopCounter2 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (Seq_mRNA_Source.GetCurrentPosition() > 0 && Seq_mRNA_Source.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Seq_300uL_tips.SetMax(ML_STAR.Seq_300uL_tips.GetTotal());
      Seq_mRNA_Source.SetMax(Seq_mRNA_Source.GetTotal());
      Seq_mRNA_Source.SetCurrentPosition(1);
    }
  } }
