 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLDeckVisualize.hsl" }
#include "mRNA_Normalization_V1.0.0.res"
variable loopCounter1;
variable Souce_Labware_ID;
variable mRNA_Vol;
variable Souce_Pos_ID;
file file1;
sequence Seq_mRNA_Source;
dialog customDialog_1;
variable Worklist_Location;
variable arr_mRNA_vol[];
variable Des_Labware_ID;
variable Des_pos_ID;
sequence Seq_mRNA_Destination;
variable loopCounter2;
dialog customDialog_2;
dialog customDialog_3;
dialog customDialog_4;
dialog customDialog_5;
variable Source_Labware_ID_Water;
variable Source_Pos_ID_Water;
variable Source_Pos_ID_mRNA;
variable Source_Labware_ID_mRNA;
variable Worklist_location;
variable Des_Pos_ID;
variable loopCounter3;
variable Water_Vol;
sequence Seq_Water_Des;
sequence Seq_WaterSource_200ml;
variable arr_Water_vol[];
global device ML_STAR ("mRNA_Normalization_V1.0.0.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("**********************\nmRNA_Array_TK\n\nmethod to cherry pick mRNA\n\nDependencies: mRNA_Array.lay\n\n**********************"));
    if(0){
      Worklist_location = Translate("");
      customDialog_1.InitCustomDialog("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");
      customDialog_1.ShowCustomDialog();
      Worklist_Location = customDialog_1.GetCustomDialogProperty( "path1.Path" );
    }
    arr_mRNA_vol.SetSize(0);
    arr_Water_vol.SetSize(0);
    file1.SetExtendedProperties( "IMEX=1");
    file1.AddField("Source_Labware_ID_mRNA", Source_Labware_ID_mRNA, hslString, 255);
    file1.AddField("Source_Pos_ID_mRNA", Source_Pos_ID_mRNA, hslString, 255);
    file1.AddField("mRNA_Vol", mRNA_Vol, hslFloat);
    file1.AddField("Source_Labware_ID_Water", Source_Labware_ID_Water, hslString, 255);
    file1.AddField("Source_Pos_ID_Water", Source_Pos_ID_Water, hslString, 255);
    file1.AddField("Water_Vol", Water_Vol, hslFloat);
    file1.AddField("Des_Labware_ID", Des_Labware_ID, hslString, 255);
    file1.AddField("Des_Pos_ID", Des_Pos_ID, hslString, 255);
    if( 0 == file1.Open("C:\\Users\\tkelly\\Desktop\\worklist test.xls" + " " + "Sheet1$", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Users\\tkelly\\Desktop\\worklist test.xls", "HxMetEdCompCmd");
    }
    {
      loopCounter1 = 0;
      while (
         (file1.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == file1.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        SeqAdd(Seq_mRNA_Source, Source_Labware_ID_mRNA, Source_Pos_ID_mRNA);
        SeqAdd(Seq_mRNA_Destination, Des_Labware_ID, Des_Pos_ID);
        SeqAdd(Seq_WaterSource_200ml, Source_Labware_ID_Water, Source_Pos_ID_Water);
        SeqAdd(Seq_Water_Des, Des_Labware_ID, Des_Pos_ID);
        arr_mRNA_vol.AddAsLast(mRNA_Vol);
        arr_Water_vol.AddAsLast(Water_Vol);
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    TrcTraceSequence(Seq_mRNA_Source);
    TrcTraceSequence(Seq_mRNA_Destination);
    TrcTraceSequence(Seq_WaterSource_200ml);
    TrcTraceSequence(Seq_Water_Des);
    TrcTrace(Translate("Arr_volumes"), arr_mRNA_vol.ElementAt( 1 -1));
    TrcTrace(Translate("Water_volumes"), arr_Water_vol.ElementAt( 1 -1));
    Seq_mRNA_Source.SetCurrentPosition(1);
    if(0){
      Seq_mRNA_Source.SetCount(100);
    }
    Seq_mRNA_Destination.SetCurrentPosition(1);
    if(0){
      Seq_mRNA_Destination.SetCount(100);
    }
    Seq_WaterSource_200ml.SetCurrentPosition(1);
    Seq_Water_Des.SetCurrentPosition(1);
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    MECC::TraceComment(Translate("#######################################\n\nAddition of water\n\n#######################################"));
    {
      loopCounter3 = 0;
      while (
         (Seq_WaterSource_200ml.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, Seq_WaterSource_200ml, 1);
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        loopCounter3 = loopCounter3 + 7;
        if (
           (Seq_WaterSource_200ml.GetCurrentPosition() > 0 && Seq_WaterSource_200ml.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      Seq_WaterSource_200ml.SetMax(Seq_WaterSource_200ml.GetTotal());
    }
    MECC::TraceComment(Translate("#######################################\n\nAddition of mRNA\n\n#######################################"));
    {
      loopCounter2 = 0;
      while (
         (Seq_mRNA_Source.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, Seq_mRNA_Source, 1);
        loopCounter2 = loopCounter2 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        loopCounter2 = loopCounter2 + 7;
        if (
           (Seq_mRNA_Source.GetCurrentPosition() > 0 && Seq_mRNA_Source.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      Seq_mRNA_Source.SetMax(Seq_mRNA_Source.GetTotal());
    }
    customDialog_5.InitCustomDialog("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");
    customDialog_5.ShowCustomDialog();
    if(0){
      abort;
    }
  } }
