global device ML_STAR ("mRNA_Array.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
#include "mRNA_Array.res"
variable Source_Labware_ID;
variable loopCounter1;
variable Source_Pos_ID;
variable mRNA_Vol;
sequence Seq_mRNA_Source;
variable arr_mRNA_vol[];
variable Des_Labware_ID;
variable loopCounter2;
variable Des_Pos_ID;
sequence Seq_mRNA_Destination;
dialog customDialog_1;
file file5;
variable Worklist_File;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("##################################\nmRNA Array\nv1.0.0\nmethod to cherry pick\nDependencies mRNA_Array.lay\n#################################\n"));
    Worklist_File = Translate("");
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    file5.AddField("Source_Labware_ID", Source_Labware_ID, hslString, 255);
    file5.AddField("Des_Labware_ID", Des_Labware_ID, hslString, 255);
    file5.AddField("Des_Pos_ID", Des_Pos_ID, hslString, 255);
    file5.AddField("Source_Pos_ID", Source_Pos_ID, hslString, 255);
    file5.AddField("mRNA_Vol", mRNA_Vol, hslFloat);
    if( 0 == file5.Open("C:\\Program Files (x86)\\HAMILTON\\Worklist build test 4.xls" + " " + "Sheet1$", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\Program Files (x86)\\HAMILTON\\Worklist build test 4.xls", "HxMetEdCompCmd");
    }
    arr_mRNA_vol.SetSize(0);
    {
      loopCounter1 = 0;
      while (
         (file5.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == file5.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        SeqAdd(Seq_mRNA_Source, Source_Labware_ID, Source_Pos_ID);
        SeqAdd(Seq_mRNA_Destination, Des_Labware_ID, Des_Pos_ID);
        arr_mRNA_vol.AddAsLast(mRNA_Vol);
      }
    }
    TrcTraceSequence(Seq_mRNA_Source);
    TrcTraceSequence(Seq_mRNA_Destination);
    TrcTrace(Translate("Arr_volumes"), arr_mRNA_vol.ElementAt( 1 -1));
    Seq_mRNA_Source.SetCurrentPosition(1);
    Seq_mRNA_Destination.SetCurrentPosition(1);
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    {
      loopCounter2 = 0;
      while (
         (Seq_mRNA_Source.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, Seq_mRNA_Source, 1, ML_STAR.Seq_300ul_Tips_192pos, 1);
        loopCounter2 = loopCounter2 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (Seq_mRNA_Source.GetCurrentPosition() > 0 && Seq_mRNA_Source.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      Seq_mRNA_Source.SetMax(Seq_mRNA_Source.GetTotal());
      ML_STAR.Seq_300ul_Tips_192pos.SetMax(ML_STAR.Seq_300ul_Tips_192pos.GetTotal());
      Seq_mRNA_Source.SetCurrentPosition(1);
    }
  } }
