 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
#include "mRNA_Normalization_V1.0.0.res"
variable loopCounter1;
variable mRNA_Vol;
sequence Seq_mRNA_Source;
variable arr_mRNA_vol[];
variable Des_Labware_ID;
variable loopCounter2;
variable Des_Pos_ID;
sequence Seq_mRNA_Destination;
dialog customDialog_1;
variable Worklist_File;
global device ML_STAR ("mRNA_Normalization_V1.0.0.lay", "ML_STAR", hslTrue);
variable Source_Labware_ID_Water;
variable Source_Pos_ID_Water;
variable Source_Pos_ID_mRNA;
variable Source_Labware_ID_mRNA;
variable Water_Vol;
file file1;
variable arr_Water_vol[];
variable loopCounter3;
sequence Seq_Water_Des;
sequence Seq_WaterSource_200ml;
dialog customDialog_2;
variable Worklist_Location;
file file3;
dialog customDialog_3;
dialog customDialog_4;
dialog customDialog_5;
variable t_varDialogue;
dialog customDialog_6;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    MECC::TraceComment(Translate("##################################\nmRNA Normalization\nv1.0.4\nThis is a method to normalize up to 1ml of RNA to desired concentration based on worklist where RNA and water volumes are defined\n\n#################################\n"));
    Worklist_Location = Translate("");
    customDialog_4.InitCustomDialog("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");
    customDialog_4.ShowCustomDialog();
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    customDialog_5.InitCustomDialog("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");
    customDialog_5.ShowCustomDialog();
    t_varDialogue = customDialog_5.GetCustomDialogProperty( "ReturnValue" );
    arr_mRNA_vol.SetSize(0);
    arr_Water_vol.SetSize(0);
    file3.SetExtendedProperties( "IMEX=1");
    file3.AddField("Source_Labware_ID_mRNA", Source_Labware_ID_mRNA, hslString, 255);
    file3.AddField("Source_Pos_ID_mRNA", Source_Pos_ID_mRNA, hslString, 255);
    file3.AddField("mRNA_Vol", mRNA_Vol, hslFloat);
    file3.AddField("Source_Labware_ID_Water", Source_Labware_ID_Water, hslString, 255);
    file3.AddField("Source_Pos_ID_Water", Source_Pos_ID_Water, hslString, 255);
    file3.AddField("Water_Vol", Water_Vol, hslFloat);
    file3.AddField("Des_Labware_ID", Des_Labware_ID, hslString, 255);
    file3.AddField("Des_Pos_ID", Des_Pos_ID, hslString, 255);
    if( 0 == file3.Open(Worklist_Location + " " + "Sheet1$", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, Worklist_Location, "HxMetEdCompCmd");
    }
    {
      loopCounter1 = 0;
      while (
         (file3.Eof() == 0)
      )
      {
        loopCounter1 = loopCounter1 + 1;
        if( 0 == file3.ReadRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        SeqAdd(Seq_mRNA_Source, Source_Labware_ID_mRNA, Source_Pos_ID_mRNA);
        SeqAdd(Seq_mRNA_Destination, Des_Labware_ID, Des_Pos_ID);
        SeqAdd(Seq_WaterSource_200ml, Source_Labware_ID_Water, Source_Pos_ID_Water);
        SeqAdd(Seq_Water_Des, Des_Labware_ID, Des_Pos_ID);
        arr_mRNA_vol.AddAsLast(mRNA_Vol);
        arr_Water_vol.AddAsLast(Water_Vol);
      }
    }
    if( 0 != file1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    file1.RemoveFields();
    TrcTraceSequence(Seq_mRNA_Source);
    TrcTraceSequence(Seq_mRNA_Destination);
    TrcTraceSequence(Seq_WaterSource_200ml);
    TrcTraceSequence(Seq_Water_Des);
    TrcTrace(Translate("Arr_volumes"), arr_mRNA_vol.ElementAt( 1 -1));
    TrcTrace(Translate("Water_volumes"), arr_Water_vol.ElementAt( 1 -1));
    Seq_mRNA_Source.SetCurrentPosition(1);
    if(0){
      Seq_mRNA_Source.SetCount(100);
    }
    Seq_mRNA_Destination.SetCurrentPosition(1);
    if(0){
      Seq_mRNA_Destination.SetCount(100);
    }
    Seq_WaterSource_200ml.SetCurrentPosition(1);
    Seq_Water_Des.SetCurrentPosition(1);
    customDialog_6.InitCustomDialog("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");
    customDialog_6.ShowCustomDialog();
    t_varDialogue = customDialog_6.GetCustomDialogProperty( "ReturnValue" );
    MECC::TraceComment(Translate("#######################################\n\nAddition of water\n\n#######################################"));
    {
      loopCounter3 = 0;
      while (
         (Seq_WaterSource_200ml.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, Seq_WaterSource_200ml, 1);
        loopCounter3 = loopCounter3 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        loopCounter3 = loopCounter3 + 7;
        if (
           (Seq_WaterSource_200ml.GetCurrentPosition() > 0 && Seq_WaterSource_200ml.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      Seq_WaterSource_200ml.SetMax(Seq_WaterSource_200ml.GetTotal());
    }
    MECC::TraceComment(Translate("#######################################\n\nAddition of mRNA\n\n#######################################"));
    {
      loopCounter2 = 0;
      while (
         (Seq_mRNA_Source.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, Seq_mRNA_Source, 1);
        loopCounter2 = loopCounter2 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        loopCounter2 = loopCounter2 + 7;
        if (
           (Seq_mRNA_Source.GetCurrentPosition() > 0 && Seq_mRNA_Source.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      Seq_mRNA_Source.SetMax(Seq_mRNA_Source.GetTotal());
    }
    customDialog_3.InitCustomDialog("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");
    customDialog_3.ShowCustomDialog();
    if(0){
      abort;
    }
  } }
